#######################################################################
# Compile all standard Kea-Expert DSP pulse programs
#
# Can also be used and generate FX3 update tables for the standard 
# software. To do this set the last parameter to compileOneFolder
# to 1 as well as the gFX3->updateDebug and gFX3->useUpdateTables flags
#######################################################################


procedure(CompileAll)
   
   # Compile the macros
   dirCompiler = "$appdir$\\Macros\\Spinsolve-Expert\\Other Macros"
   pr "\n --------------------------------------------\n"
   pr " Kea Expert DSP Pulse-Program compilation"
   pr "\n --------------------------------------------\n\n"
   
   pr "\n Core experiments"
   pr "\n --------------------------------------------\n\n"
   
   
   par = struct()
   par->supportV3Ctrl = "no"
   par->supportV4Ctrl = "no"
   par->supportV5Ctrl = "yes"

   windowvar(nrAttempts,nrErrors)
   nrAttempts = 0
   nrErrors = 0
    
   gFX3->updateDebug = 0
   gFX3->useUpdateTable = 0

# Compile all standard experiments
   try
   
   # All experiments in Kea-NMR folder
      dirPP = "$appdir$\\Macros\\Kea-NMR"
     :compileOneFolder(dirCompiler, par, dirPP)  

   # All experiments in ProtonExamples folder
      dirPP = "$appdir$\\Macros\\Kea-Tests"
     :compileOneFolder(dirCompiler, par, dirPP)  
  
   catch

      pr lasterror()

   endtry

# Revert to having fx3 as the first DLL
   dspCurPort = dspsetport()
   fx3CurPort = fx3setport()
   try
      usedll("fx3PPRun.dll")
   catch
      usedll("fx3PPDebug.dll")
   endtry
   dspsetport(dspCurPort)
   fx3setport(fx3CurPort)

   pr "\n   Number of FX3 compile attempts = $nrAttempts$\n"
   pr "   Number of FX3 compile failures = $nrErrors$\n"

   gFX3->updateDebug = 0

endproc()

procedure(compileOneFolder, dirCompiler, par, dirPP, experiment = null, runTableCheck=0)
   
   
   pr "\n $getbasedir(dirPP)$ experiments"
   pr "\n --------------------------------------------\n\n"
   
   par->outputFolder = dirPP


   if(experiment != null)

      par->baseName = experiment
      cd(dirCompiler)
      (r, ppInfo) = CompilerBackDoor:compileIt(par)
      if(r == 0)
         print("   $experiment$ compiled for DSP\n")
      else
         print("   $experiment$ compilation for DSP FAILED\n")
      endif
      if(gFX3->useUpdateTable)
         try
            nrAttempts = nrAttempts + 1
            pr "\n   $experiment$ compiled for FX3\n"
            CompileFX3PP(dirPP, experiment, ppInfo)
            if(runTableCheck)
               :RunEventTableCheck(dirPP, experiment, ppInfo)
            endif
   
         catch
            pr lasterror()
            print("\n   $experiment$ compilation for FX3 FAILED\n")
            nrErrors = nrErrors + 1
         endtry
      endif

   else
   
      expts = getdirlist(dirPP)
      for(k = 0 to size(expts)-1)   
         par->baseName = expts[k]     
         cd(dirCompiler)
         (r, ppInfo) = CompilerBackDoor:compileIt(par)
         if(r == 0)
            print("   $par->baseName$ compiled for DSP\n")
         else
            print("   $par->baseName$ compilation for DSP FAILED\n")
         endif 
         if(gFX3->useUpdateTable)
            try
               nrAttempts = nrAttempts + 1
               CompileFX3PP(dirPP, par->baseName, ppInfo)
               pr "   $par->baseName$ compiled for FX3\n"
               if(runTableCheck)
                  :RunEventTableCheck(dirPP, par->baseName, ppInfo)
               endif
   
            catch
               pr lasterror()
               print("\n   $par->baseName$ compilation for FX3 FAILED\n")
               nrErrors = nrErrors + 1
            endtry  
         endif   
      next(k)
   endif



endproc()

# Run the experiment in update debug mode
procedure(RunEventTableCheck, path, protocol, ppInfo)

   nr = guiwinnr()
   guiwinnr(gView->wn)

   gFX3->updateDebug = 1

  # ppGroup = getbasedir(path)

   gExpt->addExperiment(path,protocol,null)
   gExpt->runExperiment()   
   print("\n")

   guiwinnr(nr)

endproc()


   
   