#########################################################
# 
# SSE
#
# Stimulated spin echo + CPMG detection.
# www.magritek.com, March 2013
# Prospa V3.12
#
# Copyright (c) Magritek GmbH 2014
#
# U.I. V3
#########################################################

procedure(SSE, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","File settings"] # Tab names
   wv_ctrls = [2,32,33,56,57,77,78,87] # Control groups
   wv_shift = [-14,180,374,377] # Amount to shift control groups
   wv_other = [86,262,633]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"SSE",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["a1 = 90Amplitude",
          "a2 = 180Amplitude",
          "d1 = pulseLength",
          "d2 = 1000*tauMin+echoTime/2-d1-pgo",
          "d3 = echoTime/2-acqTime*500-d1/2+rxLat+echoShift",
          "d4 = echoTime-d1-pgo-d3",
          "d5 = 1000*tauMin-d1-pgo",
          "w1 = 1000*DELTA",
          "n1 = nrEchoes",
          "n2 = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["d5","d2"]
   pp_list = ["a1","p1","d1","d5","p2","w1","p3","d2","n1","l1","a2","p4","d3","n2","d4"]
   pp_name = "SSE.p"
   phase_list = [0,2,0,2,0,2,0,2,1,3,1,3,1,3,1,3;0,0,2,2,0,0,2,2,0,0,2,2,0,0,2,2;0,0,0,0,2,2,2,2,0,0,0,0,2,2,2,2;1,1,1,1,1,1,1,1,0,0,0,0,0,0,0,0;2,0,0,2,0,2,2,0,1,3,3,1,3,1,1,3]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("Stimulated Spin Echo + CPMG detection", -1, -1, 603, 630)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 585, 250,
         which = getpar(0,1,"currenttab");)
      groupbox(2, "Pulse sequence", 9, 9, 577, 187)
      statictext(3, 66, 27, "center", "B1 Frequency (MHz)")
      textbox(4, 43, 41, 46)
      statictext(5, 66, 67, "center", "Repetition time (ms)")
      textbox(6, 43, 82, 46)
      statictext(7, 221, 35, "right", "90 amplitude (dB)")
      textbox(8, 227, 31, 40)
      statictext(9, 221, 61, "right", "180 amplitude (dB)")
      textbox(10, 227, 57, 40)
      statictext(11, 221, 87, "right", "Pulse length (us)")
      textbox(12, 227, 83, 40)
      statictext(13, 376, 35, "right", "Echotime (us)")
      textbox(14, 382, 31, 40)
      statictext(15, 376, 61, "right", "Number of echoes")
      textbox(16, 382, 57, 40)
      statictext(17, 376, 87, "right", "Echo shift (us)")
      textbox(18, 382, 83, 40)
      statictext(19, 376, 165, "right", "Gradient (kHz/mm)")
      textbox(20, 382, 161, 46)
      statictext(21, 531, 35, "right", "D (10-9 m^2/s)")
      textbox(22, 537, 31, 40)
      statictext(23, 531, 61, "right", "tau min (ms)")
      textbox(24, 537, 57, 40)
      statictext(25, 531, 87, "right", "tau max (ms)")
      textbox(26, 537, 83, 40)
      statictext(27, 531, 113, "right", "DELTA (ms)")
      textbox(28, 537, 109, 40)
      statictext(29, 531, 139, "right", "Number of tau incr.")
      textbox(30, 537, 135, 40)
      statictext(31, 531, 165, "right", "Time increment")
      textmenu(32, 537, 161, 40, 200)
      groupbox(33, "Acquisition", 9, 203, 577, 187)
      statictext(34, 91, 251, "center", "Rx Gain (dB)")
      textmenu(35, 74, 269, 39, 200)
      statictext(36, 91, 300, "center", "Rx Phase (degrees)")
      textbox(37, 74, 316, 39)
      statictext(38, 199, 253, "center", "Number of")
      statictext(39, 199, 266, "center", "complex points")
      textmenu(40, 246, 255, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(41, 199, 285, "center", "Dwell time")
      statictext(42, 199, 298, "center", "(us)")
      textmenu(43, 246, 288, 62, 200,
         keaCtrl:updateFilters();)
      statictext(44, 199, 319, "center", "Number of")
      statictext(45, 199, 332, "center", "scans")
      textbox(46, 246, 320, 62)
      statictext(47, 373, 267, "center", "Flat filter")
      checkbox(48, 409, 268, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(49, 373, 291, "center", "Accumulate")
      checkbox(50, 409, 292, "no,yes", "no")
      statictext(51, 373, 315, "center", "Phase cycle")
      checkbox(52, 409, 317, "no,yes", "yes")
      statictext(53, 501, 251, "center", "Spectral width (kHz)")
      textbox(54, 472, 265, 56)
      statictext(55, 501, 302, "center", "Acquisition time (ms)")
      textbox(56, 472, 316, 56)
      groupbox(57, "File_Settings", 9, 397, 577, 187)
      statictext(58, 94, 464, "right", "Working")
      statictext(59, 94, 477, "right", "directory")
      textbox(60, 110, 465, 215)
      button(61, 330, 465, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(62, 101, 501, "right", "Experiment")
      statictext(63, 86, 514, "right", "name")
      textbox(64, 110, 504, 105)
      button(65, 221, 504, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(66, 323, 501, "right", "Experiment")
      statictext(67, 313, 514, "right", "number")
      textbox(68, 331, 504, 25)
      button(69, 361, 504, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(70, 385, 463, "center", "Save")
      statictext(71, 385, 476, "center", "data")
      checkbox(72, 413, 470, "false,true", "true")
      statictext(73, 429, 501, "center", "Auto")
      statictext(74, 429, 514, "center", "increment")
      checkbox(75, 464, 509, "no,yes", "no")
      button(76, 450, 458, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(77, 505, 458, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(78, 33, 597, 10, 10, [255,255,255,255])
      colorbox(79, 33, 610, 10, 10, [255,255,255,255])
      button(80, 53, 594, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(81, 118, 594, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(82, 183, 594, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(83, 248, 594, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(84, 313, 594, 54, 29, "Help",
         help("Macros\NMR-MOUSE","SSE.htm");)
      button(85, 378, 594, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(86, 443, 594, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(87, 508, 594, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(88, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[20,1e+008])
      setpar(n,8,"valueID","90Amplitude",
                  "type","float",
                  "range",[-72,-6])
      setpar(n,10,"valueID","180Amplitude",
                  "type","float",
                  "range",[-85,0])
      setpar(n,12,"valueID","pulseLength",
                  "type","float",
                  "range",[1,500])
      setpar(n,14,"valueID","echoTime",
                  "type","float",
                  "range",[2,327670])
      setpar(n,16,"valueID","nrEchoes",
                  "type","integer",
                  "range",[1,16000])
      setpar(n,18,"valueID","echoShift",
                  "type","float",
                  "range",[-20,20])
      setpar(n,20,"valueID","gradient",
                  "type","float")
      setpar(n,22,"valueID","DEst",
                  "type","float")
      setpar(n,24,"valueID","tauMin",
                  "type","float",
                  "range",[0.001,100])
      setpar(n,26,"valueID","tauMax",
                  "type","float",
                  "range",[0.001,100])
      setpar(n,28,"valueID","DELTA",
                  "type","float",
                  "range",[0.001,10000])
      setpar(n,30,"valueID","nrPntsTau",
                  "type","integer",
                  "range",[1,1000])
      setpar(n,32,"valueID","index",
                  "menu",["lin","exp"])
      setpar(n,35,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,37,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,40,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,43,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,46,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,48,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,50,"valueID","accumulate")
      setpar(n,52,"valueID","usePhaseCycle")
      setpar(n,54,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,56,"valueID","acqTime",
                  "tag","disable")
      setpar(n,60,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,64,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,68,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,72,"valueID","saveData")
      setpar(n,75,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,76,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,77,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,78,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,79,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,80,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,81,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,82,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,83,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,84,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,85,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,86,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,87,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",88)

endproc(n)
 # :printOptTauMaxSSE();


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex,ext)


# Make all gui parameters available
   assignlist(guipar)

# Check RF duty cycle
# for PM25----------------------------------------------
       if(pulseLength*nrEchoes/repTime>1.6)
# for PM5----------------------------------------------
    #    if(pulseLength*nrEchoes/repTime>3)
    message("Error","RF duty cycle is too high, reduce nrEchoes or increase repTime","error") 
    return(0)
  endif

# Check for p.s. duty cycle should be < 20%
  if(d1/(echoTime) > 0.25)
      message("Error","Duty cycle is too high in pulse sequence!\rshould be < 25%\rIncrease echo time\ror reduce pulse length.","error")
      return(0)
   endif



   if(0==:checkDelay(d1,1)); return; endif
   if(0==:checkDelay(d2,1)); return; endif
   if(0==:checkDelay(d3,1)); return; endif
   if(d4-keaNMR:getAcqTime(guipar) < 1)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
      return(0)
   endif

   if(0==:checkDelay(d5,1)); return; endif
   if(0==:checkDelay(w1,1)); return; endif



# Storage for output data
   
   sumData = cmatrix(totPnts)

# calculate the time axis 
   totalTime = matrix(totPnts)
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000

   tauAxis  = matrix(nrPntsTau)
   tauAxis2 = matrix(nrPntsTau)
   
   gradientTperMeter= gradient/42.57
# the factor 1000 is to change from seconds to ms 
   t2Diff = 1000*(DEst*1e-9*(DELTA/1000)*(gamma*gradientTperMeter)^2)^(-1/2)

   amax = exp(-(tauMin/t2Diff)^2)
   amin = exp(-(tauMax/t2Diff)^2)
   astep= (amax-amin)/(nrPntsTau-1)

   for(m = 0 to nrPntsTau-1)
    #lineal time increment
      if(index=="lin")
        tauAxis[m] = tauMin+ m*(tauMax-tauMin)/(nrPntsTau-1) 
      endif 
   #exponetial time increment
      if(index=="exp") 
        tauAxis[m] = t2Diff*(-loge(amax-astep*(m)))^(1/2)
      endif
   next(m)

   if (tauMax >3*t2Diff); tauAxis[nrPntsTau-1]= tauMax; endif

   tauAxis2[~] = 1e-18*(gamma*gradientTperMeter)^2*( DELTA*(tauAxis[~])^2 + 2/3*(tauAxis[~])^3)

   try
      if(excecutedBackdoor == "yes")
     # pr "SEE excuted via backdoor\n"
      endif 
   catch
      excecutedBackdoor = "no"
      refSignal = 1
      multiplot("1d",3,1)
   endtry

   # Reset the timer
   time(0)  

   ampAxis    = matrix(nrPntsTau)

   #loop for the 2D experiment
   for(m = 0 to nrPntsTau-1)
      
      tauD = 1000*tauAxis[m]
  
      d5 = tauD -d1-pgo-1.5
      d2 = tauD +echoTime/2-d1-pgo-1.5

      if((d2<0.5)|(d2>10000));  pr "\n delay (d2 = $d2$ us) is out of range \n" ;   return; endif
      if((d5<0.5)|(d5>10000));  pr "\n delay (d5 = $d5$ us) is out of range \n" ;   return; endif
    
      ppList = keaRun:setPPDelay(ppList,varIndex[0],d5)
      ppList = keaRun:setPPDelay(ppList,varIndex[1],d2)


  # reset sumData
      sumData = cmatrix(totPnts)
   
   # Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaRun:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
          dspwrite("x",0x00,ppList,wvPort)
   
       # Collect the data
         (status,data) = keaRun:getData(totPnts,guipar)
          data = data/nrEchoes
          if(status != "ok")
            return(0)
          endif
   
       # Accumlate the data
         sumData = keaRun:accumulate(accumulate,pAcq,sumData,data)
   
        :graphTime2(sumData/refSignal,scan,totalTime,m,guipar)
       
      # Check timing
     check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
     if(check == "abort")
        return(0)
     elseif(check == "finish")
        scan = scan + 1
        exitfor()
     endif

      next(scan)

      sumData = sumData/nrScans/refSignal
      ampAxis[m]  = sum(real(sumData))/nrPnts

# "lineal vs lineal" plot
       curplot("1d",2,1)
       drawplot("false")  
       plot(tauAxis,ampAxis,
             "tracetype", "lines",
             "tracecolor",wvDataSymbolColor,
             "symbolshape","opensquare",
             "symbolcolor",wvDataSymbolColor)
       xlabel("\G(d) [ms]") 
       ylabel("Probe output amplitude (raw)")
       title("Echo decay")

# log vs. tau^2 plot

       curplot("1d",3,1)
       plot(tauAxis2,ampAxis/ampAxis[0],
             "tracetype", "lines",
             "tracecolor",wvDataSymbolColor,
             "symbolshape","opensquare",
             "symbolcolor",wvDataSymbolColor)
       xlabel("(\G(D)-2/3\G(d)) \G(g)^(2) G_(0)^(2) \G(d)^(2) (10^(9) m^(-2)s)") 
       ylabel("Signal amplitude")
       title("Spin Echo decay")
       drawplot("true")

      drawplot("false")
      
      if(saveData == "true")
         :saveData(guipar,tauAxis,tauAxis2,ampAxis)
         if(m=nrPntsTau-1)
            # Output information to the CLI
            pr "\n  data saved in:"
            pr "\n  $dataDirectory$\\$expName$\\$expNr$"
         endif
 
      endif
  if check==("finish")
         exitfor()
  endif
   next(m)

   if(excecutedBackdoor=="yes")
       return(tauAxis,ampAxis)
   else
       :SEEFit(tauAxis2,ampAxis,guipar)
   endif


# Increment the experiment number
   keaNMR:incrementExperiment(incExpNr)
        
   keaNMR:titleReset()

endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,tauAxis,tauAxis2,ampAxis)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   save("data.1d",ampAxis)    # Save data in Prospa format
   save("data.pt1")                     # Save plot
   save("data.emf","emf1d")             # Save plot as picture
   n = size(ampAxis)
   m = matrix(3,n)
   m[0,~] = tauAxis'
   m[1,~] = tauAxis2'
   m[2,~] = real(ampAxis)'

   export2dpar("ab","ascii","xyrc","real","delimiter","tab")
   export2d(m,"data.dat")  # Save data for origin

# Restore cwd
   cd(bak)


endproc("saveData")
#--------------------------------------------------------
procedure(graphTime2,fidData,n,t,ne,guipar)

   assignlist(guipar)

# Allow for accumulations
   if(accumulate == "yes")
      sf = 1/(n+1)
   else
      sf = 1
   endif

# Select units
   if(wvUnits == "uV")
      sf = sf
      ampUnits = "\G(m)V"
   else
      ampUnits = "mV"
 sf = sf*0.001
   endif

   drawplot("false")
   
   curplot("1d",1,1) 
   plot(t,fidData*sf)
   xlabel("time(us)") 
   ylabel("Probe output amplitude ($ampUnits$)")
   title("Scan ($(n+1)$/$nrScans$)")
   drawplot("true")

endproc()

procedure(SEEFit,tauAxis2,ampAxis,guipar)
   assignlist(guipar)

   (x,y,nrPntsNew)=:removeNegativeValues(tauAxis2,ampAxis/ampAxis[0],nrPntsTau)
   
   y[~]= loge(y[~])

   (a,b,aErr,bErr) = linfit:fit(x,y)
    aStr = errorstr(a,aErr,1,3)
    bStr = errorstr(b,bErr,1,3)
  
   # Print out results
   pr("\n\n   slope ...... $aStr$")
  # pr("\n   intercept .. $bStr$\n")

   yfit = matrix(nrPntsNew)
   yfit[~] = b + a*x[~]

   curplot("1d",3,1)
   drawplot("false")

   plot(x,yfit)
         trace("tracetype","lines",
         "tracewidth",2,
         "symbolshape","none",
         "tracecolor",[0,255,0])
  
   hold("on")

   plot(x,y,
          "tracetype", "lines",
          "tracecolor",wvDataSymbolColor,
          "symbolshape","opensquare",
          "symbolcolor",wvDataSymbolColor)
    xlabel("(\G(D)-2/3\G(d)) \G(g)^(2) G_(0)^(2) \G(d)^(2) (10^(9) m^(-2)s)") 
    ylabel("ln (amplitude)")
    title("D = $errorstr(-a,aErr,1,3)$ 10^(-9) m^(2)/s")
    hold("off")
    drawplot("true") 

endproc()


#################################################

procedure(removeNegativeValues,t,data,nrPnts) 
  
  countNeg = nrPnts

  for (x = 0 to nrPnts-1 step 1)
     if (data[x]< 0.001)
         countNeg=x
     endif
  next(x)

  if (countNeg<nrPnts)
     pr "\n Some negative data points were removed before fitting\n"
  endif

  tNew = submatrix(t   ,0,countNeg-1) 
  dadaNew = submatrix(data,0,countNeg-1) 
  
endproc(tNew,dadaNew,countNeg)
#-------------------------------------------------

procedure(printOptTauMaxSSE,nada)

    guipar = getctrlvalues(0)
    assignlist(guipar)

    try
      gradientTperMeter = gradient/42.57
      # the factor 1000 is to change from seconds to ms 
      t2Diff = 1000*(DEst*1e-9*(DELTA/1000)*(gamma*gradientTperMeter)^2)^(-1/2)
      if(nrArgs==0)
        pr "\n Optimum tauMax ~ $t2Diff,3.2g$ ms  \n" 
      endif
   catch
      return -1 
   endtry  

endproc(t2Diff)
#---------------------------------------------
procedure(checkDelay,dx,limit)
 
   if (dx<= limit)
      message("error","Pulse sequence timing error","error")
      return (0)
   endif 
endproc(1)


