#########################################################
# 
# Flash_3D
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(Flash_3D, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,48,49,72,73,86,87,107,108,117] # Control groups
   wv_shift = [-14,200,414,628,631] # Amount to shift control groups
   wv_other = [116,282,907]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"Flash_3D",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d600 = 2",
          "n600 = round(pulseLength90/d600)",
          "(t1,t2,gfac) = B1NutSoft:getRFPulse(SPType,a1,n600)",
          "rampDur = 100",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d101 = 100",
          "d3   = 100",
          "phDur = d3+4*rampDur",
          "(del6,del69)   = Flash_3D:getRewindSliceDelay(pulseLength90,sliceComp,rampDur)",
          "d69=del69",
          "d6=del6",
          "d4   = estTimeR",
          "d5   = 1000*acqTime-rxLat + 1000",
          "d44  = pulseLength90 +d101+d69+pgo+2*rampDur+phDss90",
          "d10  = repTimeFlash*1000 - d101-d69 -pulseLength90-d3-d4-d5-d6-d44-12*rampDur",
          "n10  = Flash_3D:convertDirToChannel(dirRead)",
          "n20  = Flash_3D:convertDirToChannel(dirPhase1)",
          "n40  = Flash_3D:convertDirToChannel(dirPhase2)",
          "n30  = Flash_3D:convertDirToChannel(dirSlice)",
          "(gReadAmp,gReadAmpShim,gPhaseAmp1,gPhaseAmpShim1,gPhaseAmp2,gPhaseAmpShim2,gSliceAmp,gSliceAmpShim,sliceOffSet) = Flash_3D:setImageGradients(dirRead,dirPhase1,dirPhase2,dirSlice,FoVRead,FoVPhase1,FoVPhase2,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n31a =  gSliceAmpShim",
          "n31  =  gSliceAmp+gSliceAmpShim",
          "n32  = -gSliceAmp+gSliceAmpShim",
          "n11a =  gReadAmpShim",
          "readGradFac = (0.5*rampDur+d4+1000*acqTime/2-rxLat+acqShiftRead)/(d3+4*rampDur)",
          "n12a =  gReadAmpShim",
          "n11  = -readGradFac*gReadAmp+gReadAmpShim",
          "n12  =  gReadAmp+gReadAmpShim",
          "n21a =  gPhaseAmpShim1",
          "t21  =  ([0:1:nrStepsP1]-nrStepsP1/2+1/2)*gPhaseAmp1/((nrStepsP1-1)/2) + gPhaseAmpShim1",
          "n41a =  gPhaseAmpShim2",
          "n41  =  gPhaseAmp2 + gPhaseAmpShim2",
          "f1   =  b1Freq+O1/1e6+sliceOffSet",
          "f2   =  b1Freq+O1/1e6",
          "f3   =  b1Freq+O1/1e6-sliceOffSet",
          "n0   =  nrDummyScans",
          "n1   =  nrStepsP1",
          "n2   =  nrPnts",
          "totPnts = nrPnts*nrStepsP1",
          "totTime = repTimeFlash*nrStepsP1"]
   var = ["n41"]
   pp_list = ["n0","l0","f1","n30","n31a","n31","n300","d300","d101","t1","t2","p1","n600","d600","d69","f2","n32","d6","n10","n11a","n11","n20","n21a","n40","n41a","d3","n12a","n12","d4","n2","d5","f3","d44","d10","t21","n1","l1","n41"]
   pp_name = "Flash_3D.p"
   phase_list = [0;0]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("Flash 3D", -1, -1, 578, 755)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 560, 270,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 552, 207)
      statictext(3, 115, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 121, 27, 46)
      statictext(5, 115, 56, "right", "Repetition time (ms)")
      textbox(6, 121, 52, 46)
      statictext(7, 115, 82, "right", "Offset (Hz)")
      textbox(8, 121, 78, 46)
      statictext(9, 115, 108, "right", "Soft pulse shape")
      textmenu(10, 121, 104, 60, 200)
      statictext(11, 115, 134, "right", "90 pulse length (us)")
      textbox(12, 121, 130, 40)
      statictext(13, 115, 160, "right", "90 amplitude (dB)")
      textbox(14, 121, 156, 40)
      statictext(15, 285, 30, "right", "estabil. Time read (us)")
      textbox(16, 291, 26, 40)
      statictext(17, 285, 56, "right", "acqShiftRead (us)")
      textbox(18, 291, 52, 40)
      statictext(19, 285, 82, "right", "sliceComp(us)")
      textbox(20, 291, 78, 40)
      statictext(21, 285, 108, "right", "repTimeFlash (ms)")
      textbox(22, 291, 104, 40)
      statictext(23, 285, 134, "right", "nrDummyScans")
      textbox(24, 291, 130, 40)
      statictext(25, 285, 160, "right", "phase dss 90")
      textbox(26, 291, 156, 40)
      statictext(27, 455, 30, "right", "FoV Read (mm)")
      textbox(28, 461, 26, 40)
      statictext(29, 455, 56, "right", "FoV Phase1 (mm)")
      textbox(30, 461, 52, 40)
      statictext(31, 455, 82, "right", "nr. pixels phase1")
      textbox(32, 461, 78, 40)
      statictext(33, 455, 108, "right", "FoV Phase2 (mm)")
      textbox(34, 461, 104, 40)
      statictext(35, 455, 134, "right", "nr. pixels phase2")
      textbox(36, 461, 130, 40)
      statictext(37, 455, 160, "right", "Slice thickness (mm)")
      textbox(38, 461, 156, 40)
      statictext(39, 455, 186, "right", "Slice shift (mm)")
      textbox(40, 461, 182, 40)
      statictext(41, 506, 30, "right", "")
      textmenu(42, 512, 26, 40, 200)
      statictext(43, 506, 56, "right", "")
      textmenu(44, 512, 52, 40, 200)
      statictext(45, 506, 108, "right", "")
      textmenu(46, 512, 104, 40, 200)
      statictext(47, 506, 160, "right", "")
      textmenu(48, 512, 156, 40, 200)
      groupbox(49, "Acquisition", 9, 223, 552, 207)
      statictext(50, 79, 281, "center", "Rx Gain (dB)")
      textmenu(51, 62, 299, 39, 200)
      statictext(52, 79, 330, "center", "Rx Phase (degrees)")
      textbox(53, 62, 346, 39)
      statictext(54, 187, 283, "center", "Number of")
      statictext(55, 187, 296, "center", "complex points")
      textmenu(56, 234, 285, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(57, 187, 315, "center", "Dwell time")
      statictext(58, 187, 328, "center", "(us)")
      textmenu(59, 234, 318, 62, 200,
         keaCtrl:updateFilters();)
      statictext(60, 187, 349, "center", "Number of")
      statictext(61, 187, 362, "center", "scans")
      textbox(62, 234, 350, 62)
      statictext(63, 361, 297, "center", "Flat filter")
      checkbox(64, 397, 298, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(65, 361, 321, "center", "Accumulate")
      checkbox(66, 397, 322, "no,yes", "no")
      statictext(67, 361, 345, "center", "Phase cycle")
      checkbox(68, 397, 347, "no,yes", "yes")
      statictext(69, 489, 281, "center", "Spectral width (kHz)")
      textbox(70, 460, 295, 56)
      statictext(71, 489, 332, "center", "Acquisition time (ms)")
      textbox(72, 460, 346, 56)
      groupbox(73, "Processing_Display", 9, 437, 552, 207)
      statictext(74, 208, 504, "right", "Filter time domain")
      checkbox(75, 216, 505, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(76, 90, 535, "right", "Filter")
      textmenu(77, 97, 531, 108, 200)
      button(78, 214, 531, 22, 22, "...",
         filters();)
      statictext(79, 208, 567, "right", "Time domain magnitude")
      checkbox(80, 216, 568, "no,yes", "no")
      statictext(81, 479, 502, "right", "Show frequency domain data")
      checkbox(82, 487, 503, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(83, 479, 532, "right", "Frequency domain magnitude")
      checkbox(84, 487, 533, "no,yes", "no")
      statictext(85, 429, 565, "right", "Display range (kHz)")
      textbox(86, 439, 562, 61)
      groupbox(87, "File_Settings", 9, 651, 552, 207)
      statictext(88, 82, 728, "right", "Working")
      statictext(89, 82, 741, "right", "directory")
      textbox(90, 98, 729, 215)
      button(91, 318, 729, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(92, 89, 765, "right", "Experiment")
      statictext(93, 74, 778, "right", "name")
      textbox(94, 98, 768, 105)
      button(95, 209, 768, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(96, 311, 765, "right", "Experiment")
      statictext(97, 301, 778, "right", "number")
      textbox(98, 319, 768, 25)
      button(99, 349, 768, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(100, 373, 727, "center", "Save")
      statictext(101, 373, 740, "center", "data")
      checkbox(102, 401, 734, "false,true", "true")
      statictext(103, 417, 765, "center", "Auto")
      statictext(104, 417, 778, "center", "increment")
      checkbox(105, 452, 773, "no,yes", "no")
      button(106, 438, 722, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(107, 493, 722, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(108, 20, 871, 10, 10, [255,255,255,255])
      colorbox(109, 20, 884, 10, 10, [255,255,255,255])
      button(110, 40, 868, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(111, 105, 868, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(112, 170, 868, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(113, 235, 868, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(114, 300, 868, 54, 29, "Help",
         help("Macros\TomographJülich","Flash_3D.htm");)
      button(115, 365, 868, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(116, 430, 868, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(117, 495, 868, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(118, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,40000])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","SPType",
                  "menu",["sinc3","sinc5","gauss","rect"])
      setpar(n,12,"valueID","pulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,16,"valueID","estTimeR",
                  "type","float",
                  "range",[2,327670])
      setpar(n,18,"valueID","acqShiftRead",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,20,"valueID","sliceComp",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,22,"valueID","repTimeFlash",
                  "type","float",
                  "range",[2,1000])
      setpar(n,24,"valueID","nrDummyScans",
                  "type","integer",
                  "range",[0,20])
      setpar(n,26,"valueID","phDss90",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,28,"valueID","FoVRead",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,30,"valueID","FoVPhase1",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,32,"valueID","nrStepsP1",
                  "type","integer",
                  "range",[1,500])
      setpar(n,34,"valueID","FoVPhase2",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,36,"valueID","nrStepsP2",
                  "type","integer",
                  "range",[1,500])
      setpar(n,38,"valueID","sliceTickness",
                  "type","float",
                  "range",[0,10000])
      setpar(n,40,"valueID","sliceShift",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,42,"valueID","dirRead",
                  "menu",["x","y","z"])
      setpar(n,44,"valueID","dirPhase1",
                  "menu",["x","y","z"])
      setpar(n,46,"valueID","dirPhase2",
                  "menu",["x","y","z"])
      setpar(n,48,"valueID","dirSlice",
                  "menu",["x","y","z"])
      setpar(n,51,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,53,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,56,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,59,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,62,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,64,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,66,"valueID","accumulate")
      setpar(n,68,"valueID","usePhaseCycle")
      setpar(n,70,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,72,"valueID","acqTime",
                  "tag","disable")
      setpar(n,75,"valueID","filter")
      setpar(n,77,"valueID","filterType",
                  "menu",[""])
      setpar(n,80,"valueID","timeMag")
      setpar(n,82,"valueID","showFreqDomain")
      setpar(n,84,"valueID","freqMag")
      setpar(n,86,"valueID","dispRange",
                  "type","float")
      setpar(n,90,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,94,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,98,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,102,"valueID","saveData")
      setpar(n,105,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,106,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,107,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,108,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,109,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,110,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,111,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,112,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,113,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,114,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,115,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,116,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,117,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",118)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)


#Checks
   :checkDelays(guipar)
   durFlash=repTimeFlash*(nrStepsP1+nrDummyScans)
   if(durFlash>repTime); 
      pr "The time required by the sequence is larger than the repetition time. \n"; 
      message("Warning","The time required by the sequence \r is larger than the repetition time. \r Increase tR > $durFlash + 1$","warning"); 
      abort(""); 
   endif;
   if(abs(gReadAmp*readGradFac)>20800);  pr "Read gradient too high"; abort(""); endif;
   :checkGradPowerFLASH_3D(guipar)
   :checkGradDir(guipar)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime/1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime

# Make subplots
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)

# Reset the timer
   time(0)

   kSpace3D = cmatrix(nrPnts,nrStepsP1,nrStepsP2)
   kSpace2D = cmatrix(nrPnts,nrStepsP1*nrStepsP2)

   for(nPh2= 0 to nrStepsP2-1)
      
      pr nPh2
      grPh2 =   round(2*gPhaseAmp2/(nrStepsP2)*(-(nrStepsP2-1)/2+nPh2)) + gPhaseAmpShim2
#      pr grPh2
#      grPh2 = 0

      ppList = keaNMR:setPPNumber(ppList,varIndex[0],grPh2)

     sumData = cmatrix(totPnts)
        
# Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
         dspwrite("x",0x00,ppList)
   
       # Collect the data
         (status,data) = keaNMR:getData(totPnts,guipar)

         if(status != "ok")
            keaNMR:enableButtons()
            abort("")
         endif
   
       # Accumlate the data
         sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

         if(accumulate=="yes")
            sf = 1/(scan+1)
         else
            sf = 1
         endif

         pd = wvPP->subplot(1,1)
         pd->draw("false")
         pd->plot(totalTime,sf*real(sumData),"tracecolor",black)
         pd->hold("on")
         pd->plot(totalTime,sf*imag(sumData),"tracecolor",red)
         pd->hold("off")
         pd->title("text","FID ($scan+1$/$nrScans$)")
         pd->xlabel("text","time (s)")
         pd->ylabel("text","amplitude")
         pd->draw("true")

      # Check timing
         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")
            scan = scan+1
            exitfor()
         endif

      next(scan)

    for(nPh1 = 0 to nrStepsP1-1)
         kSpace3D[~,nPh1,nPh2] = submatrix(sumData/nrScans,nPh1*nrPnts,(nPh1+1)*nrPnts-1)
         kSpace2D[~,nPh1+nPh2*nrStepsP1] = submatrix(sumData/nrScans,nPh1*nrPnts,(nPh1+1)*nrPnts-1)
      next(nPh1)
      image(kSpace2D)
   
   next(nPh2)

 
   npxRead  =2*:FFTsize(nrPnts)
  # npxPhase1 =2*:FFTsize(nrStepsP1)
   npxPhase1 = npxRead
   npxPhase2 =2*:FFTsize(nrStepsP2)
   
   assign("kSpace3D",kSpace3D,"global")

   idata = fft_local:3d(kSpace3D,npxRead,npxPhase1,npxPhase2,"sinebell","sinebell","sinebell","FTEcho","FTEcho","FTEcho","yes")
 
   assign("idata",idata,"global")

   idataRP1   = matrix(npxRead,npxPhase1)
   idataRP2   = matrix(npxRead,npxPhase2)
   idataP1P2  = matrix(npxPhase1,npxPhase2)

   idataRP1[~,~] = idata[~,~,round(npxPhase2/2)]  
   idataRP2[~,~] = idata[~,round(npxPhase1/2),~]   
   idataP1P2[~,~] = idata[round(npxRead/2),~,~]  

   curplot("2d",1,2)
   image(idataRP1)
   curplot("2d",2,2)
   image(idataRP2)
   curplot("2d",2,1)
   image(idataP1P2)

   if(saveData == "true")
      :saveData(guipar,kSpace3D,idata)
      keaFiles:incrementExperiment(guipar)
   endif





endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace3D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export3dpar("ab","binary","xyrc","real","machine","littleend")
   export3d(idata,"rawimage3d.3d")  # Save data as an Excel file

   export3dpar("ab","binary","xyrc","complex","machine","littleend")
   export3d(kSpace3D,"rawkSpace3d.3d")  # Save data as an Excel file

   (n1,n2,n3,n4) = size(idata)

   save("$n1$x$n2$x$n3$.pixels_image","empty")

   (n1,n2,n3,n4) = size(kSpace3D)

   save("$n1$x$n2$X$n3$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)

endproc("saveData")
#-----------------------------

procedure(getRewindSliceDelay,PulseLength90,sliceComp,rampDur)
   
   d69=2
   d6=PulseLength90/2+sliceComp+d69-0.5*rampDur
   if(d6<=0.25)
      d6=2
      d69=d6+0.5*rampDur-PulseLength90/2-sliceComp
   endif        
endproc(d6,d69)
#-----------------------------

procedure(setImageGradients,dirRead,dirPhase1,dirPhase2,dirSlice,FoVRead,FoVPhase1,FoVPhase2,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)

   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVRead = FoVRead/1000             # change from mm to m
   FoVPhase1 = FoVPhase1/1000           # change from mm to m
   FoVPhase2 = FoVPhase2/1000           # change from mm to m
   sliceTickness = sliceTickness/1000 # change from mm to m
   sliceShift = sliceShift/1000       # change from mm to m


   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000  

   bandwidthRead =  bandwidth*1e3
   if(FoVRead==0)
      gReadAmpTperM=0
   else
      gReadAmpTperM =  bandwidthRead/42.57e6/FoVRead
   endif


   if(dirRead == "x"); ampRead = gReadAmpTperM*xcal; ampReadShim = xshim*xcal; endif
   if(dirRead == "y"); ampRead = gReadAmpTperM*ycal; ampReadShim = yshim*ycal; endif 
   if(dirRead == "z"); ampRead = gReadAmpTperM*zcal; ampReadShim = zshim*zcal; endif 

# phase1
   bandwidthPhase1 =  1e6*0.5*nrStepsP1/(phDur)
   
   if(FoVPhase1==0)
      gPhaseAmpTperM1=0
   else
      gPhaseAmpTperM1 =  bandwidthPhase1/42.57e6/FoVPhase1
   endif
  
   if(dirPhase1 == "x"); ampPhase1 = gPhaseAmpTperM1*xcal; ampPhaseShim1 = xshim*xcal;  endif
   if(dirPhase1 == "y"); ampPhase1 = gPhaseAmpTperM1*ycal; ampPhaseShim1 = yshim*ycal;  endif 
   if(dirPhase1 == "z"); ampPhase1 = gPhaseAmpTperM1*zcal; ampPhaseShim1 = zshim*zcal;  endif

# phase2
   bandwidthPhase2 =  1e6*0.5*nrStepsP2/(phDur)
   
   if(FoVPhase2==0)
      gPhaseAmpTperM2=0
   else
      gPhaseAmpTperM2 =  bandwidthPhase2/42.57e6/FoVPhase2
   endif
  
   if(dirPhase2 == "x"); ampPhase2 = gPhaseAmpTperM2*xcal; ampPhaseShim2 = xshim*xcal;  endif
   if(dirPhase2 == "y"); ampPhase2 = gPhaseAmpTperM2*ycal; ampPhaseShim2 = yshim*ycal;  endif 
   if(dirPhase2 == "z"); ampPhase2 = gPhaseAmpTperM2*zcal; ampPhaseShim2 = zshim*zcal;  endif


   bandwidthSlice =  gfac*1e6/(pulseLength90)

   if(sliceTickness == 0)
      gSliceTperM =0
   else
      gSliceTperM    =  bandwidthSlice/42.57e6/sliceTickness
   endif

   if(dirSlice == "x"); ampSlice = gSliceTperM*xcal; ampSliceShim = xshim*xcal; endif
   if(dirSlice == "y"); ampSlice = gSliceTperM*ycal; ampSliceShim = yshim*ycal; endif 
   if(dirSlice == "z"); ampSlice = gSliceTperM*zcal; ampSliceShim = zshim*zcal; endif

   sliceOffSet = gSliceTperM*42.57*sliceShift # in MHz


#pr ampRead
#pr ampPhase
#pr ampSlice
#
#pr ampReadShim
#pr ampPhaseShim
#pr ampSliceShim
 
   if(abs(ampRead)>20800);   ampRead = 0; pr "Read gradient too high"; endif
   if(abs(ampPhase1)>20800); ampPhase1 = 0; pr "Phase1 gradient too high"; endif
   if(abs(ampPhase2)>20800); ampPhase2 = 0; pr "Phase1 gradient too high"; endif
   if(abs(ampSlice)>20800); ampSlice = 0; pr "Slice gradient too high"; endif

#endproc(0,0,0,0,0,0,0)


endproc(round(ampRead),round(ampReadShim),round(ampPhase1),round(ampPhaseShim1),round(ampPhase2),round(ampPhaseShim2),round(ampSlice),round(ampSliceShim),sliceOffSet)

procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------

procedure(checkGradPowerFLASH_3D,guipar)

   assignlist(guipar)
   refPower=700

   #READ Channel
   p_R0=(gReadAmp*gReadAmp*(d4+d5+rampDur)+readGradFac*gReadAmp*readGradFac*gReadAmp*(d3+3*rampDur))*nrDummyScans*1e-6
   p_R =(gReadAmp*gReadAmp*(d4+d5+rampDur)+readGradFac*gReadAmp*readGradFac*gReadAmp*(d3+3*rampDur))*nrStepsP1*1e-6
   
   #PHASE1 Channel (during dummy scans phase1 gradient remains at shim value)
   t21  =([0:1:nrStepsP1]-nrStepsP1/2+1/2)*gPhaseAmp1/((nrStepsP1-1)/2) + gPhaseAmpShim1   
   p_temp=t21.*t21 *(d3+3*rampDur)*1e-6
   p_P1=sum(p_temp)

   #PHASE2 Channel (during dummy scans phase2 gradient remains at shim value)
   p_P2 =gPhaseAmp2*gPhaseAmp2*(d3+3*rampDur)* nrStepsP1*1e-6
   
   #SLICE Channel
   p_S0=gSliceAmp*gSliceAmp*((pulseLength90+d101+d69+rampDur)+(d6+rampDur))*nrDummyScans*1e-6
   p_S =gSliceAmp*gSliceAmp*((pulseLength90+d101+d69+rampDur)+(d6+rampDur))*nrStepsP1*1e-6
   
   p_mean=(p_R+p_R0+p_P1+p_P2+p_S+p_S0)/repTime  
  
   if (p_mean>refPower)
      pr "Power requirement too high. Increase repetition time. \n"; 
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif

endproc()
#-----------------------------
procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()

#-----------------------------
procedure(checkGradDir,guipar)
assignlist(guipar)
if(dirPhase1==dirPhase2)
      message("Waring","Phase1 direction should be \r different from Phase2 direction.","warning")
      abort("")
endif
if(dirPhase1==dirRead)
      message("Waring","Phase1 direction should be \r different from Read direction.","warning")
      abort("")
endif
if(dirPhase2==dirRead)
      message("Waring","Phase2 direction should be \r different from Read direction.","warning")
      abort("")
endif
endproc()

#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)
