#########################################################
# 
# GRE_2D
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(GRE_2D, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,40,41,64,65,78,79,99,100,109] # Control groups
   wv_shift = [-14,174,362,550,553] # Amount to shift control groups
   wv_other = [108,256,803]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"GRE_2D",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d1 = pulseLength90",
          "d600 = 2",
          "n600 = round(pulseLength90/d600)",
          "(t1,t2,gfac) = B1NutSoft:getRFPulse(SPType,a1,n600)",
          "rampDur = 100",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d101 = 100",
          "(del9,del99) = GRE_2D:getRewindSliceDelay(pulseLength90,sliceComp,rampDur)",
          "d99=del99",
          "d9=del9",
          "d6   = estTimeR",
          "d3   = 200",
          "phDur = d3+rampDur+2*0.5*rampDur",
          "d4   = echoTime-1000*acqTime/2+rxLat+acqShift-d3-d6-d9-d99-8*rampDur",
          "n10  = GRE_2D:convertDirToChannel(dirRead)",
          "n20  = GRE_2D:convertDirToChannel(dirPhase)",
          "n30  = GRE_2D:convertDirToChannel(dirSlice)",
          "(gReadAmp,gReadAmpShim,gPhaseAmp,gPhaseAmpShim,gSliceAmp,gSliceAmpShim,sliceOffSet) = GRE_2D:setImageGradients(dirRead,dirPhase,dirSlice,FoVRead,FoVPhase,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n31 =  gSliceAmp+gSliceAmpShim",
          "n31a = gSliceAmpShim",
          "n32  = -gSliceAmp+gSliceAmpShim",
          "n11a =  gReadAmpShim",
          "readGradFac = (0.5*rampDur+d6+1000*acqTime/2-rxLat-acqShiftRead)/(d3+2*rampDur)",
          "n11  =  -readGradFac*gReadAmp+gReadAmpShim",
          "n12  =  gReadAmp+gReadAmpShim",
          "n12a =  gReadAmpShim",
          "n21  =  gPhaseAmp+gPhaseAmpShim",
          "n21a =  gPhaseAmpShim",
          "f1  =  b1Freq+O1/1e6+sliceOffSet",
          "f2  =  b1Freq+O1/1e6",
          "n1  = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["n21"]
   pp_list = ["f1","n30","n31a","n31","n300","d300","d101","t1","t2","p1","n600","d600","d99","f2","n32","d9","n10","n11a","n11","n20","n21a","n21","d3","d4","n12a","n12","d6","n1"]
   pp_name = "GRE_2D.p"
   phase_list = [0,2;0,2]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("Gradient Echo 2D", -1, -1, 578, 755)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 560, 244,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 552, 181)
      statictext(3, 115, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 121, 27, 46)
      statictext(5, 115, 56, "right", "Repetition time (ms)")
      textbox(6, 121, 52, 46)
      statictext(7, 115, 82, "right", "Offset (Hz)")
      textbox(8, 121, 78, 46)
      statictext(9, 115, 108, "right", "90 amplitude (dB)")
      textbox(10, 121, 104, 40)
      statictext(11, 115, 134, "right", "90 pulse length (us)")
      textbox(12, 121, 130, 40)
      statictext(13, 115, 160, "right", "Soft pulse shape")
      textmenu(14, 121, 156, 60, 200)
      statictext(15, 285, 30, "right", "Echotime (us)")
      textbox(16, 291, 26, 40)
      statictext(17, 285, 56, "right", "acquisition Shift(us)")
      textbox(18, 291, 52, 40)
      statictext(19, 285, 82, "right", "estabil. Time read (us)")
      textbox(20, 291, 78, 40)
      statictext(21, 285, 108, "right", "acqShiftRead (us)")
      textbox(22, 291, 104, 40)
      statictext(23, 285, 134, "right", "sliceComp(us)")
      textbox(24, 291, 130, 40)
      statictext(25, 455, 30, "right", "FoV Read (mm)")
      textbox(26, 461, 26, 40)
      statictext(27, 455, 56, "right", "FoV Phase (mm)")
      textbox(28, 461, 52, 40)
      statictext(29, 455, 82, "right", "nro. pts. phase")
      textbox(30, 461, 78, 40)
      statictext(31, 455, 108, "right", "Slice thickness (mm)")
      textbox(32, 461, 104, 40)
      statictext(33, 455, 134, "right", "Slice shift (mm)")
      textbox(34, 461, 130, 40)
      statictext(35, 506, 30, "right", "")
      textmenu(36, 512, 26, 40, 200)
      statictext(37, 506, 56, "right", "")
      textmenu(38, 512, 52, 40, 200)
      statictext(39, 506, 108, "right", "")
      textmenu(40, 512, 104, 40, 200)
      groupbox(41, "Acquisition", 9, 197, 552, 181)
      statictext(42, 79, 242, "center", "Rx Gain (dB)")
      textmenu(43, 62, 260, 39, 200)
      statictext(44, 79, 291, "center", "Rx Phase (degrees)")
      textbox(45, 62, 307, 39)
      statictext(46, 187, 244, "center", "Number of")
      statictext(47, 187, 257, "center", "complex points")
      textmenu(48, 234, 246, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(49, 187, 276, "center", "Dwell time")
      statictext(50, 187, 289, "center", "(us)")
      textmenu(51, 234, 279, 62, 200,
         keaCtrl:updateFilters();)
      statictext(52, 187, 310, "center", "Number of")
      statictext(53, 187, 323, "center", "scans")
      textbox(54, 234, 311, 62)
      statictext(55, 361, 258, "center", "Flat filter")
      checkbox(56, 397, 259, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(57, 361, 282, "center", "Accumulate")
      checkbox(58, 397, 283, "no,yes", "no")
      statictext(59, 361, 306, "center", "Phase cycle")
      checkbox(60, 397, 308, "no,yes", "yes")
      statictext(61, 489, 242, "center", "Spectral width (kHz)")
      textbox(62, 460, 256, 56)
      statictext(63, 489, 293, "center", "Acquisition time (ms)")
      textbox(64, 460, 307, 56)
      groupbox(65, "Processing_Display", 9, 385, 552, 181)
      statictext(66, 208, 439, "right", "Filter time domain")
      checkbox(67, 216, 440, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(68, 90, 470, "right", "Filter")
      textmenu(69, 97, 466, 108, 200)
      button(70, 214, 466, 22, 22, "...",
         filters();)
      statictext(71, 208, 502, "right", "Time domain magnitude")
      checkbox(72, 216, 503, "no,yes", "no")
      statictext(73, 479, 437, "right", "Show frequency domain data")
      checkbox(74, 487, 438, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(75, 479, 467, "right", "Frequency domain magnitude")
      checkbox(76, 487, 468, "no,yes", "no")
      statictext(77, 429, 500, "right", "Display range (kHz)")
      textbox(78, 439, 497, 61)
      groupbox(79, "File_Settings", 9, 573, 552, 181)
      statictext(80, 82, 637, "right", "Working")
      statictext(81, 82, 650, "right", "directory")
      textbox(82, 98, 638, 215)
      button(83, 318, 638, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(84, 89, 674, "right", "Experiment")
      statictext(85, 74, 687, "right", "name")
      textbox(86, 98, 677, 105)
      button(87, 209, 677, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(88, 311, 674, "right", "Experiment")
      statictext(89, 301, 687, "right", "number")
      textbox(90, 319, 677, 25)
      button(91, 349, 677, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(92, 373, 636, "center", "Save")
      statictext(93, 373, 649, "center", "data")
      checkbox(94, 401, 643, "false,true", "true")
      statictext(95, 417, 674, "center", "Auto")
      statictext(96, 417, 687, "center", "increment")
      checkbox(97, 452, 682, "no,yes", "no")
      button(98, 438, 631, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(99, 493, 631, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(100, 20, 767, 10, 10, [255,255,255,255])
      colorbox(101, 20, 780, 10, 10, [255,255,255,255])
      button(102, 40, 764, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(103, 105, 764, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(104, 170, 764, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(105, 235, 764, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(106, 300, 764, 54, 29, "Help",
         help("Macros\TomographJülich","GRE_2D.htm");)
      button(107, 365, 764, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(108, 430, 764, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(109, 495, 764, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(110, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,1e+008])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,12,"valueID","pulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","SPType",
                  "menu",["sinc3","sinc5","gauss","rect"])
      setpar(n,16,"valueID","echoTime",
                  "type","float",
                  "range",[2,327670])
      setpar(n,18,"valueID","acqShift",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,20,"valueID","estTimeR",
                  "type","float",
                  "range",[2,327670])
      setpar(n,22,"valueID","acqShiftRead",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,24,"valueID","sliceComp",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,26,"valueID","FoVRead",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,28,"valueID","FoVPhase",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,30,"valueID","nrStepsP",
                  "type","integer",
                  "range",[1,500])
      setpar(n,32,"valueID","sliceTickness",
                  "type","float",
                  "range",[0,10000])
      setpar(n,34,"valueID","sliceShift",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,36,"valueID","dirRead",
                  "menu",["x","y","z"])
      setpar(n,38,"valueID","dirPhase",
                  "menu",["x","y","z"])
      setpar(n,40,"valueID","dirSlice",
                  "menu",["x","y","z"])
      setpar(n,43,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,45,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,48,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,51,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,54,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,56,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,58,"valueID","accumulate")
      setpar(n,60,"valueID","usePhaseCycle")
      setpar(n,62,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,64,"valueID","acqTime",
                  "tag","disable")
      setpar(n,67,"valueID","filter")
      setpar(n,69,"valueID","filterType",
                  "menu",[""])
      setpar(n,72,"valueID","timeMag")
      setpar(n,74,"valueID","showFreqDomain")
      setpar(n,76,"valueID","freqMag")
      setpar(n,78,"valueID","dispRange",
                  "type","float")
      setpar(n,82,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,86,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,90,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,94,"valueID","saveData")
      setpar(n,97,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,98,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,99,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,100,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,101,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,102,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,103,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,104,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,105,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,106,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,107,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,108,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,109,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",110)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

#Checks
   :checkDelays(guipar)
   if(abs(gReadAmp*readGradFac)>20800);  pr "Read gradient too high"; abort(""); endif;
   :checkGradPowerGRE_2D(guipar)
   :checkGradDir(guipar)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime


# Make subplots
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)

# Reset the timer
   time(0)

   kSpace2D = cmatrix(nrPnts,nrStepsP)   


for(nPh= 0 to nrStepsP-1)
 #  pr nPh

   sumData = cmatrix(totPnts)

   grPh =  round(2*gPhaseAmp/(nrStepsP)*(-(nrStepsP-1)/2+nPh)) + gPhaseAmpShim

   ppList = keaNMR:setPPNumber(ppList,varIndex[0],grPh)

               
# Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
         dspwrite("x",0x00,ppList)
   
       # Collect the data
         (status,data) = keaNMR:getData(totPnts,guipar)

         if(status != "ok")
            keaNMR:enableButtons()
            abort("")
         endif
   
       # Accumlate the data
         sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

         if(accumulate=="yes")
            sf = 1/(scan+1)
         else
            sf = 1
         endif

         pd = wvPP->subplot(1,1)
         pd->draw("false")
         pd->plot(totalTime,sf*real(sumData),"tracecolor",black)
         pd->hold("on")
         pd->plot(totalTime,sf*imag(sumData),"tracecolor",red)
         pd->hold("off")
         pd->title("text","FID ($scan+1$/$nrScans$)")
         pd->xlabel("text","time (us)")
         pd->ylabel("text","amplitude")
         pd->draw("true")

      # Check timing
         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")
            scan = scan+1
            nPh = 10000000000
            exitfor()
         endif

      next(scan)

      kSpace2D[~,nPh] = sumData/sf
      image(kSpace2D)

   next(nPh)

   assign("kSpace2D",kSpace2D,"global")



   npxRead  =2*:FFTsize(nrPnts)
   npxPhase =2*:FFTsize(nrStepsP)
   npxPhase = npxRead    

   idata = fft_local:2d(kSpace2D,npxRead,npxPhase,"sinebell","sinebell","FTEcho","FTEcho","yes")
   curplot("2d",2,1)
   image(idata)

   if(saveData == "true")
      :saveData(guipar,kSpace2D,idata)
      keaFiles:incrementExperiment(guipar)
   endif

endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace2D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export2dpar("ab","binary","xyrc","real","machine","littleend")
   export2d(idata,"rawimage2d.2d")  # Save data as an Excel file

   export2dpar("ab","binary","xyrc","complex","machine","littleend")
   export2d(kSpace2D,"rawkSpace2d.2d")  # Save data as an Excel file

   (n1,n2) = size(idata)

   save("$n1$x$n2$.pixels_image","empty")

   (n1,n2) = size(kSpace2D)

   save("$n1$x$n2$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)

endproc("saveData")
#-----------------------------

procedure(getRewindSliceDelay,PulseLength90,sliceComp,rampDur)
   
   d99=2
   d9=PulseLength90/2+sliceComp+d99-0.5*rampDur
   if(d9<=0.25)
      d9=2
      d99=d9+0.5*rampDur-PulseLength90/2-sliceComp
   endif
endproc(d9,d99)
#-----------------------------

procedure(setImageGradients,dirRead,dirPhase,dirSlice,FoVRead,FoVPhase,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)

   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVRead = FoVRead/1000             # change from mm to m
   FoVPhase = FoVPhase/1000           # change from mm to m
   sliceTickness = sliceTickness/1000 # change from mm to m
   sliceShift = sliceShift/1000       # change from mm to m


   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000  

   bandwidthRead =  bandwidth*1e3
   if(FoVRead==0)
      gReadAmpTperM=0
   else
      gReadAmpTperM =  bandwidthRead/42.57e6/FoVRead
   endif


   if(dirRead == "x"); ampRead = gReadAmpTperM*xcal; ampReadShim = xshim*xcal; endif
   if(dirRead == "y"); ampRead = gReadAmpTperM*ycal; ampReadShim = yshim*ycal; endif 
   if(dirRead == "z"); ampRead = gReadAmpTperM*zcal; ampReadShim = zshim*zcal; endif 

   bandwidthPhase =  1e6*0.5*nrStepsP/(phDur)
   
   if(FoVPhase==0)
      gPhaseAmpTperM=0
   else
      gPhaseAmpTperM =  bandwidthPhase/42.57e6/FoVPhase
   endif
  
   if(dirPhase == "x"); ampPhase = gPhaseAmpTperM*xcal; ampPhaseShim = xshim*xcal;  endif
   if(dirPhase == "y"); ampPhase = gPhaseAmpTperM*ycal; ampPhaseShim = yshim*ycal; endif 
   if(dirPhase == "z"); ampPhase = gPhaseAmpTperM*zcal; ampPhaseShim = zshim*zcal;  endif

   bandwidthSlice =  gfac*1e6/(pulseLength90)

   if(sliceTickness == 0)
      gSliceTperM =0
   else
      gSliceTperM    =  bandwidthSlice/42.57e6/sliceTickness
   endif

   if(dirSlice == "x"); ampSlice = gSliceTperM*xcal; ampSliceShim = xshim*xcal; endif
   if(dirSlice == "y"); ampSlice = gSliceTperM*ycal; ampSliceShim = yshim*ycal; endif 
   if(dirSlice == "z"); ampSlice = gSliceTperM*zcal; ampSliceShim = zshim*zcal; endif

   sliceOffSet = gSliceTperM*42.57*sliceShift # in MHz

 
   if(abs(ampRead)>20800);   ampRead = 0; pr "Read gradient too high"; endif
   if(abs(ampPhase)>20800); ampPhase = 0; pr "Phase gradient too high"; endif
   if(abs(ampSlice)>20800); ampSlice = 0; pr "Slice gradient too high"; endif


endproc(round(ampRead),round(ampReadShim),round(ampPhase),round(ampPhaseShim),round(ampSlice),round(ampSliceShim),sliceOffSet)

procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------

procedure(checkGradPowerGRE_2D,guipar)

   assignlist(guipar)
   refPower=700

   #READ Channel
   p_R=(gReadAmp*gReadAmp*(d6+acqTime*1000+rampDur)+readGradFac*gReadAmp*readGradFac*gReadAmp*(d3+2*rampDur))*1e-6
   
   #PHASE Channel
   p_P=gPhaseAmp*gPhaseAmp*(d3+2*rampDur)*1e-6

   #SLICE Channel
   p_S=gSliceAmp*gSliceAmp*((pulseLength90+d101+d99+rampDur)+(d9+rampDur))*1e-6
   
   p_mean=(p_R+p_P+p_S)/repTime  
   
   if (p_mean>refPower)
      pr "Power requirement too high. Increase repetition time. \n"; 
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif

endproc()
#-----------------------------
procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()
#-----------------------------
procedure(checkGradDir,guipar)
assignlist(guipar)
if(dirPhase==dirRead)
      message("Waring","Phase direction should be \r different from Read direction.","warning")
      abort("")
endif
endproc()

#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)
