########################################################
# 
# Slice selective spin-echo imaging
#
########################################################

procedure(pulse_program,dir,mode)


# Interface description (name, label, x, y, control_type, variable_type)
  interface = ["b1Freq",        "B1 Frequency (MHz)",        "0","0",   "tbw", "freq",
               "repTime",       "Repetition time (ms)",      "0","1",   "tbw", "reptime",
               "O1",            "Offset (Hz)",               "0","2",   "tbw", "float",
               "a1",            "90 amplitude (dB)",         "0","3", "tb",  "pulseamp",
               "pulseLength90", "90 pulse length (us)",      "0","4", "tb",  "pulselength",
               "SPType",        "Soft pulse shape",          "0","5", "tm",  "60,[\"sinc3\",\"sinc5\",\"gauss\",\"rect\"]",

               "echoTime",      "Echotime (us)",             "1","0", "tb",  "sdelay",
               "acqShift",      "acquisition Shift(us)",     "1","1", "tb",  "float,[-1000,1000]",
               "estTimeR",      "estabil. Time read (us)",   "1","2", "tb",  "sdelay",
               "acqShiftRead",  "acqShiftRead (us)",         "1","3", "tb",  "float,[-1000,1000]",
               "sliceComp",     "sliceComp(us)",             "1","4", "tb",  "float,[-1000,1000]",


               "FoVRead",       "FoV Read (mm)",             "2","0", "tb",  "float,[-10000,10000]",
               "FoVPhase",      "FoV Phase (mm)",            "2","1", "tb",  "float,[-10000,10000]",
               "nrStepsP",      "nro. pts. phase",           "2","2", "tb",  "integer,[1,500]",
               "sliceTickness", "Slice thickness (mm)",      "2","3", "tb",  "float,[0,10000]",
               "sliceShift",    "Slice shift (mm)",          "2","4", "tb",  "float,[-10000,10000]",

               "dirRead",       "",                          "2.3","0", "tm",  "[\"x\",\"y\",\"z\"]",
               "dirPhase",      "",                          "2.3","1", "tm",  "[\"x\",\"y\",\"z\"]",
               "dirSlice",      "",                          "2.3","3", "tm",  "[\"x\",\"y\",\"z\"]"]      

 # Relationships to determine remaining variable values
  relationships = [ "d1 = pulseLength90",
                    "d600 = 2",      
                    "n600 = round(pulseLength90/d600)",
                    "(t1,t2,gfac) = B1NutSoft:getRFPulse(SPType,a1,n600)",
                    "rampDur = 100",
                    "d300 = 2.5",
                    "n300 = round(rampDur/d300)",
                    "d101 = 100",
                    "(del9,del99) = GRE_2D:getRewindSliceDelay(pulseLength90,sliceComp,rampDur)",
                    "d99=del99",
                    "d9=del9",   
                    "d6   = estTimeR", 
                    "d3   = 200",
                    "phDur = d3+rampDur+2*0.5*rampDur",      
                    "d4   = echoTime-1000*acqTime/2+rxLat+acqShift-d3-d6-d9-d99-8*rampDur",
                    "n10  = GRE_2D:convertDirToChannel(dirRead)",
                    "n20  = GRE_2D:convertDirToChannel(dirPhase)",
                    "n30  = GRE_2D:convertDirToChannel(dirSlice)",
                    "(gReadAmp,gReadAmpShim,gPhaseAmp,gPhaseAmpShim,gSliceAmp,gSliceAmpShim,sliceOffSet) = GRE_2D:setImageGradients(dirRead,dirPhase,dirSlice,FoVRead,FoVPhase,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)",
                    "n31 =  gSliceAmp+gSliceAmpShim", 
                    "n31a = gSliceAmpShim", 
                    "n32  = -gSliceAmp+gSliceAmpShim",
                    "n11a =  gReadAmpShim",
                    "readGradFac = (0.5*rampDur+d6+1000*acqTime/2-rxLat-acqShiftRead)/(d3+2*rampDur)",
                    "n11  =  -readGradFac*gReadAmp+gReadAmpShim",
                    "n12  =  gReadAmp+gReadAmpShim",
                    "n12a =  gReadAmpShim",
                    "n21  =  gPhaseAmp+gPhaseAmpShim",
                    "n21a =  gPhaseAmpShim",
                    "f1  =  b1Freq+O1/1e6+sliceOffSet",
                    "f2  =  b1Freq+O1/1e6",                    
                    "n1  = nrPnts",                
                    "totPnts = nrPnts",
                    "totTime = acqTime"]

# Define the tabs and their order
   tabs = ["Pulse sequence","Acquisition","Processing+Display","File Settings"]

# These parameters will be changed between experiments
   variables = ["n21"]

# dx,dy
   dim = [170,26]

# Pulse sequence
   initpp(dir) # Reset internal parameter list

   settxfreq(f1)                         
   gradramp(n30,n31a,n31,n300,d300)        # Slice grad ON
      delay(d101)                          # stabilization time slice
      shapedrf(mode,t1,t2,p1,n600,d600)    # 90 soft pulse
      delay(d99)
   gradramp(n30,n31,n31a,n300,d300)        # Slice grad OFF
   
   settxfreq(f2)                       
   
   gradramp(n30,n31a,n32,n300,d300)  # SLICE gradient ON
      delay(d9)
   gradramp(n30,n32,n31a,n300,d300)  # SLICE gradient OFF  

   gradramp(n10,n11a,n11,n300,d300)   # READ gradient ON
   gradramp(n20,n21a,n21,n300,d300)   # PHASE gradient ON
      delay(d3)
   gradramp(n10,n11,n11a,n300,d300)   # READ gradient OFF
   gradramp(n20,n21,n21a,n300,d300)   # PHASE gradient OFF         
   
   delay(d4) 

   gradramp(n10,n12a,n12,n300,d300)   # READ gradient ON
      delay(d6)
      acquire("overwrite",n1)
   gradramp(n10,n12,n12a,n300,d300)   # READ gradient OFF


   lst = endpp() # Return parameter list

# Phase cycle list
   phaseList = [0,2; # +x,-x : 90 phase
                0,2] # +x,-x : Acquire phase


endproc(lst,tabs,interface,relationships,variables,dim,phaseList)