#########################################################
# 
# RARE_2D
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(RARE_2D, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,46,47,70,71,84,85,105,106,115] # Control groups
   wv_shift = [-14,226,466,706,709] # Amount to shift control groups
   wv_other = [114,308,1011]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"RARE_2D",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d600 = 2",
          "n600 = round(pulseLength90/d600)",
          "(t1,t2,gfac) = B1NutSoft:getRFPulse(SPType,a1,n600)",
          "(t3,t4,gfac) = B1NutSoft:getRFPulse(SPType,a2,n600)",
          "pulseLength180 = pulseLength90",
          "rampDur = 200",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d8 = estTimeR",
          "d101 = 100",
          "d102= 100",
          "d3 = 1000*acqTime/2+rxLat+d8-rampDur/2-acqShiftRead",
          "(del11,del19) = RARE_2D:getRewindSliceDelay(pulseLength90,sliceComp,rampDur)",
          "d19=del19",
          "d11=del11",
          "phDss90 = 28",
          "phDss180 = 90.2",
          "d44 = 2*rampDur+d101+d19+pulseLength90 +pgo+phDss90",
          "d54 = 2*rampDur+d102+pulseLength180+pgo+phDss180",
          "d4 = -d44+echoTime/2-d3-5*rampDur-d11-d19-pulseLength90/2-(rampDur+d102+pulseLength180)/2-pgo",
          "d5 = 10",
          "d6 = phDur-rampDur",
          "d7 = -d54+echoTime/2-1000*acqTime/2+acqShift+rxLat-d5-d6-d8-(rampDur+d102+pulseLength180)/2-3*rampDur",
          "d9 = 2*d3 - d8 + rampDur + timeReadCPMG",
          "d10 = -d54+echoTime-(rampDur+d102+pulseLength180)-pgo-d5-2*d6-d7-d8-d9-6*rampDur",
          "n10  = RARE_2D:convertDirToChannel(dirRead)",
          "n20  = RARE_2D:convertDirToChannel(dirPhase)",
          "n30  = RARE_2D:convertDirToChannel(dirSlice)",
          "(gReadAmp,gReadAmpShim,gPhaseAmp,gPhaseAmpShim,gSliceAmp,gSliceAmpShim,sliceOffSet1) = RARE_2D:setImageGradients(dirRead,dirPhase,dirSlice,FoVRead,FoVPhase,phDur,sliceTickness,sliceShift1,gfac,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n31a = gSliceAmpShim",
          "n31 =  gSliceAmp+gSliceAmpShim",
          "n32 = -gSliceAmp+gSliceAmpShim",
          "n11 =  gReadAmp+gReadAmpShim",
          "n11a = gReadAmpShim",
          "t21  =  ([0:1:nrStepsP]-nrStepsP/2+1/2)*gPhaseAmp/((nrStepsP-1)/2) + gPhaseAmpShim ",
          "t22  = -([0:1:nrStepsP]-nrStepsP/2+1/2)*gPhaseAmp/((nrStepsP-1)/2) + gPhaseAmpShim ",
          "n21a = gPhaseAmpShim",
          "n22a = gPhaseAmpShim",
          "n1 = nrStepsP",
          "n2 = nrPnts",
          "f11  =  b1Freq+O1/1e6+sliceOffSet1",
          "f12  =  b1Freq+O1/1e6",
          "f13  =  b1Freq+O1/1e6-sliceOffSet1",
          "totPnts = nrPnts*nrStepsP",
          "totTime = echoTime*nrStepsP"]
   var = [""]
   pp_list = ["f11","n30","n31a","n31","n300","d300","d101","t1","t2","p1","n600","d600","d19","f13","d44","f12","n32","d11","n10","n11a","n11","d3","d4","t21","t22","n1","l1","d102","t3","t4","p2","d54","d5","n20","n21a","d6","d7","d8","n2","d9","n22a","d10"]
   pp_name = "RARE_2D.p"
   phase_list = [0,2;1,1;0,2]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("RARE 2D", -1, -1, 578, 755)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 560, 296,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 552, 233)
      statictext(3, 115, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 121, 27, 46)
      statictext(5, 115, 56, "right", "Repetition time (ms)")
      textbox(6, 121, 52, 46)
      statictext(7, 115, 82, "right", "Offset (Hz)")
      textbox(8, 121, 78, 46)
      statictext(9, 115, 108, "right", "Soft pulse shape")
      textmenu(10, 121, 104, 60, 200)
      statictext(11, 115, 134, "right", "90 pulse length (us)")
      textbox(12, 121, 130, 40)
      statictext(13, 115, 160, "right", "rf amplitude (dB)")
      textbox(14, 121, 156, 40)
      statictext(15, 115, 186, "right", "180 amplitude (dB)")
      textbox(16, 121, 182, 40)
      statictext(17, 115, 212, "right", "sliceComp(us)")
      textbox(18, 121, 208, 40)
      statictext(19, 285, 30, "right", "Echotime (us)")
      textbox(20, 291, 26, 40)
      statictext(21, 285, 56, "right", "acquisition Shift(us)")
      textbox(22, 291, 52, 40)
      statictext(23, 285, 82, "right", "estabil. Time read (us)")
      textbox(24, 291, 78, 40)
      statictext(25, 285, 108, "right", "acqShiftRead (us)")
      textbox(26, 291, 104, 40)
      statictext(27, 285, 134, "right", "tim. CPMG Read (us)")
      textbox(28, 291, 130, 40)
      statictext(29, 285, 160, "right", "duration phase (us)")
      textbox(30, 291, 156, 40)
      statictext(31, 455, 30, "right", "FoV Read (mm)")
      textbox(32, 461, 26, 40)
      statictext(33, 455, 56, "right", "FoV Phase (mm)")
      textbox(34, 461, 52, 40)
      statictext(35, 455, 82, "right", "nr. pixels phase")
      textbox(36, 461, 78, 40)
      statictext(37, 455, 108, "right", "Slice thickness (mm)")
      textbox(38, 461, 104, 40)
      statictext(39, 455, 134, "right", "Slice1 shift (mm)")
      textbox(40, 461, 130, 40)
      statictext(41, 506, 30, "right", "")
      textmenu(42, 512, 26, 40, 200)
      statictext(43, 506, 56, "right", "")
      textmenu(44, 512, 52, 40, 200)
      statictext(45, 506, 108, "right", "")
      textmenu(46, 512, 104, 40, 200)
      groupbox(47, "Acquisition", 9, 249, 552, 233)
      statictext(48, 79, 320, "center", "Rx Gain (dB)")
      textmenu(49, 62, 338, 39, 200)
      statictext(50, 79, 369, "center", "Rx Phase (degrees)")
      textbox(51, 62, 385, 39)
      statictext(52, 187, 322, "center", "Number of")
      statictext(53, 187, 335, "center", "complex points")
      textmenu(54, 234, 324, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(55, 187, 354, "center", "Dwell time")
      statictext(56, 187, 367, "center", "(us)")
      textmenu(57, 234, 357, 62, 200,
         keaCtrl:updateFilters();)
      statictext(58, 187, 388, "center", "Number of")
      statictext(59, 187, 401, "center", "scans")
      textbox(60, 234, 389, 62)
      statictext(61, 361, 336, "center", "Flat filter")
      checkbox(62, 397, 337, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(63, 361, 360, "center", "Accumulate")
      checkbox(64, 397, 361, "no,yes", "no")
      statictext(65, 361, 384, "center", "Phase cycle")
      checkbox(66, 397, 386, "no,yes", "yes")
      statictext(67, 489, 320, "center", "Spectral width (kHz)")
      textbox(68, 460, 334, 56)
      statictext(69, 489, 371, "center", "Acquisition time (ms)")
      textbox(70, 460, 385, 56)
      groupbox(71, "Processing_Display", 9, 489, 552, 233)
      statictext(72, 208, 569, "right", "Filter time domain")
      checkbox(73, 216, 570, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(74, 90, 600, "right", "Filter")
      textmenu(75, 97, 596, 108, 200)
      button(76, 214, 596, 22, 22, "...",
         filters();)
      statictext(77, 208, 632, "right", "Time domain magnitude")
      checkbox(78, 216, 633, "no,yes", "no")
      statictext(79, 479, 567, "right", "Show frequency domain data")
      checkbox(80, 487, 568, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(81, 479, 597, "right", "Frequency domain magnitude")
      checkbox(82, 487, 598, "no,yes", "no")
      statictext(83, 429, 630, "right", "Display range (kHz)")
      textbox(84, 439, 627, 61)
      groupbox(85, "File_Settings", 9, 729, 552, 233)
      statictext(86, 82, 819, "right", "Working")
      statictext(87, 82, 832, "right", "directory")
      textbox(88, 98, 820, 215)
      button(89, 318, 820, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(90, 89, 856, "right", "Experiment")
      statictext(91, 74, 869, "right", "name")
      textbox(92, 98, 859, 105)
      button(93, 209, 859, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(94, 311, 856, "right", "Experiment")
      statictext(95, 301, 869, "right", "number")
      textbox(96, 319, 859, 25)
      button(97, 349, 859, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(98, 373, 818, "center", "Save")
      statictext(99, 373, 831, "center", "data")
      checkbox(100, 401, 825, "false,true", "true")
      statictext(101, 417, 856, "center", "Auto")
      statictext(102, 417, 869, "center", "increment")
      checkbox(103, 452, 864, "no,yes", "no")
      button(104, 438, 813, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(105, 493, 813, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(106, 20, 975, 10, 10, [255,255,255,255])
      colorbox(107, 20, 988, 10, 10, [255,255,255,255])
      button(108, 40, 972, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(109, 105, 972, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(110, 170, 972, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(111, 235, 972, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(112, 300, 972, 54, 29, "Help",
         help("Macros\TomographJülich","RARE_2D.htm");)
      button(113, 365, 972, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(114, 430, 972, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(115, 495, 972, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(116, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,1e+008])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","SPType",
                  "menu",["sinc3","sinc5","gauss","rect"])
      setpar(n,12,"valueID","pulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,16,"valueID","a2",
                  "type","float",
                  "range",[-85,0])
      setpar(n,18,"valueID","sliceComp",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,20,"valueID","echoTime",
                  "type","float",
                  "range",[2,327670])
      setpar(n,22,"valueID","acqShift",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,24,"valueID","estTimeR",
                  "type","float",
                  "range",[2,327670])
      setpar(n,26,"valueID","acqShiftRead",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,28,"valueID","timeReadCPMG",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,30,"valueID","phDur",
                  "type","float",
                  "range",[2,327670])
      setpar(n,32,"valueID","FoVRead",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,34,"valueID","FoVPhase",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,36,"valueID","nrStepsP",
                  "type","integer",
                  "range",[1,500])
      setpar(n,38,"valueID","sliceTickness",
                  "type","float",
                  "range",[0,10000])
      setpar(n,40,"valueID","sliceShift1",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,42,"valueID","dirRead",
                  "menu",["x","y","z"])
      setpar(n,44,"valueID","dirPhase",
                  "menu",["x","y","z"])
      setpar(n,46,"valueID","dirSlice",
                  "menu",["x","y","z"])
      setpar(n,49,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,51,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,54,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,57,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,60,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,62,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,64,"valueID","accumulate")
      setpar(n,66,"valueID","usePhaseCycle")
      setpar(n,68,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,70,"valueID","acqTime",
                  "tag","disable")
      setpar(n,73,"valueID","filter")
      setpar(n,75,"valueID","filterType",
                  "menu",[""])
      setpar(n,78,"valueID","timeMag")
      setpar(n,80,"valueID","showFreqDomain")
      setpar(n,82,"valueID","freqMag")
      setpar(n,84,"valueID","dispRange",
                  "type","float")
      setpar(n,88,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,92,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,96,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,100,"valueID","saveData")
      setpar(n,103,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,104,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,105,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,106,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,107,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,108,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,109,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,110,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,111,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,112,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,113,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,114,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,115,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",116)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)


#Checks
   :checkDelays(guipar)
   acqTimeReal = keaNMR:getAcqTime(guipar)
   if (d9<acqTimeReal);  pr "d9 too short"; abort(""); endif;
   :checkGradPowerRARE2D(guipar)
 

   sumData = cmatrix(totPnts)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime


# Reset the timer
   time(0)

   kSpace2D1 = cmatrix(nrPnts,nrStepsP)
    
             
# Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
         dspwrite("x",0x00,ppList)
   
       # Collect the data
         (status,data) = keaNMR:getData(totPnts,guipar)

         if(status != "ok")
            keaNMR:enableButtons()
            abort("")
         endif
   
   
       # Accumlate the data
         sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

         if(accumulate=="yes")
            sf = 1/(scan+1)
         else
            sf = 1
         endif

         pd = wvPP->subplot(1,1)
         pd->draw("false")
         pd->plot(sf*real(sumData),"tracecolor",black)
         pd->hold("on")
         pd->plot(sf*imag(sumData),"tracecolor",red)
         pd->hold("off")
         pd->title("text","raw data")
         pd->xlabel("text","points")
         pd->ylabel("text","amplitude")
         pd->draw("true")
   
 
      # Check timing
         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")
            scan = scan+1
            exitfor()
         endif

      next(scan)

      for(nPh = 0 to nrStepsP-1)
        kSpace2D1[~,nPh] = submatrix(sumData/nrScans,(0*nrStepsP+nPh)*nrPnts,(0*nrStepsP+nPh+1)*nrPnts-1)
      next(nPh)

      curplot("2d",1,1)
      image(kSpace2D1)
      curplot("2d",2,1)
      image(mag(kSpace2D1))
   
      assign("kSpace2D1",kSpace2D1,"global")


   npxRead  =2*:FFTsize(nrPnts)
   npxPhase =2*:FFTsize(nrStepsP)
   
   idatas1 = fft_local:2d(kSpace2D1,npxRead,npxPhase,"sinebell","sinebell","FTEcho","FTEcho","yes")
 
   curplot("2d",2,2)
   image(idatas1) 

   if(saveData == "true")
      :saveData(guipar,kSpace2D1,idatas1)
      keaFiles:incrementExperiment(guipar)
   endif



endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace2D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export2dpar("ab","binary","xyrc","real","machine","littleend")
   export2d(idata,"rawimage2d.2d")  # Save data as an Excel file

   export2dpar("ab","binary","xyrc","complex","machine","littleend")
   export2d(kSpace2D,"rawkSpace2d.2d")  # Save data as an Excel file

   (n1,n2) = size(idata)

   save("$n1$x$n2$.pixels_image","empty")

   (n1,n2) = size(kSpace2D)

   save("$n1$x$n2$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)
endproc("saveData")

#-----------------------------

procedure(getRewindSliceDelay,PulseLength90,sliceComp,rampDur)   
   d19=2
   d11=PulseLength90/2+sliceComp+d19-0.5*rampDur
   if(d11<=0.25)
      d11=2
      d19=d11+0.5*rampDur-PulseLength90/2-sliceComp
   endif
endproc(d11,d19)
#-----------------------------

procedure(setImageGradients,dirRead,dirPhase,dirSlice,FoVRead,FoVPhase,phDur,sliceTickness,sliceShift1,gfac,xshim,yshim,zshim,xcal,ycal,zcal)

   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVRead = FoVRead/1000                     # change from mm to m
   FoVPhase = FoVPhase/1000                   # change from mm to m
   sliceTickness = sliceTickness/1000         # change from mm to m
   sliceShift1 = sliceShift1/1000               # change from mm to m

   bandwidthRead =  bandwidth*1e3
   if(FoVRead==0)
      gReadAmpTperM=0
   else
      gReadAmpTperM =  bandwidthRead/42.57e6/FoVRead
   endif

   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000  

   if(dirRead == "x"); ampRead = gReadAmpTperM*xcal; ampReadShim = xshim*xcal;  endif
   if(dirRead == "y"); ampRead = gReadAmpTperM*ycal; ampReadShim = yshim*ycal; endif 
   if(dirRead == "z"); ampRead = gReadAmpTperM*zcal; ampReadShim = zshim*zcal; endif 

   bandwidthPhase =  1e6*0.5*nrStepsP/(phDur)
   
   if(FoVPhase==0)
      gPhaseAmpTperM=0
   else
      gPhaseAmpTperM =  bandwidthPhase/42.57e6/FoVPhase
   endif
  
   if(dirPhase == "x"); ampPhase = gPhaseAmpTperM*xcal; ampPhaseShim = xshim*xcal;  endif
   if(dirPhase == "y"); ampPhase = gPhaseAmpTperM*ycal; ampPhaseShim = yshim*ycal;  endif 
   if(dirPhase == "z"); ampPhase = gPhaseAmpTperM*zcal; ampPhaseShim = zshim*zcal;  endif

   bandwidthSlice =  gfac*1e6/(pulseLength90)

   if(sliceTickness == 0)
      gSliceTperM =0
   else
      gSliceTperM    =  bandwidthSlice/42.57e6/sliceTickness
   endif

   if(dirSlice == "x"); ampSlice = gSliceTperM*xcal; ampSliceShim = xshim*xcal; endif
   if(dirSlice == "y"); ampSlice = gSliceTperM*ycal; ampSliceShim = yshim*ycal; endif 
   if(dirSlice == "z"); ampSlice = gSliceTperM*zcal; ampSliceShim = zshim*zcal; endif

   sliceOffSet1 = gSliceTperM*42.57*sliceShift1 # in MHz
  
   if(abs(ampRead)>20800);   ampRead = 0; pr "Read gradient too high"; endif
   if(abs(ampPhase)>20800); ampPhase = 0; pr "Phase gradient too high"; endif
   if(abs(ampSlice)>20800); ampSlice = 0; pr "Slice gradient too high"; endif
  

endproc(round(ampRead),round(ampReadShim),round(ampPhase),round(ampPhaseShim),round(ampSlice),round(ampSliceShim),sliceOffSet1)

procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------
procedure(checkGradPowerRARE2D,guipar)

   assignlist(guipar)
   refPower=700

   #READ Channel
   p_R=gReadAmp*gReadAmp*(d8+d9+rampDur)*nrStepsP*1e-6
   
   #PHASE Channel
   t22=([0:1:nrStepsP]-nrStepsP/2+1/2)*gPhaseAmp/((nrStepsP-1)/2) + gPhaseAmpShim   
   p_temp=t22.*t22 *2*(d6+rampDur)*1e-6
   p_P=sum(p_temp)

   #SLICE Channel
   p_S=gSliceAmp*gSliceAmp*((pulseLength90+d101+d19+rampDur)+(pulseLength180+2*d102+rampDur)*nrStepsP)*1e-6
   
   p_mean=(p_R+p_P+p_S)/repTime  

   if (p_mean>refPower)
      if(p_S>p_R+p_P)
         pr "Power requirement too high. Increase repetition time or slice thickness. \n"
         message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms \r or slice thickness.","warning")
         abort("")          
      endif
      pr "Power requirement too high. Increase repetition time. \n"
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif

endproc()
#-----------------------------
procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()

#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)
