#########################################################
# 
# RARE_3D
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(RARE_3D, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,42,43,66,67,80,81,101,102,111] # Control groups
   wv_shift = [-14,174,362,550,553] # Amount to shift control groups
   wv_other = [110,256,803]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"RARE_3D",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d1 = pulseLength90",
          "d2 = pulseLength180",
          "rampDur = 100",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d8 = estTimeR",
          "d3 = 1000*acqTime/2+rxLat+d8-rampDur/2-acqShiftRead",
          "d4 = echoTime/2-d3-2*rampDur-pulseLength90/2-pulseLength180/2-pgo",
          "d5 = 10",
          "d6 = phDur-rampDur",
          "d7 = echoTime/2-1000*acqTime/2+acqShift+rxLat-d5-d6-d8-pulseLength180/2-5*rampDur",
          "d9 = 2*d3 - d8 + rampDur + timeReadCPMG",
          "d10 = echoTime-pulseLength180-pgo-d5-2*d6-d7-d8-d9-10*rampDur",
          "n10  = RARE_3D:convertDirToChannel(dirRead)",
          "n20  = RARE_3D:convertDirToChannel(dirPhase1)",
          "n30  = RARE_3D:convertDirToChannel(dirPhase2)",
          "(gReadAmp,gReadAmpShim,gPhaseAmp1,gPhaseAmpShim1,gPhaseAmp2,gPhaseAmpShim2) = RARE_3D:setImageGradients(dirRead,dirPhase1,dirPhase2,FoVRead,FoVPhase1,FoVPhase2,phDur,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n1 = nrStepsP1",
          "n11 = gReadAmp+gReadAmpShim",
          "n11a = gReadAmpShim",
          "t21  =  ([0:1:nrStepsP1]-nrStepsP1/2+1/2)*gPhaseAmp1/((nrStepsP1-1)/2) + gPhaseAmpShim1 ",
          "t22  = -([0:1:nrStepsP1]-nrStepsP1/2+1/2)*gPhaseAmp1/((nrStepsP1-1)/2) + gPhaseAmpShim1 ",
          "n21a = gPhaseAmpShim1",
          "n31  =-gPhaseAmp2 + gPhaseAmpShim2",
          "n32  = gPhaseAmp2 + gPhaseAmpShim2",
          "n31a = gPhaseAmpShim2",
          "n2 = nrPnts-0",
          "n3 = 0",
          "totPnts = nrPnts*nrStepsP1",
          "totTime = echoTime*nrStepsP1"]
   var = ["n31","n32"]
   pp_list = ["a1","p1","d1","n10","n11a","n11","n300","d300","d3","d4","t21","t22","n1","l1","p2","d2","d5","n20","n21a","n30","n31a","n31","d6","d7","d8","n2","d9","n32","d10"]
   pp_name = "RARE_3D.p"
   phase_list = [0,2;1,1;0,2]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("RARE 3D", -1, -1, 698, 800)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 680, 244,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 672, 181)
      statictext(3, 116, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 122, 27, 46)
      statictext(5, 116, 56, "right", "Repetition time (ms)")
      textbox(6, 122, 52, 46)
      statictext(7, 116, 82, "right", "Offset (Hz)")
      textbox(8, 122, 78, 46)
      statictext(9, 116, 108, "right", "rf amplitude (dB)")
      textbox(10, 122, 104, 40)
      statictext(11, 116, 134, "right", "90 pulse length (us)")
      textbox(12, 122, 130, 40)
      statictext(13, 116, 160, "right", "180 pulse length (us)")
      textbox(14, 122, 156, 40)
      statictext(15, 286, 30, "right", "Echotime (us)")
      textbox(16, 292, 26, 40)
      statictext(17, 286, 56, "right", "acquisition Shift(us)")
      textbox(18, 292, 52, 40)
      statictext(19, 286, 82, "right", "estabil. Time read (us)")
      textbox(20, 292, 78, 40)
      statictext(21, 286, 108, "right", "acqShiftRead (us)")
      textbox(22, 292, 104, 40)
      statictext(23, 286, 134, "right", "timining CPMG Read (us)")
      textbox(24, 292, 130, 40)
      statictext(25, 286, 160, "right", "duration phase (us)")
      textbox(26, 292, 156, 40)
      statictext(27, 456, 30, "right", "FoV Read (mm)")
      textbox(28, 462, 26, 40)
      statictext(29, 456, 56, "right", "FoV Phase1 (mm)")
      textbox(30, 462, 52, 40)
      statictext(31, 456, 82, "right", "FoV Phase2 (mm)")
      textbox(32, 462, 78, 40)
      statictext(33, 456, 108, "right", "nro. pts. phase1")
      textbox(34, 462, 104, 40)
      statictext(35, 456, 134, "right", "nro. pts. phase2")
      textbox(36, 462, 130, 40)
      statictext(37, 626, 30, "right", "Read Dir.")
      textmenu(38, 632, 26, 40, 200)
      statictext(39, 626, 56, "right", "Phase Dir.1")
      textmenu(40, 632, 52, 40, 200)
      statictext(41, 626, 82, "right", "Phase Dir.2")
      textmenu(42, 632, 78, 40, 200)
      groupbox(43, "Acquisition", 9, 197, 672, 181)
      statictext(44, 139, 242, "center", "Rx Gain (dB)")
      textmenu(45, 122, 260, 39, 200)
      statictext(46, 139, 291, "center", "Rx Phase (degrees)")
      textbox(47, 122, 307, 39)
      statictext(48, 247, 244, "center", "Number of")
      statictext(49, 247, 257, "center", "complex points")
      textmenu(50, 294, 246, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(51, 247, 276, "center", "Dwell time")
      statictext(52, 247, 289, "center", "(us)")
      textmenu(53, 294, 279, 62, 200,
         keaCtrl:updateFilters();)
      statictext(54, 247, 310, "center", "Number of")
      statictext(55, 247, 323, "center", "scans")
      textbox(56, 294, 311, 62)
      statictext(57, 421, 258, "center", "Flat filter")
      checkbox(58, 457, 259, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(59, 421, 282, "center", "Accumulate")
      checkbox(60, 457, 283, "no,yes", "no")
      statictext(61, 421, 306, "center", "Phase cycle")
      checkbox(62, 457, 308, "no,yes", "yes")
      statictext(63, 549, 242, "center", "Spectral width (kHz)")
      textbox(64, 520, 256, 56)
      statictext(65, 549, 293, "center", "Acquisition time (ms)")
      textbox(66, 520, 307, 56)
      groupbox(67, "Processing_Display", 9, 385, 672, 181)
      statictext(68, 268, 439, "right", "Filter time domain")
      checkbox(69, 276, 440, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(70, 150, 470, "right", "Filter")
      textmenu(71, 157, 466, 108, 200)
      button(72, 274, 466, 22, 22, "...",
         filters();)
      statictext(73, 268, 502, "right", "Time domain magnitude")
      checkbox(74, 276, 503, "no,yes", "no")
      statictext(75, 539, 437, "right", "Show frequency domain data")
      checkbox(76, 547, 438, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(77, 539, 467, "right", "Frequency domain magnitude")
      checkbox(78, 547, 468, "no,yes", "no")
      statictext(79, 489, 500, "right", "Display range (kHz)")
      textbox(80, 499, 497, 61)
      groupbox(81, "File_Settings", 9, 573, 672, 181)
      statictext(82, 142, 637, "right", "Working")
      statictext(83, 142, 650, "right", "directory")
      textbox(84, 158, 638, 215)
      button(85, 378, 638, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(86, 149, 674, "right", "Experiment")
      statictext(87, 134, 687, "right", "name")
      textbox(88, 158, 677, 105)
      button(89, 269, 677, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(90, 371, 674, "right", "Experiment")
      statictext(91, 361, 687, "right", "number")
      textbox(92, 379, 677, 25)
      button(93, 409, 677, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(94, 433, 636, "center", "Save")
      statictext(95, 433, 649, "center", "data")
      checkbox(96, 461, 643, "false,true", "true")
      statictext(97, 477, 674, "center", "Auto")
      statictext(98, 477, 687, "center", "increment")
      checkbox(99, 512, 682, "no,yes", "no")
      button(100, 498, 631, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(101, 553, 631, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(102, 80, 767, 10, 10, [255,255,255,255])
      colorbox(103, 80, 780, 10, 10, [255,255,255,255])
      button(104, 100, 764, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(105, 165, 764, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(106, 230, 764, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(107, 295, 764, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(108, 360, 764, 54, 29, "Help",
         help("Macros\Tomograph","RARE_3D.htm");)
      button(109, 425, 764, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(110, 490, 764, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(111, 555, 764, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(112, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,1e+008])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,12,"valueID","pulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","pulseLength180",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,16,"valueID","echoTime",
                  "type","float",
                  "range",[2,327670])
      setpar(n,18,"valueID","acqShift",
                  "type","float",
                  "range",[2,327670])
      setpar(n,20,"valueID","estTimeR",
                  "type","float",
                  "range",[2,327670])
      setpar(n,22,"valueID","acqShiftRead",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,24,"valueID","timeReadCPMG",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,26,"valueID","phDur",
                  "type","float",
                  "range",[2,327670])
      setpar(n,28,"valueID","FoVRead",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,30,"valueID","FoVPhase1",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,32,"valueID","FoVPhase2",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,34,"valueID","nrStepsP1",
                  "type","integer",
                  "range",[1,500])
      setpar(n,36,"valueID","nrStepsP2",
                  "type","integer",
                  "range",[1,500])
      setpar(n,38,"valueID","dirRead",
                  "menu",["x","y","z"])
      setpar(n,40,"valueID","dirPhase1",
                  "menu",["x","y","z"])
      setpar(n,42,"valueID","dirPhase2",
                  "menu",["x","y","z"])
      setpar(n,45,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,47,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,50,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,53,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,56,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,58,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,60,"valueID","accumulate")
      setpar(n,62,"valueID","usePhaseCycle")
      setpar(n,64,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,66,"valueID","acqTime",
                  "tag","disable")
      setpar(n,69,"valueID","filter")
      setpar(n,71,"valueID","filterType",
                  "menu",[""])
      setpar(n,74,"valueID","timeMag")
      setpar(n,76,"valueID","showFreqDomain")
      setpar(n,78,"valueID","freqMag")
      setpar(n,80,"valueID","dispRange",
                  "type","float")
      setpar(n,84,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,88,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,92,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,96,"valueID","saveData")
      setpar(n,99,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,100,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,101,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,102,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,103,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,104,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,105,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,106,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,107,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,108,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,109,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,110,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,111,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",112)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)

#Checks
   :checkDelays(guipar)
   acqTimeReal = keaNMR:getAcqTime(guipar)
   if (d9<acqTimeReal);  pr "d9 too short"; abort(""); endif;
   :checkGradPowerRARE3D(guipar)
   :checkGradDir(guipar)


   sumData = cmatrix(totPnts)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime


# Reset the timer
   time(0)
  
   kSpace3D = cmatrix(nrPnts,nrStepsP1,nrStepsP2)
   kSpace2D = cmatrix(nrPnts,nrStepsP1*nrStepsP2)
               
      
   for(nPh2= 0 to nrStepsP2-1)
      
     # pr nPh2
      grPh2a =   round(2*gPhaseAmp2/(nrStepsP2)*(-(nrStepsP2-1)/2+nPh2)) + gPhaseAmpShim2
      grPh2b =  -round(2*gPhaseAmp2/(nrStepsP2)*(-(nrStepsP2-1)/2+nPh2)) + gPhaseAmpShim2
      
      ppList = keaNMR:setPPNumber(ppList,varIndex[0],grPh2a)
      ppList = keaNMR:setPPNumber(ppList,varIndex[1],grPh2b)
            
      sumData = cmatrix(totPnts)
      
# Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
         dspwrite("x",0x00,ppList)
   
       # Collect the data
         (status,data) = keaNMR:getData(totPnts,guipar)
         if(status != "ok")
            keaNMR:enableButtons()
            abort("")
         endif

       # Accumlate the data
         sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

         if(accumulate=="yes")
            sf = 1/(scan+1)
         else
            sf = 1
         endif
   
         pd = wvPP->subplot(1,1)
         pd->draw("false")
         pd->plot(sf*real(sumData),"tracecolor",black)
         pd->hold("on")
         pd->plot(sf*imag(sumData),"tracecolor",red)
         pd->hold("off")
         pd->title("text","phase2 step ($nPh2+1$/$nrStepsP2$)")
         pd->xlabel("text","points")
         pd->ylabel("text","amplitude")
         pd->draw("true")
   
   
      # Check timing
         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")
            scan = scan+1
            nPh2 = 100000
            exitfor()
         endif

      next(scan)

      for(nPh1 = 0 to nrStepsP1-1)
         kSpace3D[~,nPh1,nPh2] = submatrix(sumData/nrScans,nPh1*nrPnts,(nPh1+1)*nrPnts-1)
         kSpace2D[~,nPh1+nPh2*nrStepsP1] = submatrix(sumData/nrScans,nPh1*nrPnts,(nPh1+1)*nrPnts-1)
      next(nPh1)
      image(kSpace2D)
   
   next(nPh2)

 
   npxRead  =2*:FFTsize(nrPnts)
  # npxPhase1 =2*:FFTsize(nrStepsP1)
   npxPhase1 = npxRead
   npxPhase2 =2*:FFTsize(nrStepsP2)
   
   assign("kSpace3D",kSpace3D,"global")

   idata = fft_local:3d(kSpace3D,npxRead,npxPhase1,npxPhase2,"sinebell","sinebell","sinebell","FTEcho","FTEcho","FTEcho","yes")
 
   assign("idata",idata,"global")

   idataRP1   = matrix(npxRead,npxPhase1)
   idataRP2   = matrix(npxRead,npxPhase2)
   idataP1P2  = matrix(npxPhase1,npxPhase2)

   idataRP1[~,~] = idata[~,~,round(npxPhase2/2)]  
   idataRP2[~,~] = idata[~,round(npxPhase1/2),~]   
   idataP1P2[~,~] = idata[round(npxRead/2),~,~]  

   curplot("2d",1,2)
   image(idataRP1)
   curplot("2d",2,2)
   image(idataRP2)
   curplot("2d",2,1)
   image(idataP1P2)

   if(saveData == "true")
      :saveData(guipar,kSpace3D,idata)
      keaFiles:incrementExperiment(guipar)
   endif


endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace3D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export3dpar("ab","binary","xyrc","real","machine","littleend")
   export3d(idata,"rawimage3d.3d")  # Save data as an Excel file

   export3dpar("ab","binary","xyrc","complex","machine","littleend")
   export3d(kSpace3D,"rawkSpace3d.3d")  # Save data as an Excel file

   (n1,n2,n3,n4) = size(idata)

   save("$n1$x$n2$x$n3$.pixels_image","empty")

   (n1,n2,n3,n4) = size(kSpace3D)

   save("$n1$x$n2$X$n3$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)

endproc("saveData")


procedure(setImageGradients,dirRead,dirPhase1,dirPhase2,FoVRead,FoVPhase1,FoVPhase2,phDur,xshim,yshim,zshim,xcal,ycal,zcal)

   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVRead   = FoVRead/1000             # change from mm to m
   FoVPhase1 = FoVPhase1/1000           # change from mm to m
   FoVPhase2 = FoVPhase2/1000           # change from mm to m
#-------------------------------------------
   bandwidthRead =  bandwidth*1e3
   if(FoVRead==0)
      gReadAmpTperM=0
   else
      gReadAmpTperM =  bandwidthRead/42.57e6/FoVRead
   endif

   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000

   if(dirRead == "x"); ampRead = gReadAmpTperM*xcal; ampReadShim = xshim*xcal;  endif
   if(dirRead == "y"); ampRead = gReadAmpTperM*ycal; ampReadShim = yshim*ycal; endif 
   if(dirRead == "z"); ampRead = gReadAmpTperM*zcal; ampReadShim = zshim*zcal; endif 

#-----------------------------------------
   bandwidthPhase1 =  1e6*0.5*nrStepsP1/(phDur)
   
   if(FoVPhase1==0)
      gPhaseAmpTperM1=0
   else
      gPhaseAmpTperM1 =  bandwidthPhase1/42.57e6/FoVPhase1
   endif
  
   if(dirPhase1 == "x"); ampPhase1 = gPhaseAmpTperM1*xcal; ampPhaseShim1 = xshim*xcal;  endif
   if(dirPhase1 == "y"); ampPhase1 = gPhaseAmpTperM1*ycal; ampPhaseShim1 = yshim*ycal;  endif 
   if(dirPhase1 == "z"); ampPhase1 = gPhaseAmpTperM1*zcal; ampPhaseShim1 = zshim*zcal;  endif

#-----------------------------------------
   bandwidthPhase2 =  1e6*0.5*nrStepsP2/(phDur)
   
   if(FoVPhase2==0)
      gPhaseAmpTperM2=0
   else
      gPhaseAmpTperM2 =  bandwidthPhase2/42.57e6/FoVPhase2
   endif
  
   if(dirPhase2 == "x"); ampPhase2 = gPhaseAmpTperM2*xcal; ampPhaseShim2 = xshim*xcal;  endif
   if(dirPhase2 == "y"); ampPhase2 = gPhaseAmpTperM2*ycal; ampPhaseShim2 = yshim*ycal; endif 
   if(dirPhase2 == "z"); ampPhase2 = gPhaseAmpTperM2*zcal; ampPhaseShim2 = zshim*zcal;  endif

# -----------------------------------------------
   if(abs(ampRead)>20800);   ampRead = 0; pr "Read gradient too high"; endif
   if(abs(ampPhase1)>20800); ampPhase1 = 0; pr "Phase1 gradient too high"; endif
   if(abs(ampPhase2)>20800); ampPhase2 = 0; pr "Phase2 gradient too high"; endif



endproc(round(ampRead),round(ampReadShim),round(ampPhase1),round(ampPhaseShim1),round(ampPhase2),round(ampPhaseShim2))

procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------
procedure(checkGradPowerRARE3D,guipar)

   assignlist(guipar)
   refPower=700
   
   #READ Channel
   p_R=gReadAmp*gReadAmp*(d8+d9+rampDur)*nrStepsP1*1e-6
   
   #PHASE1 Channel
   tP1=([0:1:nrStepsP1]-nrStepsP1/2+1/2)*gPhaseAmp1/((nrStepsP1-1)/2) + gPhaseAmpShim1  
   p_temp=tP1.*tP1 *2*(d6+2*rampDur)*1e-6
   p_P1=sum(p_temp)

   #PHASE2 Channel
   p_P2=gPhaseAmp2*gPhaseAmp2 *2*(d6+2*rampDur)*nrStepsP1*1e-6

   
   p_mean=(p_R+p_P1+p_P2)/repTime  


   if (p_mean>refPower)
      if(p_P2>p_P1+p_R)
         pr "Power requirement too high. Increase repetition time or reduce Nr. points along Phase 2 direction. \n"
         message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms \r or  reduce Nr. points along Phase 2 direction.","warning")
         abort("")         
      endif
      pr "Power requirement too high. Increase repetition time. \n"
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif

endproc()
#-----------------------------
procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()

#-----------------------------
procedure(checkGradDir,guipar)
assignlist(guipar)
if(dirPhase1==dirPhase2)
      message("Waring","Phase1 direction should be \r different from Phase2 direction.","warning")
      abort("")
endif
endproc()

#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)

