#########################################################
# 
# SE_3D_DWI
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(SE_3D_DWI, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,62,63,86,87,100,101,121,122,131] # Control groups
   wv_shift = [-14,226,466,706,709] # Amount to shift control groups
   wv_other = [130,308,1011]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"SE_3D_DWI",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d1 = PulseLength90",
          "d500 = 2",
          "n500 = round(PulseLength90/d500)",
          "(t1,t2,gfac) = B1NutSoft:getRFPulse(SPType,a1,n500)",
          "d2 = PulseLength180",
          "rampDur = 100",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d500 = 2.5",
          "n500 = round(rampDiff/d500)",
          "d100 = 100",
          "d101 = 100",
          "d20 = tauDiff",
          "(del9,del99) = SE_3D_DWI:getRewindSliceDelay(PulseLength90,sliceComp,rampDur)",
          "d99=del99",
          "d9=del9",
          "d6   = estTimeR",
          "d3   = 1000*acqTime/2 + d6 - 2.5*rampDur - acqShiftRead",
          "phDur = d3+2*rampDur+2*0.5*rampDur",
          "d4   = echoTime/2-PulseLength90/2-d101-d9-d99-d3-PulseLength180/2-pgo-9*rampDur-2*rampDiff-d20",
          "d5   = bDelta-4*rampDur-d3-d4-pgo-PulseLength180-2*rampDiff-d20",
          "d7   = echoTime/2-1000*acqTime/2-d6-PulseLength180/2-1*rampDur+rxLat+acqShift-2*rampDiff-d20-d5",
          "n10  = SE_3D_DWI:convertDirToChannel(dirRead)",
          "n20  = SE_3D_DWI:convertDirToChannel(dirPhase1)",
          "n30  = SE_3D_DWI:convertDirToChannel(dirSlice)",
          "n40  = SE_3D_DWI:convertDirToChannel(dirPhase2)",
          "n50  = SE_3D_DWI:convertDirToChannel(dirDiff)",
          "(gReadAmp,gReadAmpShim,gPhaseAmp1,gPhaseAmpShim1,gPhaseAmp2,gPhaseAmpShim2,gSliceAmp,gSliceAmpShim,sliceOffSet,gDiffAmp,gDiffAmpShim) = SE_3D_DWI:setImageGradients(dirRead,dirPhase1,dirPhase2,dirSlice,dirDiff,FoVRead,FoVPhase1,FoVPhase2,gradDiffTpm,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n31 =  gSliceAmp+gSliceAmpShim",
          "n31a = gSliceAmpShim",
          "n32 = -gSliceAmp+gSliceAmpShim",
          "n11  =  gReadAmp+gReadAmpShim",
          "n11a =  gReadAmpShim",
          "n12  =  gReadAmp+gReadAmpShim",
          "n12a =  gReadAmpShim",
          "n21  =  gPhaseAmp1+gPhaseAmpShim1",
          "n21a =  gPhaseAmpShim1",
          "n41  =  gPhaseAmp2+gPhaseAmpShim2",
          "n41a =  gPhaseAmpShim2",
          "n51  =  gDiffAmp+gDiffAmpShim",
          "n51a =  gDiffAmpShim",
          "f1  =  b1Freq+O1/1e6+sliceOffSet",
          "f2  =  b1Freq+O1/1e6",
          "n1  = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["n21","n41"]
   pp_list = ["f1","n30","n31a","n31","n300","d300","d100","t1","t2","p1","n500","d500","d99","d101","f2","n32","d9","n50","n51a","n51","d20","n10","n11a","n11","n20","n21a","n21","n40","n41a","n41","d3","d4","a2","p2","d2","d5","d7","n12a","n12","d6","n1"]
   pp_name = "SE_3D_DWI.p"
   phase_list = [0,2;1,1;0,2]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("Spin Echo 3D DWI", -1, -1, 800, 751)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 782, 296,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 774, 233)
      statictext(3, 116, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 122, 27, 46)
      statictext(5, 116, 56, "right", "Repetition time (ms)")
      textbox(6, 122, 52, 46)
      statictext(7, 116, 82, "right", "Offset (Hz)")
      textbox(8, 122, 78, 46)
      statictext(9, 116, 108, "right", "90 amplitude (dB)")
      textbox(10, 122, 104, 40)
      statictext(11, 116, 134, "right", "90 pulse length (us)")
      textbox(12, 122, 130, 40)
      statictext(13, 116, 160, "right", "Soft pulse shape")
      textmenu(14, 122, 156, 60, 200)
      statictext(15, 116, 186, "right", "180 amplitude (dB)")
      textbox(16, 122, 182, 40)
      statictext(17, 116, 212, "right", "180 pulse length (us)")
      textbox(18, 122, 208, 40)
      statictext(19, 286, 30, "right", "Echotime (us)")
      textbox(20, 292, 26, 40)
      statictext(21, 286, 56, "right", "acquisition Shift(us)")
      textbox(22, 292, 52, 40)
      statictext(23, 286, 82, "right", "estabil. Time read (us)")
      textbox(24, 292, 78, 40)
      statictext(25, 286, 108, "right", "acqShiftRead (us)")
      textbox(26, 292, 104, 40)
      statictext(27, 286, 134, "right", "sliceComp(us)")
      textbox(28, 292, 130, 40)
      statictext(29, 456, 30, "right", "FoV Read (mm)")
      textbox(30, 462, 26, 40)
      statictext(31, 456, 56, "right", "FoV Phase 1 (mm)")
      textbox(32, 462, 52, 40)
      statictext(33, 456, 82, "right", "nr. pixels phase 1")
      textbox(34, 462, 78, 40)
      statictext(35, 456, 108, "right", "FoV Phase 2 (mm)")
      textbox(36, 462, 104, 40)
      statictext(37, 456, 134, "right", "nr. pixels phase 2")
      textbox(38, 462, 130, 40)
      statictext(39, 456, 160, "right", "Slice thickness (mm)")
      textbox(40, 462, 156, 40)
      statictext(41, 456, 186, "right", "Slice shift (mm)")
      textbox(42, 462, 182, 40)
      statictext(43, 507, 30, "right", "")
      textmenu(44, 513, 26, 40, 200)
      statictext(45, 507, 56, "right", "")
      textmenu(46, 513, 52, 40, 200)
      statictext(47, 507, 108, "right", "")
      textmenu(48, 513, 104, 40, 200)
      statictext(49, 507, 160, "right", "")
      textmenu(50, 513, 156, 40, 200)
      statictext(51, 677, 30, "right", "BIG delta (us)")
      textbox(52, 683, 26, 46)
      statictext(53, 677, 56, "right", "gradient (T/m)")
      textbox(54, 683, 52, 40)
      statictext(55, 677, 82, "right", "little delta (us)")
      textbox(56, 683, 78, 40)
      statictext(57, 677, 108, "right", "rampDiff (us)")
      textbox(58, 683, 104, 40)
      statictext(59, 728, 56, "right", "")
      textmenu(60, 734, 52, 40, 200)
      statictext(61, 677, 156, "center", "")
      button(62, 677, 156, 70, 25, "calculate b",
         :calc_b();)
      groupbox(63, "Acquisition", 9, 249, 774, 233)
      statictext(64, 190, 320, "center", "Rx Gain (dB)")
      textmenu(65, 173, 338, 39, 200)
      statictext(66, 190, 369, "center", "Rx Phase (degrees)")
      textbox(67, 173, 385, 39)
      statictext(68, 298, 322, "center", "Number of")
      statictext(69, 298, 335, "center", "complex points")
      textmenu(70, 345, 324, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(71, 298, 354, "center", "Dwell time")
      statictext(72, 298, 367, "center", "(us)")
      textmenu(73, 345, 357, 62, 200,
         keaCtrl:updateFilters();)
      statictext(74, 298, 388, "center", "Number of")
      statictext(75, 298, 401, "center", "scans")
      textbox(76, 345, 389, 62)
      statictext(77, 472, 336, "center", "Flat filter")
      checkbox(78, 508, 337, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(79, 472, 360, "center", "Accumulate")
      checkbox(80, 508, 361, "no,yes", "no")
      statictext(81, 472, 384, "center", "Phase cycle")
      checkbox(82, 508, 386, "no,yes", "yes")
      statictext(83, 600, 320, "center", "Spectral width (kHz)")
      textbox(84, 571, 334, 56)
      statictext(85, 600, 371, "center", "Acquisition time (ms)")
      textbox(86, 571, 385, 56)
      groupbox(87, "Processing_Display", 9, 489, 774, 233)
      statictext(88, 319, 569, "right", "Filter time domain")
      checkbox(89, 327, 570, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(90, 201, 600, "right", "Filter")
      textmenu(91, 208, 596, 108, 200)
      button(92, 325, 596, 22, 22, "...",
         filters();)
      statictext(93, 319, 632, "right", "Time domain magnitude")
      checkbox(94, 327, 633, "no,yes", "no")
      statictext(95, 590, 567, "right", "Show frequency domain data")
      checkbox(96, 598, 568, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(97, 590, 597, "right", "Frequency domain magnitude")
      checkbox(98, 598, 598, "no,yes", "no")
      statictext(99, 540, 630, "right", "Display range (kHz)")
      textbox(100, 550, 627, 61)
      groupbox(101, "File_Settings", 9, 729, 774, 233)
      statictext(102, 193, 819, "right", "Working")
      statictext(103, 193, 832, "right", "directory")
      textbox(104, 209, 820, 215)
      button(105, 429, 820, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(106, 200, 856, "right", "Experiment")
      statictext(107, 185, 869, "right", "name")
      textbox(108, 209, 859, 105)
      button(109, 320, 859, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(110, 422, 856, "right", "Experiment")
      statictext(111, 412, 869, "right", "number")
      textbox(112, 430, 859, 25)
      button(113, 460, 859, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(114, 484, 818, "center", "Save")
      statictext(115, 484, 831, "center", "data")
      checkbox(116, 512, 825, "false,true", "true")
      statictext(117, 528, 856, "center", "Auto")
      statictext(118, 528, 869, "center", "increment")
      checkbox(119, 563, 864, "no,yes", "no")
      button(120, 549, 813, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(121, 604, 813, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(122, 131, 975, 10, 10, [255,255,255,255])
      colorbox(123, 131, 988, 10, 10, [255,255,255,255])
      button(124, 151, 972, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(125, 216, 972, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(126, 281, 972, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(127, 346, 972, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(128, 411, 972, 54, 29, "Help",
         help("Macros\Tomograph-Poland","SE_3D_DWI.htm");)
      button(129, 476, 972, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(130, 541, 972, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(131, 606, 972, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(132, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,1e+008])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,12,"valueID","PulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","SPType",
                  "menu",["sinc3","sinc5","gauss","rect"])
      setpar(n,16,"valueID","a2",
                  "type","float",
                  "range",[-85,0])
      setpar(n,18,"valueID","PulseLength180",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,20,"valueID","echoTime",
                  "type","float",
                  "range",[2,327670])
      setpar(n,22,"valueID","acqShift",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,24,"valueID","estTimeR",
                  "type","float",
                  "range",[2,327670])
      setpar(n,26,"valueID","acqShiftRead",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,28,"valueID","sliceComp",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,30,"valueID","FoVRead",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,32,"valueID","FoVPhase1",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,34,"valueID","nrStepsP1",
                  "type","integer",
                  "range",[1,500])
      setpar(n,36,"valueID","FoVPhase2",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,38,"valueID","nrStepsP2",
                  "type","integer",
                  "range",[1,500])
      setpar(n,40,"valueID","sliceTickness",
                  "type","float",
                  "range",[0,10000])
      setpar(n,42,"valueID","sliceShift",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,44,"valueID","dirRead",
                  "menu",["x","y","z"])
      setpar(n,46,"valueID","dirPhase1",
                  "menu",["x","y","z"])
      setpar(n,48,"valueID","dirPhase2",
                  "menu",["x","y","z"])
      setpar(n,50,"valueID","dirSlice",
                  "menu",["x","y","z"])
      setpar(n,52,"valueID","bDelta",
                  "type","float",
                  "range",[2,327670])
      setpar(n,54,"valueID","gradDiffTpm",
                  "type","float",
                  "range",[-0.35,0.35])
      setpar(n,56,"valueID","tauDiff",
                  "type","float",
                  "range",[2,327670])
      setpar(n,58,"valueID","rampDiff",
                  "type","float",
                  "range",[2,327670])
      setpar(n,60,"valueID","dirDiff",
                  "menu",["x","y","z"])
      setpar(n,62,"valueID","calc_b")
      setpar(n,65,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,67,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,70,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,73,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,76,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,78,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,80,"valueID","accumulate")
      setpar(n,82,"valueID","usePhaseCycle")
      setpar(n,84,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,86,"valueID","acqTime",
                  "tag","disable")
      setpar(n,89,"valueID","filter")
      setpar(n,91,"valueID","filterType",
                  "menu",[""])
      setpar(n,94,"valueID","timeMag")
      setpar(n,96,"valueID","showFreqDomain")
      setpar(n,98,"valueID","freqMag")
      setpar(n,100,"valueID","dispRange",
                  "type","float")
      setpar(n,104,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,108,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,112,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,116,"valueID","saveData")
      setpar(n,119,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,120,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,121,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,122,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,123,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,124,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,125,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,126,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,127,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,128,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,129,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,130,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,131,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",132)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

# Make subplots
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)


#Checks
   :checkDelays(guipar)
   :checkGradPowerSE_3D_DWI(guipar)
   :checkGradDir(guipar)


   sumData = cmatrix(totPnts)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime

# Reset the timer
   time(0)

   kSpace3D = cmatrix(nrPnts,nrStepsP1,nrStepsP2)
   kSpace2D = cmatrix(nrPnts,nrStepsP1*nrStepsP2)  

   for(nPh2= 0 to nrStepsP2-1)

      pr nPh2

      grPh2 =  -round(2*gPhaseAmp2/(nrStepsP2)*(-(nrStepsP2-1)/2+nPh2)) + gPhaseAmpShim2
      
      ppList = keaNMR:setPPNumber(ppList,varIndex[1],grPh2)
      
      for(nPh1= 0 to nrStepsP1-1)
      
         sumData = cmatrix(totPnts)
      
         grPh1 =  -round(2*gPhaseAmp1/(nrStepsP1)*(-(nrStepsP1-1)/2+nPh1)) + gPhaseAmpShim1
      
         ppList = keaNMR:setPPNumber(ppList,varIndex[0],grPh1)
      
                     
      # Accumulate scan
            for(scan = 0 to nrScans-1)
           
             # Note the time at scan start
               t1 = time()   
         
             # Set phases for this scan
               (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
         
             # Send phase parameters to DSP
               dspwrite("x",0x00,ppList)
         
             # Collect the data
               (status,data) = keaNMR:getData(totPnts,guipar)
               if(status != "ok")
                  keaNMR:enableButtons()
                  abort("")
               endif
         
             # Accumlate the data
               sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

               if(accumulate=="yes")
                  sf = 1/(scan+1)
               else
                  sf = 1
               endif
         
               pd = wvPP->subplot(1,1)
               pd->draw("false")
               pd->plot(sf*sumData)
               pd->title("text","raw data")
               pd->xlabel("text","points")
               pd->ylabel("text","amplitude")
               pd->draw("true")
       
            # Check timing
               check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
               if(check == "abort")
                  return(0)
               elseif(check == "finish")
                  scan = scan+1
                  nPh1 = 10000000000
                  nPh2 = 10000000000
                  exitfor()
               endif
      
            next(scan)
      
            kSpace3D[~,nPh1,nPh2] = sumData/nrScans
            kSpace2D[~,nPh1+nPh2*nrStepsP1] = sumData/nrScans
            image(kSpace2D)
         
      
         next(nPh1)
    next(nPh2)

   npxRead  =2*:FFTsize(nrPnts)
   npxPhase1 =2*:FFTsize(nrStepsP1)
   npxPhase2 =2*:FFTsize(nrStepsP2)

   assign("kSpace3D",kSpace3D,"global")

   idata = fft_local:3d(kSpace3D,npxRead,npxPhase1,npxPhase2,"sinebell","sinebell","sinebell","FTEcho","FTEcho","FTEcho","yes")
 
   assign("idata",idata,"global")

   idataRP1   = matrix(npxRead,npxPhase1)
   idataRP2   = matrix(npxRead,npxPhase2)
   idataP1P2  = matrix(npxPhase1,npxPhase2)

   idataRP1[~,~] = idata[~,~,round(npxPhase2/2)]  
   idataRP2[~,~] = idata[~,round(npxPhase1/2),~]   
   idataP1P2[~,~] = idata[round(npxRead/2),~,~] 

   curplot("2d",1,2)
   image(idataRP1)
   curplot("2d",2,2)
   image(idataRP2)
   curplot("2d",2,1)
   image(idataP1P2)

   if(saveData == "true")
      :saveData(guipar,kSpace3D,idata)
      keaFiles:incrementExperiment(guipar)
   endif

endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace3D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export3dpar("ab","binary","xyrc","real","machine","littleend")
   export3d(idata,"rawimage3d.3d")  # Save data as an Excel file

   export3dpar("ab","binary","xyrc","complex","machine","littleend")
   export3d(kSpace3D,"rawkSpace3d.3d")  # Save data as an Excel file

   (n1,n2,n3,n4) = size(idata)

   save("$n1$x$n2$x$n3$.pixels_image","empty")

   (n1,n2,n3,n4) = size(kSpace3D)

   save("$n1$x$n2$X$n3$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)



endproc("saveData")
#-----------------------------

procedure(getRewindSliceDelay,PulseLength90,sliceComp,rampDur)
   d99=2
   d9=PulseLength90/2+sliceComp+d99-0.5*rampDur
   if(d9<=0.25)
      d9=2
      d99=d9+0.5*rampDur-PulseLength90/2-sliceComp
   endif
endproc(d9,d99)
#-----------------------------

procedure(setImageGradients,dirRead,dirPhase1,dirPhase2,dirSlice,dirDiff,FoVRead,FoVPhase1,FoVPhase2,gradDiffTpm,phDur,sliceTickness,sliceShift,gfac,xshim,yshim,zshim,xcal,ycal,zcal)

   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVRead   = FoVRead/1000             # change from mm to m
   FoVPhase1 = FoVPhase1/1000           # change from mm to m
   FoVPhase2 = FoVPhase2/1000           # change from mm to m
   sliceTickness = sliceTickness/1000   # change from mm to m
   sliceShift = sliceShift/1000         # change from mm to m

   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000  


   bandwidthRead =  bandwidth*1e3
   if(FoVRead==0)
      gReadAmpTperM=0
   else
      gReadAmpTperM =  bandwidthRead/42.57e6/FoVRead
   endif

   if(dirRead == "x"); ampRead = gReadAmpTperM*xcal; ampReadShim = xshim*xcal;  endif
   if(dirRead == "y"); ampRead = gReadAmpTperM*ycal; ampReadShim = yshim*ycal; endif 
   if(dirRead == "z"); ampRead = gReadAmpTperM*zcal; ampReadShim = zshim*zcal; endif 

# phase1
   bandwidthPhase1 =  1e6*0.5*nrStepsP1/(phDur)
   
   if(FoVPhase1==0)
      gPhaseAmpTperM1=0
   else
      gPhaseAmpTperM1 =  bandwidthPhase1/42.57e6/FoVPhase1
   endif
  
   if(dirPhase1 == "x"); ampPhase1 = gPhaseAmpTperM1*xcal; ampPhaseShim1 = xshim*xcal;  endif
   if(dirPhase1 == "y"); ampPhase1 = gPhaseAmpTperM1*ycal; ampPhaseShim1 = yshim*ycal; endif 
   if(dirPhase1 == "z"); ampPhase1 = gPhaseAmpTperM1*zcal; ampPhaseShim1 = zshim*zcal;  endif

# phase2
   bandwidthPhase2 =  1e6*0.5*nrStepsP2/(phDur)
   
   if(FoVPhase2==0)
      gPhaseAmpTperM2=0
   else
      gPhaseAmpTperM2 =  bandwidthPhase2/42.57e6/FoVPhase2
   endif
  
   if(dirPhase2 == "x"); ampPhase2 = gPhaseAmpTperM2*xcal; ampPhaseShim2 = xshim*xcal;  endif
   if(dirPhase2 == "y"); ampPhase2 = gPhaseAmpTperM2*ycal; ampPhaseShim2 = yshim*ycal;  endif 
   if(dirPhase2 == "z"); ampPhase2 = gPhaseAmpTperM2*zcal; ampPhaseShim2 = zshim*zcal;  endif

   bandwidthSlice =  gfac*1e6/(PulseLength90)

   if(sliceTickness == 0)
      gSliceTperM =0
   else
      gSliceTperM    =  bandwidthSlice/42.57e6/sliceTickness
   endif

   if(dirSlice == "x"); ampSlice = gSliceTperM*xcal; ampSliceShim = xshim*xcal; endif
   if(dirSlice == "y"); ampSlice = gSliceTperM*ycal; ampSliceShim = yshim*ycal; endif 
   if(dirSlice == "z"); ampSlice = gSliceTperM*zcal; ampSliceShim = zshim*zcal; endif

   sliceOffSet = gSliceTperM*42.57*sliceShift # in MHz

   if(dirDiff == "x"); ampDiff = gradDiffTpm*xcal; ampDiffShim = xshim*xcal; endif
   if(dirDiff == "y"); ampDiff = gradDiffTpm*ycal; ampDiffShim = yshim*ycal; endif 
   if(dirDiff == "z"); ampDiff = gradDiffTpm*zcal; ampDiffShim = zshim*zcal; endif 

 
   if(abs(ampRead)>20800);   ampRead = 0; pr "Read gradient too high"; endif
   if(abs(ampPhase1)>20800); ampPhase1 = 0; pr "Phase 1 gradient too high"; endif
   if(abs(ampPhase2)>20800); ampPhase2 = 0; pr "Phase 2 gradient too high"; endif
   if(abs(ampSlice)>20800);  ampSlice = 0; pr "Slice gradient too high"; endif
   if(abs(ampDiff)>20800); ampDiff = 0; pr "Slice gradient too high"; endif


endproc(round(ampRead),round(ampReadShim),round(ampPhase1),round(ampPhaseShim1),round(ampPhase2),round(ampPhaseShim2),round(ampSlice),round(ampSliceShim),sliceOffSet,round(ampDiff),round(ampDiffShim))

procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------

procedure(checkGradPowerSE_3D_DWI,guipar)

   assignlist(guipar)
   refPower=700

   #READ Channel
   p_R=gReadAmp*gReadAmp*((d6+acqTime*1000+rampDur)+(d3+3*rampDur))*1e-6
   
   #PHASE1 Channel
   p_P1=gPhaseAmp1*gPhaseAmp1*(d3+3*rampDur)*1e-6

   #PHASE2 Channel
   p_P2=gPhaseAmp2*gPhaseAmp2*(d3+3*rampDur)*1e-6

   #SLICE Channel
   p_S=gSliceAmp*gSliceAmp*((PulseLength90+d100+d99+rampDur)+(d9+rampDur))*1e-6
   
   #DIFFUSION Channel
   p_D=gDiffAmp*gDiffAmp*2*(d20+rampDiff)*1e-6


   p_mean=(p_R+p_P1+p_P2+p_S+p_D)/repTime  
   
   if (p_mean>refPower)
      pr "Power requirement too high. Increase repetition time. \n"; 
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif

endproc()

#-----------------------------

procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()

#-----------------------------
procedure(checkGradDir,guipar)
assignlist(guipar)
if(dirPhase1==dirPhase2)
      message("Waring","Phase1 direction should be \r different from Phase2 direction.","warning")
      abort("")
endif
if(dirPhase1==dirRead)
      message("Waring","Phase1 direction should be \r different from Read direction.","warning")
      abort("")
endif
if(dirPhase2==dirRead)
      message("Waring","Phase2 direction should be \r different from Read direction.","warning")
      abort("")
endif
endproc()



#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)
#---------------------------------
procedure(calc_b)

   guipar = getctrlvalues(0)
   assignlist(guipar)

   ee = rampDiff/1e6
   ld = (tauDiff+rampDiff)/1e6
   bd = bDelta/1e6
   b = (gamma*gradDiffTpm)^2*(ld^2*(bd-ld/3)+(1/30)*ee^3-ld*ee^2/6)
   pr b
   
endproc()