#########################################################
# 
# SPRITE_3D
# 
# Slice selective spin-echo imaging
#
# Copyright (c) Magritek Ltd 2014
#
# U.I. V3
#########################################################

procedure(SPRITE_3D, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   n = :windowdefinition()

   windowvar(wv_dispMode,wv_ctrls,wv_shift,wv_other,wv_rel,
             wv_pp_list,wv_pp_name,wv_var,wv_tabs,wv_phase_list)

   wv_tabs  = ["Pulse Sequence","acquisition","processing+display","File settings"] # Tab names
   wv_ctrls = [2,38,39,62,63,76,77,97,98,107] # Control groups
   wv_shift = [-14,174,362,550,553] # Amount to shift control groups
   wv_other = [106,256,803]  # Collapse control and window size
   wv_saved = "false"

   (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar()

   if(nrArgs == 0)
      guipar = "show"
   endif

   keaCtrl:setUp(n,"SPRITE_3D",getmacropath(),guipar)
   if(guipar == "hide")
      return(n)
   elseif(guipar == "show")
      try; :initGUI(n); catch; endtry;
      showwindow(n)
      return(n)
   else
      setwindowpar(n,"type","dialog")
      guipar = showdialog(n)
      return(guipar)
   endif

endproc()

#########################################################
# 
# Returns important pulse sequence parameters
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
#########################################################

procedure(getseqpar)

   rel = ["d1 = PulseLength90",
          "rampDur = 100",
          "d300 = 2.5",
          "n300 = round(rampDur/d300)",
          "d100 = 50",
          "d2   = phDur-d1/2",
          "d3   = repTimeSPRITE*1000-6*rampDur-phDur-2*d100",
          "n10  = SPRITE_3D:convertDirToChannel(dirPhase1)",
          "n20  = SPRITE_3D:convertDirToChannel(dirPhase2)",
          "n40  = SPRITE_3D:convertDirToChannel(dirPhase3)",
          "(gPhaseAmp1,gPhaseAmpShim1,gPhaseAmp2,gPhaseAmpShim2,gPhaseAmp3,gPhaseAmpShim3) = SPRITE_3D:setImageGradients(dirPhase1,dirPhase2,dirPhase3,FoVPhase1,FoVPhase2,FoVPhase3,phDur,xshim,yshim,zshim,xcal,ycal,zcal)",
          "n11  =  gPhaseAmp1+gPhaseAmpShim1",
          "n11a =  gPhaseAmpShim1",
          "n21  =  gPhaseAmp2+gPhaseAmpShim2",
          "n21a =  gPhaseAmpShim2",
          "n41  =  gPhaseAmp3+gPhaseAmpShim3",
          "n41a  = gPhaseAmpShim3",
          "t11  =  SPRITE_3D:getPhaseTable(gPhaseAmp1,gPhaseAmpShim1,nrStepsP1)",
          "t21  =  SPRITE_3D:getPhaseTable(gPhaseAmp2,gPhaseAmpShim2,nrStepsP2)",
          "n0  = nrDummyScans",
          "n1  = nrStepsP1",
          "n2  = nrStepsP2",
          "n3  = nrPnts",
          "totPnts = nrStepsP1*nrStepsP2",
          "totTime = nrStepsP1*nrStepsP2*repTimeSPRITE"]
   var = ["n41"]
   pp_list = ["n0","l0","n10","n11a","n300","d300","n20","n21a","n40","n41a","d100","a1","p1","d1","d2","d3","t21","n2","l2","t11","n1","l1","n41","n3"]
   pp_name = "SPRITE_3D.p"
   phase_list = [0,2;0,2]

endproc(rel,var,pp_list,pp_name,phase_list)


#########################################################
# 
# Provide an interface to this macro which does not
# require the use of the window interface
#
# User must supply a list of parameter (see help file)
# and the pulse program name if different from 
# "$macro$_ext.p"
#
#########################################################

procedure(backdoor, guipar)

   keaCtrl:checkVersion(2.15,1.1)

   (rel,var,pp_list,pp_name,phase_list) = :getseqpar()
  
   (guipar,ppList,pcList,pcIndex,varList) = keaCtrl:initialisePP(getmacropath(),getmacroname(),guipar,rel,var,pp_list,pp_name,phase_list)
   
   r = keaCtrl:runBDPP(guipar,ppList,pcList,pcIndex,varList)

endproc(r)

#########################################################
# 
# Define the window gui
#
#########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("SPRITE_3D", -1, -1, 573, 751)

      # Define all controls with basic parameters
      getmessage(0,
        keaCtrl:processMessage();)
      tab(1, 6, 7, 555, 244,
         which = getpar(0,1,"currenttab");
         if(which == 2);
         fn = findobj(0,"name","filter");
         keaCtrl:enableControls(fn+1,fn+3,fn);
         fn = findobj(0,"name","showFreqDomain");
         keaCtrl:enableControls(fn+1,fn+4,fn);
         endif();)
      groupbox(2, "Pulse sequence", 9, 9, 547, 181)
      statictext(3, 139, 31, "right", "B1 Frequency (MHz)")
      textbox(4, 145, 27, 46)
      statictext(5, 139, 56, "right", "Repetition time (ms)")
      textbox(6, 145, 52, 46)
      statictext(7, 139, 82, "right", "Offset (Hz)")
      textbox(8, 145, 78, 46)
      statictext(9, 139, 108, "right", "90 amplitude (dB)")
      textbox(10, 145, 104, 40)
      statictext(11, 139, 134, "right", "90 pulse length (us)")
      textbox(12, 145, 130, 40)
      statictext(13, 139, 160, "right", "repTimeSPRITE (ms)")
      textbox(14, 145, 156, 40)
      statictext(15, 309, 30, "right", "nrDummyScans")
      textbox(16, 315, 26, 40)
      statictext(17, 309, 56, "right", "acquisition Shift(us)")
      textbox(18, 315, 52, 40)
      statictext(19, 309, 82, "right", "phDur (us)")
      textbox(20, 315, 78, 40)
      statictext(21, 309, 108, "right", "FoV Phase 1 (mm)")
      textbox(22, 315, 104, 40)
      statictext(23, 309, 134, "right", "FoV Phase 2 (mm)")
      textbox(24, 315, 130, 40)
      statictext(25, 309, 160, "right", "FoV Phase 3 (mm)")
      textbox(26, 315, 156, 40)
      statictext(27, 479, 30, "right", "nro. pts. phase 1")
      textbox(28, 485, 26, 40)
      statictext(29, 479, 56, "right", "nro. pts. phase 2")
      textbox(30, 485, 52, 40)
      statictext(31, 479, 82, "right", "nro. pts. phase 3")
      textbox(32, 485, 78, 40)
      statictext(33, 479, 108, "right", "Phase Dir. 1")
      textmenu(34, 485, 104, 40, 200)
      statictext(35, 479, 134, "right", "Phase Dir. 2")
      textmenu(36, 485, 130, 40, 200)
      statictext(37, 479, 160, "right", "Phase Dir. 3")
      textmenu(38, 485, 156, 40, 200)
      groupbox(39, "Acquisition", 9, 197, 547, 181)
      statictext(40, 76, 242, "center", "Rx Gain (dB)")
      textmenu(41, 59, 260, 39, 200)
      statictext(42, 76, 291, "center", "Rx Phase (degrees)")
      textbox(43, 59, 307, 39)
      statictext(44, 184, 244, "center", "Number of")
      statictext(45, 184, 257, "center", "complex points")
      textmenu(46, 231, 246, 62, 200,
         keaCtrl:updateAcqTime();)
      statictext(47, 184, 276, "center", "Dwell time")
      statictext(48, 184, 289, "center", "(us)")
      textmenu(49, 231, 279, 62, 200,
         keaCtrl:updateFilters();)
      statictext(50, 184, 310, "center", "Number of")
      statictext(51, 184, 323, "center", "scans")
      textbox(52, 231, 311, 62)
      statictext(53, 358, 258, "center", "Flat filter")
      checkbox(54, 394, 259, "no,yes", "no",
           keaCtrl:setDwellTimeMenu();
           keaCtrl:updateFilters();)
      statictext(55, 358, 282, "center", "Accumulate")
      checkbox(56, 394, 283, "no,yes", "no")
      statictext(57, 358, 306, "center", "Phase cycle")
      checkbox(58, 394, 308, "no,yes", "yes")
      statictext(59, 486, 242, "center", "Spectral width (kHz)")
      textbox(60, 457, 256, 56)
      statictext(61, 486, 293, "center", "Acquisition time (ms)")
      textbox(62, 457, 307, 56)
      groupbox(63, "Processing_Display", 9, 385, 547, 181)
      statictext(64, 206, 439, "right", "Filter time domain")
      checkbox(65, 214, 440, "no,yes", "no",
           fn = findobj(0,"name","filter");
           keaCtrl:enableControls(fn+1,fn+3,fn);)
      statictext(66, 88, 470, "right", "Filter")
      textmenu(67, 95, 466, 108, 200)
      button(68, 212, 466, 22, 22, "...",
         filters();)
      statictext(69, 206, 502, "right", "Time domain magnitude")
      checkbox(70, 214, 503, "no,yes", "no")
      statictext(71, 477, 437, "right", "Show frequency domain data")
      checkbox(72, 485, 438, "no,yes", "no",
           fn = findobj(0,"name","showFreqDomain");
           keaCtrl:enableControls(fn+1,fn+4,fn);)
      statictext(73, 477, 467, "right", "Frequency domain magnitude")
      checkbox(74, 485, 468, "no,yes", "no")
      statictext(75, 427, 500, "right", "Display range (kHz)")
      textbox(76, 437, 497, 61)
      groupbox(77, "File_Settings", 9, 573, 547, 181)
      statictext(78, 79, 637, "right", "Working")
      statictext(79, 79, 650, "right", "directory")
      textbox(80, 95, 638, 215)
      button(81, 315, 638, 22, 22, "...",
         keaFiles:setWorkingDir();)
      statictext(82, 86, 674, "right", "Experiment")
      statictext(83, 71, 687, "right", "name")
      textbox(84, 95, 677, 105)
      button(85, 206, 677, 22, 22, "...",
         keaFiles:setExpName();)
      statictext(86, 308, 674, "right", "Experiment")
      statictext(87, 298, 687, "right", "number")
      textbox(88, 316, 677, 25)
      button(89, 346, 677, 22, 22, "...",
         keaFiles:setExpNr();)
      statictext(90, 370, 636, "center", "Save")
      statictext(91, 370, 649, "center", "data")
      checkbox(92, 398, 643, "false,true", "true")
      statictext(93, 414, 674, "center", "Auto")
      statictext(94, 414, 687, "center", "increment")
      checkbox(95, 449, 682, "no,yes", "no")
      button(96, 435, 631, 40, 36, "Load Data",
         keaFiles:loadData();)
      button(97, 490, 631, 40, 50, "Open data folder",
         keaFiles:openDataFolder();)
      colorbox(98, 18, 767, 10, 10, [255,255,255,255])
      colorbox(99, 18, 780, 10, 10, [255,255,255,255])
      button(100, 38, 764, 54, 29, "Run",
         (wv_rel,wv_var,wv_pp_list,wv_pp_name,wv_phase_list) = :getseqpar();
         keaCtrl:runPP(getmacropath(),wv_pp_name);)
      button(101, 103, 764, 54, 29, "Abort",
         setwindowpar(0,"title","Wait for macro to abort ...");
         wvExpStatus = "stop";)
      button(102, 168, 764, 54, 29, "Finish",
         setwindowpar(0,"title","Wait for phase-cycling to complete ...");
         wvExpStatus = "finish";)
      button(103, 233, 764, 54, 29, "Load Par.",
         keaFiles:loadParameters();)
      button(104, 298, 764, 54, 29, "Help",
         help("Macros\TomographJülich","SPRITE_3D.htm");)
      button(105, 363, 764, 54, 29, "Kea Pref.",
         keaCtrl:showPreferences();)
      button(106, 428, 764, 54, 29, "Collapse",
         keaCtrl:toggleWindowSize(1);)
      button(107, 493, 764, 54, 29, "Close",
         guipar = getctrlvalues(0);
         if(getwindowpar(0,"type") == "dialog");
         guipar = keaFiles:addWindowSpecifics(guipar);
         keaFiles:saveCommonPar(guipar);
         closedialog(guipar);
         else;
         keaFiles:saveParameters();
         closewindow(0);
         endif;)
      menu(108, "bkgMenu", "Edit macro\tCtrl+Dbl-Click", edit("$getmacroname()$"),
                "Show compiler\tCtrl+Shift+Dbl-Click", MakePulseProgram("$getmacropath()$","$rmext(getmacroname())$"))

     # Set other control parameters
      setpar(n,1,"active","true",
                  "inittabs",[""])
      setpar(n,4,"valueID","b1Freq",
                  "tag","freqRange",
                  "type","double",
                  "range",[1,400])
      setpar(n,6,"valueID","repTime",
                  "type","float",
                  "range",[1,40000])
      setpar(n,8,"valueID","O1",
                  "type","float")
      setpar(n,10,"valueID","a1",
                  "type","float",
                  "range",[-85,0])
      setpar(n,12,"valueID","PulseLength90",
                  "type","float",
                  "range",[0.5,1000])
      setpar(n,14,"valueID","repTimeSPRITE",
                  "type","float",
                  "range",[2,1000])
      setpar(n,16,"valueID","nrDummyScans",
                  "type","integer",
                  "range",[0,100])
      setpar(n,18,"valueID","acqShift",
                  "type","float",
                  "range",[-1000,1000])
      setpar(n,20,"valueID","phDur",
                  "type","float",
                  "range",[2,327670])
      setpar(n,22,"valueID","FoVPhase1",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,24,"valueID","FoVPhase2",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,26,"valueID","FoVPhase3",
                  "type","float",
                  "range",[-10000,10000])
      setpar(n,28,"valueID","nrStepsP1",
                  "type","integer",
                  "range",[1,500])
      setpar(n,30,"valueID","nrStepsP2",
                  "type","integer",
                  "range",[1,500])
      setpar(n,32,"valueID","nrStepsP3",
                  "type","integer",
                  "range",[1,500])
      setpar(n,34,"valueID","dirPhase1",
                  "menu",["x","y","z"])
      setpar(n,36,"valueID","dirPhase2",
                  "menu",["x","y","z"])
      setpar(n,38,"valueID","dirPhase3",
                  "menu",["x","y","z"])
      setpar(n,41,"valueID","rxGain",
                  "type","integer",
                  "tooltip","20-40 dB gives optimal SNR.\rDecrease if overload occurs.",
                  "range",[-20,70],
                  "menu",["-20","-17","-14","-11","-8","-5","-2","1","4","7","10","13","16","19","22","25","28","31","34","37","40","43","46","49","52","55","58","61","64","67","70"])
      setpar(n,43,"valueID","rxPhase",
                  "type","float",
                  "tooltip","Applies a fixed phase shift to collected data.\rIgnored if autophasing.")
      setpar(n,46,"valueID","nrPnts",
                  "type","integer",
                  "range",[2,65536],
                  "menu",["2","4","8","16","32","64","128","256","512","1024","2048","4096","8192","16384","32768","65536"])
      setpar(n,49,"valueID","dwellTime",
                  "type","float",
                  "menu",[""])
      setpar(n,52,"valueID","nrScans",
                  "type","integer",
                  "range",[1,1e+006])
      setpar(n,54,"valueID","flatFilter",
                  "tooltip","On: all frequencies equally weighted.\rOff: center frequencies enhanced.")
      setpar(n,56,"valueID","accumulate")
      setpar(n,58,"valueID","usePhaseCycle")
      setpar(n,60,"valueID","bandwidth",
                  "tag","disable")
      setpar(n,62,"valueID","acqTime",
                  "tag","disable")
      setpar(n,65,"valueID","filter")
      setpar(n,67,"valueID","filterType",
                  "menu",[""])
      setpar(n,70,"valueID","timeMag")
      setpar(n,72,"valueID","showFreqDomain")
      setpar(n,74,"valueID","freqMag")
      setpar(n,76,"valueID","dispRange",
                  "type","float")
      setpar(n,80,"valueID","dataDirectory",
                  "type","string",
                  "tooltip","Where experimental data will be stored.")
      setpar(n,84,"valueID","expName",
                  "type","string",
                  "tooltip","A subdirectory of the data working directory to store different experiments.")
      setpar(n,88,"valueID","expNr",
                  "tooltip","A numbered subdirectory below the experiment name.\rNot made if entry is blank.")
      setpar(n,92,"valueID","saveData")
      setpar(n,95,"valueID","incExpNr",
                  "tooltip","Increment the experiment number after each experiment.")
      setpar(n,96,"tooltip","Load and display the data specified in the directories fields")
      setpar(n,97,"tooltip","View the data directory in Windows Explorer.")
      setpar(n,98,"objID","ppStatus",
                  "tooltip","Experiment Status Indicator\rGreen: running\rBlue: processing\rYellow: waiting")
      setpar(n,99,"objID","rxOverflow",
                  "tooltip","Receiver Overflow Indicator\rRed: overflow")
      setpar(n,100,"valueID","run",
                  "tooltip","Start the experiment.")
      setpar(n,101,"valueID","stop",
                  "tooltip","Stop the experiment without saving data.",
                  "active","true")
      setpar(n,102,"valueID","finish",
                  "tooltip","Finish the current phase cycle and save data.",
                  "active","true")
      setpar(n,103,"valueID","load",
                  "tooltip","Load a parameter set for a similar experiment.")
      setpar(n,104,"valueID","help",
                  "tooltip","Display HTML help for this experiment.",
                  "active","true")
      setpar(n,105,"valueID","showPref",
                  "tooltip","Display a preferences dialog for the Kea spectrometer.")
      setpar(n,106,"valueID","size",
                  "tooltip","Expand or collapse the window size to show all or fewer controls.",
                  "active","true")
      setpar(n,107,"valueID","close",
                  "tooltip","Close the window saving all parameters.")

     # Set other window parameters
      setwindowpar(n,"bkgmenu",108)

endproc(n)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)
   wvPP->multiplot(1,1)
   wvPP2->multiplot(2,2)

#Checks
   :checkDelays(guipar)
   durSPRITE=repTimeSPRITE*nrStepsP1*nrStepsP2
   if(durSPRITE>repTime); 
      pr "\n The time required by the sequence is larger than the repetition time. \n"; 
      message("Warning","The time required by the sequence \r is larger than the repetition time. \r Increase tR > $durSPRITE + 1$","warning")
      abort(""); 
   endif;
   :checkGradPowerSPRITE_3D(guipar)
   :checkGradDir(guipar)

   sumData = cmatrix(totPnts)

# Calculate suitable time and frequency axes
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000
   f = ([0:1:totPnts-1]-totPnts/2+1)/totTime
# Reset the timer
   time(0)

   kSpace3D = cmatrix(nrStepsP1,nrStepsP2,nrStepsP3)
   kSpace2D = cmatrix(nrStepsP1,nrStepsP2*nrStepsP3)

   for(nPh3= 0 to nrStepsP3-1)

      sumData = cmatrix(totPnts)    

      pr nPh3

      grPh3 =  round(2*gPhaseAmp3/(nrStepsP3)*(-(nrStepsP3-1)/2+nPh3)) + gPhaseAmpShim3
      
      ppList = keaNMR:setPPNumber(ppList,varIndex[0],grPh3)
                             
      # Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaNMR:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
         dspwrite("x",0x00,ppList)
   
       # Collect the data
         (status,data) = keaNMR:getData(totPnts,guipar)
         if(status != "ok")
            keaNMR:enableButtons()
            abort("")
         endif
   
       # Accumlate the data
         sumData = keaNMR:accumulate(accumulate,pAcq,sumData,data)

         if(accumulate=="yes")
            sf = 1/(scan+1)
         else
            sf = 1
         endif
   
         pd = wvPP->subplot(1,1)
         pd->draw("false")
         pd->plot(totalTime,sf*real(sumData),"tracecolor",black)
         pd->hold("on")
         pd->plot(totalTime,sf*imag(sumData),"tracecolor",red)
         pd->hold("off")
         pd->title("text","raw data")
         pd->xlabel("text","points")
         pd->ylabel("text","amplitude")
         pd->draw("true")
 
      # Check timing
         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")
            scan = scan+1                 
         exitfor()
         endif

      next(scan)

      for(yy=0 to nrStepsP2-1)
         for(xx=0 to nrStepsP1-1)
              kSpace2D[xx,yy+nrStepsP2*nPh3] = sumData[xx+yy*nrStepsP1]*sf
              kSpace3D[xx,yy,nPh3]=sumData[xx+yy*nrStepsP1]*sf
         next(xx)
      next(yy)
      curplot("2d",1,1)
      image(kSpace2D)

#      kSpace3D[~,~,nPh3]=submatrix(kSpace2D,0,nrStepsP1-1,(nrStepsP2-1)*nPh3,(nrStepsP2-1)*(nPh3+1))

   next(nPh3)

   npxPhase1 =2*:FFTsize(nrStepsP1)
   npxPhase2 =2*:FFTsize(nrStepsP2)
   npxPhase3 =2*:FFTsize(nrStepsP3)

   assign("kSpace3D",kSpace3D,"global")

   idata = fft_local:3d(kSpace3D,npxPhase1,npxPhase2,npxPhase3,"sinebell","sinebell","sinebell","FTEcho","FTEcho","FTEcho","yes")

   idataP1P2  = matrix(npxPhase1,npxPhase2)
   idataP1P3  = matrix(npxPhase1,npxPhase3)
   idataP2P3  = matrix(npxPhase2,npxPhase3)

   idataP1P2[~,~] = idata[~,~,round(npxPhase3/2)]  
   idataP1P3[~,~] = idata[~,round(npxPhase2/2),~]   
   idataP2P3[~,~] = idata[round(npxPhase1/2),~,~] 

   curplot("2d",2,2)
   image(idataP1P2)
   curplot("2d",1,2)
   image(idataP1P3)
   curplot("2d",2,1)
   image(idataP2P3)

   if(saveData == "true")
      :saveData(guipar,kSpace3D,idata)
      keaFiles:incrementExperiment(guipar)
   endif

endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,kSpace3D,idata)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   export3dpar("ab","binary","xyrc","real","machine","littleend")
   export3d(idata,"rawimage3d.3d")  # Save data as an Excel file

   export3dpar("ab","binary","xyrc","complex","machine","littleend")
   export3d(kSpace3D,"rawkSpace3d.3d")  # Save data as an Excel file

   (n1,n2,n3,n4) = size(idata)

   save("$n1$x$n2$x$n3$.pixels_image","empty")

   (n1,n2,n3,n4) = size(kSpace3D)

   save("$n1$x$n2$X$n3$.kspace_size","empty")

   temp = getcwd()

   pr "data saved to $temp$"

# Restore cwd
   cd(bak)

endproc("saveData")
#-----------------------------
procedure(setImageGradients,dirPhase1,dirPhase2,dirPhase3,FoVPhase1,FoVPhase2,FoVPhase3,phDur,xshim,yshim,zshim,xcal,ycal,zcal)


   guipar = getctrlvalues(0)
   lst = keaNMR:loadPref()
   guipar = guipar + lst
   assignlist(guipar)

   FoVPhase1 = FoVPhase1/1000           # change from mm to m
   FoVPhase2 = FoVPhase2/1000           # change from mm to m
   FoVPhase3 = FoVPhase3/1000           # change from mm to m

   xshim = xshim/1000
   yshim = yshim/1000 
   zshim = zshim/1000  

# phase1
   bandwidthPhase1 =  1e6*0.5*nrStepsP1/(phDur)
   
   if(FoVPhase1==0)
      gPhaseAmpTperM1=0
   else
      gPhaseAmpTperM1 =  bandwidthPhase1/42.57e6/FoVPhase1
   endif
  
   if(dirPhase1 == "x"); ampPhase1 = gPhaseAmpTperM1*xcal; ampPhaseShim1 = xshim*xcal;  endif
   if(dirPhase1 == "y"); ampPhase1 = gPhaseAmpTperM1*ycal; ampPhaseShim1 = yshim*ycal; endif 
   if(dirPhase1 == "z"); ampPhase1 = gPhaseAmpTperM1*zcal; ampPhaseShim1 = zshim*zcal;  endif

# phase2
   bandwidthPhase2 =  1e6*0.5*nrStepsP2/(phDur)
   
   if(FoVPhase2==0)
      gPhaseAmpTperM2=0
   else
      gPhaseAmpTperM2 =  bandwidthPhase2/42.57e6/FoVPhase2
   endif
  
   if(dirPhase2 == "x"); ampPhase2 = gPhaseAmpTperM2*xcal; ampPhaseShim2 = xshim*xcal;  endif
   if(dirPhase2 == "y"); ampPhase2 = gPhaseAmpTperM2*ycal; ampPhaseShim2 = yshim*ycal;  endif 
   if(dirPhase2 == "z"); ampPhase2 = gPhaseAmpTperM2*zcal; ampPhaseShim2 = zshim*zcal;  endif

# phase3
   bandwidthPhase3 =  1e6*0.5*nrStepsP3/(phDur)
   
   if(FoVPhase3==0)
      gPhaseAmpTperM3=0
   else
      gPhaseAmpTperM3 =  bandwidthPhase3/42.57e6/FoVPhase3
   endif
  
   if(dirPhase3 == "x"); ampPhase3 = gPhaseAmpTperM3*xcal; ampPhaseShim3 = xshim*xcal;  endif
   if(dirPhase3 == "y"); ampPhase3 = gPhaseAmpTperM3*ycal; ampPhaseShim3 = yshim*ycal;  endif 
   if(dirPhase3 == "z"); ampPhase3 = gPhaseAmpTperM3*zcal; ampPhaseShim3 = zshim*zcal;  endif


   if(abs(ampPhase1)>20800); ampPhase1 = 0; pr "Phase 1 gradient too high"; endif
   if(abs(ampPhase2)>20800); ampPhase2 = 0; pr "Phase 2 gradient too high"; endif
   if(abs(ampPhase3)>20800); ampPhase3 = 0; pr "Phase 3 gradient too high"; endif

endproc(round(ampPhase1),round(ampPhaseShim1),round(ampPhase2),round(ampPhaseShim2),round(ampPhase3),round(ampPhaseShim3))
#-----------------------------
procedure(convertDirToChannel,dir)

   if(dir == "x")
        return 3
   endif
   if(dir == "y")
        return 2
   endif
   if(dir == "z")
        return 1
   endif

   if(dir == 3)
        return 3
   endif
   if(dir == 2)
        return 2
   endif
   if(dir == 1)
        return 1
   endif
  
endproc(0)
#-----------------------------
procedure(getPhaseTable,gPhaseAmp,gPhaseAmpShim,nrStepsP)

   ta  =  ([0:1:nrStepsP]-nrStepsP/2+1/2)*gPhaseAmp/((nrStepsP-1)/2) + gPhaseAmpShim 
  # pr ta       
endproc(ta)

#-----------------------------
procedure(checkGradPowerSPRITE_3D,guipar)

   assignlist(guipar)
   refPower=700
   
   #PHASE1 Channel
   t11=:getPhaseTable(gPhaseAmp1,gPhaseAmpShim1,nrStepsP1)
   p_temp=t11.*t11 *(d1+d2+2*d100+3*rampDur)*1e-6
   p_P1=sum(p_temp)

   #PHASE2 Channel
   t21=:getPhaseTable(gPhaseAmp2,gPhaseAmpShim2,nrStepsP2)
   p_temp=t21.*t21*(d1+d2+2*d100+3*rampDur)*1e-6
   p_P2=sum(p_temp)
  
   #PHASE3 Channel
   p_P3=gPhaseAmp3*gPhaseAmp3*(d1+d2+2*d100+3*rampDur)*nrStepsP1*nrStepsP2*1e-6


   p_mean=(p_P1+p_P2+p_P3)/repTime  
   
   if (p_mean>refPower)
      pr "Power requirement too high. Increase repetition time. \n"
      message("Waring","Power requirement too high.\r Increase repetition time tR > $round(p_mean/refPower*repTime)+1$ ms","warning")
      abort("")
   endif
pr p_mean/refPower
endproc()
#-----------------------------
procedure(checkDelays,guipar)
   assignlist(guipar)
   for (k=1 to 1000)
      try
         d_temp=eval("d$k$")
         if(d_temp<=0); pr "\n d$k$<0 \n"; abort(""); endif;  
      catch
      endtry         
   next
endproc()
#-----------------------------
procedure(checkGradDir,guipar)
assignlist(guipar)
if(dirPhase1==dirPhase2)
      message("Waring","Phase dir. 1 should be \r different from Phase dir. 2.","warning")
      abort("")
endif
if(dirPhase1==dirPhase3)
      message("Waring","Phase dir. 1 should be \r different from Phase dir. 3.","warning")
      abort("")
endif
if(dirPhase2==dirPhase3)
      message("Waring","Phase dir. 2 should be \r different from Phase dir. 3.","warning")
      abort("")
endif
endproc()

#-----------------------------
procedure(FFTsize,nrPnts)

  m=1
  a = nrPnts
  while(a>1)
     a = nrPnts/2^m
     m = m+1
  endwhile
  r = 2^(m-1)

endproc(r)