procedure(helmholz_coil)

   if(getobj(1)->macroName() == "original.mac")
      mac = "original-3D"
      mac()
   endif

# Generate a wire array for generating helmholz coil field

   N = 1
   dtheta = pi/16
   st = round(N*((2*pi)/dtheta));
   R = 1
   L = 2
   zstep = L/st
   len = 2

# Calculate end coordinates of segments ******
   wires = matrix(6,2*st)
   z = -0.5
   theta = 0
   for(n = 0 to  st-1)
      wires[0,n] = R*cos(theta); 
      wires[1,n] = R*cos(theta+dtheta);
      wires[2,n] = -R*sin(theta);
      wires[3,n] = -R*sin(theta+dtheta);
      wires[4,n] = z;
      wires[5,n] = z; 
      theta = theta + dtheta;
      if(theta >= 2*pi)
         theta = 0
      endif
   next(n)

   z = 0.5
   theta = 0
   for(n = st to  2*st-1)
      wires[0,n] = R*cos(theta); 
      wires[1,n] = R*cos(theta+dtheta);
      wires[2,n] = -R*sin(theta);
      wires[3,n] = -R*sin(theta+dtheta);
      wires[4,n] = z;
      wires[5,n] = z; 
      theta = theta + dtheta;
      if(theta >= 2*pi)
         theta = 0
      endif
   next(n)

wires = wires + 5
# Draw the wire field
   clear3d()
   shift3d(-5,-5,-5)
   viewdistance(10)
   depthcuerange(-40,40)
   color3d([0,1,1])
   linewidth3d(4)
   segments3d(wires)
   linewidth3d(1)
   color3d([1,1,0])
  # box3d(-1.5,1.5,-1.5,1.5,-1.5,1.5)

# Calculate the field data for wire configuration
   v = [-2:0.1:2]+5
   (Bx,By,Bz) = fieldcalc(wires,v,v,v)
   Bx = Bx*1e6
   By = By*1e6
   Bz = Bz*1e6

   v = [-2,2,-2,2,-2,2] + 5
# Plot some surfaces
   isosurf(Bz,0.01,[0.2,0.8,0,0.7],v)
   isosurf(Bz,0.05,[0.8,0.2,0,0.5],v)

# Plot some axes
   axispar3d(0.05,0.1,0.2,0.4)
   color3d([1,1,0])
   v = [-3,3] + 5
   vm = (min(v) + max(v))/2
   axis3d("x",v,vm,vm,v,"X","positive_end")
   axis3d("y",v,vm,vm,v,"Y","positive_end")
   axis3d("z",v,vm,vm,v,"Z","positive_end")

# Record the data range for other macros
   datarange3d(-2,2,-2,2,-2,2)

endproc()