#################################################################
# Display a 1D plot viewer.
#
# This is a modification of the normal Prospa 1D window
# with functions specifc for comparing 1D spectra.
#
# Author: C Eccles
# Last modified 26 June 2026
#
# Other files used here (see .\1D\CoreMacros)
#    integrateClass - includes callbacks for integration
#                     buttons and  functions for fitting
#    toggleIntegrateMode - defines the integrate display
#                          mode and generates wvInt the 
#                          integrate class instance
#
# V1.0 Initial version
# V1.1 Addition of an export button in the integrate interface
#      and the ability to click on the integral curves and
#      update the raw data list.
# V1.2 Files are now imported from the history list using the 
#      new selection option. This allows only some items to 
#      be selected using the shift and control keys.
# V1.3 Fitting functions are now user definable and editable
#
#################################################################

procedure(1DPlotAnalyser, multiTraceLoad="false", multiTraceInfo=null)

# Allow editing
   if(iskeypressed("shift"))
      if(gData->permissions->canEditScripts == "yes")
         bak = getcwd()
         EditorWin()
         cd(getmacropath())
         ed(getmacroname())
         cd(bak)
      endif
      return(1)
   endif

   if(multiTraceLoad == "false")
   # Copy the current plot
      plt = curplot()
      if(plt->parent->visible == "false")
         message("Error","Please select a 1D plot","error")
         return
      endif
      func1d("copy plot")
   endif

# See if the plot viewer is already opened
   nr = findwin("title","1D Data Analyser V1.3")

   if(nr >= 0)
      if(multiTraceLoad == "false")
         curwin(nr)
         curplot(locPlot->subplot(1,1))
         func1d("paste into plot")
         curtrace()->realcolor(wvColors[~,wvTraceCnt])
         label = "$gData->curExpt->protocol$ ($gData->curExpt->suffix$)"
         curtrace()->name(label)
         wvTraceCnt = wvTraceCnt + 1
         if(wvTraceCnt == 9)
            wvTraceCnt = 0
         endif
         func1d("copy plot")
         return
      else
         guiwinnr(nr)
         func1d("copy plot")
      endif  

   endif 

# Load the previous window position
   if(nr == -1)
      gPlot->loadPlotPref()
      (x,y,w,h) = :loadwinpos()
      m = 1
      n = :windowdefinition(m)
      windowvar(wvColors,wvTraceCnt)

      wvTraceCnt = 0
   # https://www.heavy.ai/blog/12-color-palettes-for-telling-better-stories-with-your-data
      wvColors = [0xE6,0x00,0x49;
                  0x0B,0xB4,0xFF;
                  0x50,0xE9,0x91;
                  0xe6,0xD8,0x00;
                  0x9B,0x19,0xF5;
                  0xFF,0xA3,0x00;
                  0xDC,0x0A,0xB4;
                  0xB3,0xD4,0xFF;
                  0x00,0xBF,0xA0]
  
   # Update various window parameters
      setwindowpar(n,"titleupdate","false")
      setwindowpar(n,"dimensions",[x,y,w,h])
      setwindowpar(n,"toolbar",m+2)
    #  setwindowpar(n,"statusbox",m+1)
      setwindowpar(n,"keepInFront","true")
      setwindowpar(n,"menubar",[m+11:m+17])
      setwindowpar(n,"dragndropproc","1DPlotAnalyser:dragNDrop")
      setwindowpar(n,"focus",m)
      setwindowpar(n,"exit_procedure",":exitWindow()")
      setwindowpar(n,"show_menu","false")
   else
      n = nr
   endif

   if(multiTraceLoad == "false")
      if(:isstackedplot(plt))
         setpar(n,1,"menubar",[12,13,14,15,16,17,18])
         setwindowpar(n,"menubar",[12,13,14,15,16,17,18])
      else
         setpar(n,1,"menubar",[12,13,14,15,16,38,39,18])
         setwindowpar(n,"menubar",[12,13,14,15,16,38,39,18])
      endif
   else
      setpar(n,1,"menubar",[12,13,14,15,16,38,18])
      setwindowpar(n,"menubar",[12,13,14,15,16,38,18])
   endif

   if(multiTraceLoad == "false")
      :initPlot(plt)
   else # Load multiple data sets from the history list

      selection = gView->history->selection
      selection = reflect(selection) # Reverse the selection order (top/youndgest first => bottom/oldest first)
      entries = gView->history->list
      curIdx = gView->history->index()
      plt = locPlot->subplot(1,1)
      trcList = plt->tracelist()
      xdir = plt->axes->xdirection
      (wRB,szRB) = size(spectrum)
      sz = size(selection)
      scol = [0,128,0]
      ecol = [255,0,0]
      for(k = 0 to sz-1)
         idx = selection[k]
         if(idx > 0) # Ignore title
            entry = entries[idx]
            path = gView->dirList[idx]
            exptDir = getbasedir(path)
            (stamp,protocol,label) = scanstr(exptDir,"%1 %2 (%3)")
            cd(path)
            plotFileName = multiTraceInfo->plotFile 
            curplot(hiddenPlot->subplot(1,1))
            if(isfile(plotFileName))   
               load(plotFileName)
               xdir = hiddenPlot->subplot(1,1)->axes->xdirection
               func1d("copy plot")
               curwin(n)
               curplot(locPlot->subplot(1,1))
               if(idx == selection[0] & size(trcList) == 0)
                  func1d("paste plot")
               else
                  func1d("paste into plot")
               endif
               tl = curplot()->tracelist()
               if(size(selection) > 0)
                  if(sz > 1)
                     colIdx = trunc(k/(sz-1)*(szRB-2))
                     col = k/(sz-1)*(scol-ecol)+ecol
                  else
                     col = scol
                  endif
                  curtrace()->realcolor(col)
                  curtrace()->imagcolor(col)
                  if(multiTraceInfo == null)
                     curtrace()->name(label)
                  else
                     curtrace()->name("$multiTraceInfo->labels[k]$")
                  endif
                  wvTraceCnt = wvTraceCnt + 1
                  if(wvTraceCnt == 9)
                     wvTraceCnt = 0
                  endif 
               endif      
            endif 
         endif
      next(idx)
      plt = locPlot->subplot(1,1)
      plt->showimag("false")
      plt->axes->xdirection(xdir)
      if(multiTraceInfo->showStack == "yes" & sz > 1)        
         stackedPlotSwitch()
      endif
   endif

   func1d("copy plot")

# Display the window allowing for the toolbar
   showwindow(n,"recalc") 



endproc()

###########################################################
# Callback for data list
###########################################################

procedure(dataListCallBack)

return # Ideally this should also update the integrate data plot

   evt = parentCtrl->event
   if(evt == "double_click_down")
     lst = dataList->list
     txt = dataList->text    
    (xv,yv) = scanstr(txt,"%1|%2")
     yv = gettext("Update y data",yv,10)
      if(yv != "cancel")
         nl = "$xv$|$yv$"
         idx = dataList->zindex
         lst[idx] = nl
         dataList->list(lst)
      endif
   endif

endproc()

####################################################
# If a plot file is dropped onto the GUI then
# display it. If the control key is help down
# then overlay multiple files.
# If a folder is dropped in the 1DPlot then make
# this the current 1D plot folder.
####################################################

procedure(dragNDrop,path,file,ext)

   if(file == "")
      if(isdir(path))
         pathnames("plot1d",path)
      endif
   else
      bak = getcwd()
      if(ext == "pt1")
         cd(path)
         if(iskeypressed("control"))
            cp = curplot("1d")
            hw = getobj(0,wvHiddenWin)
            hw->load(file)
            curplot(hw->subplot(1,1))
            func1d("copy plot")
            curplot(cp)
            func1d("paste into plot")
         else
            load(file)
         endif
      elseif(ext == "1d")
         cd(path)
         try
           (x,y) = load(file)
         catch
            y = load(file)
            x = linspace(0,size(y)-1,size(y))
         endtry
         if(iskeypressed("control"))
            hold("on")
            plot(x,y)
            hold("off")
         else
            plot(x,y)
         endif
      else
         pr("\n   Invalid extension for 1D plot drag and drop\n")
      endif
      cd(bak)
   endif
 
endproc()

###########################################################
# Make sure the current plots are reset
###########################################################

procedure(exitWindow)

   try
      curplot(wvCur1D)
   catch
   endtry

   plotcallback("plot1DScale","")
   plotcallback("plot1DMove","")
   plotcallback("plot1DDblClick","")

   :savewinpos()

endproc()

####################################################
# User has double clicked on fit function
# Note: wvInt is defined in toggleIntegrateMode.mac
# and is the instance of the integrateClass.
####################################################

procedure(fitCallback)

   if(parentCtrl->zindex == 0)
      return
   endif

   name = curtrace()->name
   (type, nr, range) = scanstr(name,"%1 %2 %3")
   idx = eval(nr)

   evt = parentCtrl->event
   if(evt == "double_click_down" | evt == "enter_pressed") 
      result = wvInt->fitToData()
      if(result == null)
         return
      endif
      pr("\n---- Fitting function '$result->fitName$' ----\n\n")
      pr("   $result->func$\n\n")
         ppm = wvInt->regions->loc[~,idx]
         print("   ($ppm[0],1.2f$ to $ppm[1],1.2f$) ppm\n")

      if(result->n > 0)
         for(k = 0 to result->n-1)
            num = single(eval("result->par->p$k$"))
            err = single(eval("result->par->p$k$err"))
            if(err == 0 | isinf(err))
               txt = "p$k$ = $num,g$"
               pr("      $txt$\n")
               poorFit = 1
            else
               txt = "p$k$ = $errorstr(num,err,2)$   ($abs(100*err/num),1.2g$%)"
               pr("      $txt$\n")
               poorFit = 0
            endif
         next(k)
      endif
      pr("      Chisq = $result->chisq$\n")
      if(poorFit)
         pr("   (Poor fit - uncertainties unavailable)\n")
      endif
   endif

endproc()

#################################################
# Display a UI which allows the trace labels to
# to be selected and whether a stacked plot 
# should be displayed
#################################################

procedure(getMultiPlotParameters)

# Define the UI
    n = window("Multi-trace display parameters", -1, -1, 340, 166, "resizable")

      setwindowpar(n,"type","dialog")
      setwindowpar(n,"sizelimits",[340,1000,170,170])

      windowvar(n,szSel)

      # Define all controls with basic parameters
      button(1, 148, 22, 20, 20,"",
            setpar(0,3,"text","[1:1:$szSel$]"))
      statictext(2, 140, 24, "right", "Change trace labels:")
      textbox(3, 30, 49, "ww-120")
      checkbox(4, 148, 124, "no,yes", "no")
      statictext(5, 140, 124, "right", "Display as stacked plot:")
      button(6, "ww-65", 120, 50, 30, "Cancel",
         closedialog(null);)
      button(7, "ww-65", 14, 50, 30, "Apply",
         labels = eval(getpar(0,3,"text"));
         showStack = getpar(0,4,"text");
         plotFile = getpar(0,8,"text");
         result = struct(labels=labels, showStack=showStack, plotFile=plotFile);
         closedialog(result);)
      textmenu(8, 125, 85, 106, 200)
      statictext(9, 100, 90, "right", "Data to display:")
      groupbox(10, "", 11, 4, "ww-90", 147)
      button(11, "ww-65", 66, 50, 30, "Help",:multiPlotHelp())

     # Set other control parameters
      setpar(n,7,"mode","default")
      setpar(n,8,"menu",["fid.pt1","spectrum.pt1"])

# Intialise the UI
   selection = reflect(gView->history->selection)
   szSel = size(selection)
   entries = gView->history->list
   txt = "["
   for(k = 0 to szSel-1)
      entry = entries[selection[k]]
     (tm,protocol,comment) = scanstr(entry,"%1|%2|%3")
      if(isfloat(comment))
         txt = txt + comment 
      else
         txt = txt + "\"" + comment +   "\""
      endif
      if(k < szSel-1)
         txt = txt + ","
      endif
   next(k)
   txt = txt + "]"

   setpar(0,3,"text",txt)
   setpar(0,3,"enable","true")
   setpar(0,4,"text","yes")

   bak = getcwd()
   path = gView->dirList[selection[0]]
   cd(path)
   files = ls("*.pt1")
   setpar(0,8,"menu",files)
   setpar(0,8,"text",files[-1])
   cd(bak)

# Display the UI

   multiTraceInfo = showdialog(n)

endproc(multiTraceInfo)

####################################################
# Initialise the plot with the current 1D plot from
# the expert interface
####################################################

procedure(initPlot, plt)

   curplot()->parent->draw("false")
   func1d("paste plot")
   tl = curplot()->tracelist()
   if(size(tl) == 1)
      curtrace()->realcolor(wvColors[~,wvTraceCnt])
      label = "$gData->curExpt->protocol$ ($gData->curExpt->suffix$)"
      curtrace()->name(label)
      wvTraceCnt = wvTraceCnt + 1
   endif
   curplot()->parent->draw("true")

endproc()

# Check is a plot contains multiple traces
procedure(isstackedplot, plt)

   lst = plt->tracelist()
   if(size(lst) > 1)
      return(1)
   else
      return(0)
   endif
   
endproc()

####################################################
# Load a plot file into the current plot
####################################################

procedure(loadCurrentPlot)
   
   bak = getcwd()
   cd(gData->curExpt->dataPath)
   name = getfilename("open","Select path and filename for plot", "1D plots", "pt1", "untitled.pt1")
   load(name)
   cd(bak)

endproc()


###########################################################
# Load button icons
###########################################################

procedure(loadIcons)

   bak = getcwd()
   cd("$appdir$\\Macros\\Kea-Expert\\Other Macros\\Bitmaps")
   cursorButton->icon("data_select.png")
   regionButton->icon("region_select.png")
   dragButton->icon("drag_plot.png")
   zoomButton->icon("zoom_plot.png")
   zoomUpButton->icon("uparrow.png")
   zoomDownButton->icon("downarrow.png")
   zoomDownButton->icon("downarrow.png")
   zoomDownButton->icon("downarrow.png")
   lastZoomButton->icon("unzoom_plot.png")
   fullZoomButton->icon("showall_plot.png")

endproc()

#################################################
# Load several plots from the history list
# allow the user to define numerical tags first
#################################################

procedure(loadMultiPlot)

   selection = gView->history->selection
   if(selection != null)
      multiTraceInfo = :getMultiPlotParameters()
      if(multiTraceInfo != null)
         :1DPlotAnalyser(multiTraceLoad="true",multiTraceInfo)
      endif
   endif

endproc()

#################################################
# Load the last window position
#################################################

procedure(loadwinpos)

   x = -1; y = -1
   w = 840; h = 572
   cd(prefdir)
   mkdir("Other Macros")
   cd("Other Macros")
   if(isfile("1PlotAnalyser.par"))
      lst = load("1PlotAnalyser.par")
      assignlist(lst)
   endif

endproc(x,y,w,h)

procedure(makeLocalPlotCurrent)

   win = curwin()
   n = win->nr
   if(curplot()->parent->parent == win)
      plt = curplot()
   else
      m = findobj(n,"type","1D plot window")
      plt = getobj(n,m)->subplot(1,1)
      curplot(plt)
   endif

endproc(plt)

#################################################
# Some CLI help
#################################################

procedure(multiPlotHelp)

   pr("\n --- Help for multi-trace display tool ---\n")
   pr("\n   Multiple selections in the history list will be\n")
   pr("   displayed in the 1D Plot Analyser. Options are:\n")
   pr("   Change trace labels: Each trace has a lable or name\n")
   pr("   if this is a number it can be used as a y-axis in the\n")
   pr("   stacked plot. In this case enter an array with the correct\n")
   pr("   number of elements and spacing.\n")
   pr("   Data to display: choose the plot to display for each expt.\n")
   pr("   Display as stacked plot: choose to display the traces.\n")
   pr("   as a stacked plot or overlaid.\n")

endproc()

###########################################################
# Process messages from the 1D plot (e.g. selecting 
# different plots or traces.)
###########################################################

procedure(processMessage)

   (src,cmd) = getpar(0,0,"text")
   callingwin = getpar(0,0,"source")
   parentwin = guiwinnr()

# Only process messages from the current window plots
# Update the integral list when selecting a different trace
   if(src == "1D Plot" & cmd == "SelectTrace" & callingwin == parentwin)

      try
         trc = curtrace()
         plt = trc->parent
         name = trc->name()
         (type,nr,range) = scanstr(name,"%1 %2 %3")
         found = 0
         if(type == "raw")
            found = 1
         else # Clicked on fit so find corresponding raw
            trclst =  plt->tracelist()
            for(k = 0 to size(trclst)-1)
               trc = plt->trace(trclst[k])
               name = trc->name()
               (newType,newNr,range) = scanstr(name,"%1 %2 %3")
               if(newNr == nr & newType == "raw")
                  found = 1
                  exitfor
               endif
            next(k)
         endif
   
        # Raw data found so list it
         if(found)
            (x,y) = trc->getdata()
            sz = size(x)
            dataInfo = list(sz)
            dataInfo[0] = "x|y"
            for(k = 1 to size(x)-1)
               dataInfo[k] = "$x[k-1]$|$y[k-1]$"
            next(k)
            dataList->list(dataInfo)
            dataList->color([0,0,128,0])
            curtrace(trc) # Ensures the current trace/legend is correct
            rawDataGB->label("Raw Data ($range$ ppm)")
         endif
      catch
      endtry

   elseif(src == "1D Plot" & cmd == "ViewOnePlot" & callingwin == parentwin)

      wvInt->updatePlotReferences(1)

   elseif(src == "1D Plot" & cmd == "ShowAllPlots" & callingwin == parentwin)

      wvInt->updatePlotReferences(2)

   endif

endproc()

####################################################
# Save the current plot to a file.
####################################################

procedure(saveCurrentPlot)
   
   bak = getcwd()
   cd(gData->curExpt->dataPath)
   name = getfilename("save","Select path and filename for plot", "1D plots", "pt1", "untitled.pt1")
   save(name)
   cd(bak)

endproc()

#################################################
# Save the current window position
#################################################

procedure(savewinpos)

   cd(prefdir)
   mkdir("Other Macros")
   cd("Other Macros")
   m = getwindowpar(0,"dimensions")
   lst = ["x = $m[0]$",
          "y = $m[1]$",
          "w = $m[2]$",
          "h = $m[3]$"]
   save("1PlotAnalyser.par",lst)

endproc()

procedure(toggleAxesSync)

   plt = :makeLocalPlotCurrent()

   if(plt->syncaxes() == "true")
      plt->syncaxes("false")
   else
      plt->syncaxes("true")
   endif

endproc()

procedure(toggleGridLock)

   plt = :makeLocalPlotCurrent()
   if(plt->lockgrid() == "true")
      plt->lockgrid("false")
   else
      plt->lockgrid("true")
   endif
 

endproc()


procedure(toggleLegend)

   plt = :makeLocalPlotCurrent()
   if(plt->showlegend() == "true")
      plt->showlegend("false")
   else
      plt->showlegend("true")
   endif

endproc()

procedure(viewOnePlot)

   lines = curplot()->getlines()
   func1d("view one plot")
   if(lines != null)
      curplot()->addlines(lines)
   endif

endproc()


###########################################################
# Define a window
###########################################################

procedure(windowdefinition, m)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("1D Data Analyser V1.3", -1,-1,300,200,"resizable")

   getmessage(0,:processMessage())

   locPlot = plot1d(m,10,0,"rw-10","rh")

   statusBar = statusbox(m+1,"ww/3","ww*0.6667","ww-45","-1")

   toolbark(m+2, "toolbar21D",
              "Open plot",  "", :loadCurrentPlot(),
              "Save plot",  "", :saveCurrentPlot(),
              "Print plot", "",  func1d("print plot"),
              "Separator", "", "",
              "Zoom plot",  "", func1d("zoom region"),
              "Last zoom",  "", func1d("last region"),
              "Full region",  "", func1d("full region"),
              "Separator",  "", "",
              "Modify trace and symbols",  "", modifyTraceParameters(),
              "Modify ticks and labels",  "", PlotParameters("Ticks"),
              "Modify plot colours",  "", PlotParameters("Colors"),
              "Separator",  "", "",
              "Corner axes",  "corner_axes", func1d("corner axes"),
              "Border axes",  "border_axes", func1d("border axes"),
              "Crossed axes",  "crossed_axes", func1d("crossed axes"),
              "Separator",  "", "",
              "Linear x scale",  "linear_axis", func1d("linear x scale"),
              "Logarithmic x scale",  "log_axis", func1d("log x scale"),
              "Separator",  "", "",
              "Overlapping plots", "hold",  func1d("overlapping plots"),
              "Separator",  "", "",
              "Data display",  "display_data", func1d("display data"),
              "Region selection",  "select_region", func1d("select region"),
              "Move plot",  "drag_plot", func1d("drag plot"),
              "Separator",  "", "",
              "Move trace horizontally",  "", moveTraceHorizontally(),
              "Scale trace vertically",  "", scaleTraceVertically(),
              "Manual phase one trace",  "", manualPhase1D(),
              "Manual phase all traces",  "", manualPhaseStackedPlot(),
              "Separator",  "", "",
              "Undo operation",  "", undoLastMenuOperation())

    menu(m+3, "traceMenu", "Modify trace and symbols ...\tCtrl+T", modifyTraceParameters(),
              "Copy trace data to vector ...\tShift+V", copy1DtoMatrix(),
              "Copy trace data to new 1D window ...\tCtrl+N", copy1DtoNewWin("trace"),
              "Separator", ,
              "Remove data set", func1d("remove current data"))

    menu(m+4, "bkgMenu", "Display vector ...", displayVectors(),
              "Keep this region, remove others", func1d("remove other subplots"),
              "Remove all data from region", func1d("remove all data"))

    menu(m+5, "axesMenu", "Axes font", PlotParameters("Axes"),
              "Axes range", PlotParameters("Range"),
              "Tick and label spacing ...", PlotParameters("Ticks"),
              "Log/lin mapping", PlotParameters("Mapping"),
              "Grids", PlotParameters("Grid"))

    menu(m+6, "titleMenu", "Modify title ...", PlotParameters("Title"))

    menu(m+7, "labelMenu", "Modify labels ...", PlotParameters("Labels"))

    menu(m+8, "Scale", "Enlarge vertical\tShift+up", func1d("enlarge vertical"),
              "Reduce vertical\tShift+down", func1d("reduce vertical"),
              "Enlarge horizontal\tShift+right", func1d("enlarge horizontal"),
              "Reduce horizontal\tShift+left", func1d("reduce horizontal"))
    menu(m+9, "Move", "Move up\tup", func1d("move down"),
              "Move down\tdown", func1d("move up"),
              "Move right\tright", func1d("move right"),
              "Move left\tleft", func1d("move left"))
    menu(m+10, "Multiplot", "1 plot\tCtrl+Shift+S", func1d("multiplot 1*1"),
              "1 row by 2 columns\tCtrl+Shift+H", func1d("multiplot 1*2"),
              "2 rows by 1 column\tCtrl+Shift+D", func1d("multiplot 2*1"),
              "2 rows by 2 columns\tCtrl+Shift+G", func1d("multiplot 2*2"),
              "m rows by n columns\tCtrl+Shift+M", func1d("multiplot m*n"))
    menu(m+11, "&File", "&Open Plot ...\tCtrl+O", func1d("load plot"),
              "&Save Plot ...\tCtrl+S", func1d("save plot"),
              "Save as &Image ...\tCtrl+Shift+I", func1d("save as image"),
              "&Print Plot ...\tCtrl+P", func1d("print plot"))
    menu(m+12, "&Edit", "Copy all plots\tCtrl+Shift+C", func1d("copy all plots"),
              "Delete all plots\tCtrl+D", func1d("delete all plots"),
              "Separator", ,
              "Copy current plot\tCtrl+C", func1d("copy plot"),
              "Cut current plot\tCtrl+X", func1d("cut plot"),
              "Paste to current plot\tCtrl+V", func1d("paste plot"),
              "Paste into current plot\tCtrl+Shift+V", func1d("paste into plot"))

    menuk(m+13, "&View", "Show &data under cursor\td", "display_data", func1d("display data"),
              "&Select a rectangular region\ts","select_region", func1d("select region"),
              "&Move plot\tm","drag_plot", func1d("drag plot"),
              "Separator", , ,
              "&Zoom a region\tz", "zoom_region",func1d("zoom region"),
              "Show &last region\tl", "show_last", func1d("last region"),
              "Display &all data\ta", "display_all", func1d("full region"),
              "Separator", , ,
              "Display &real part\tr", "show_real", func1d("toggle real"),
              "Display &imaginary part\ti", "show_imaginary", func1d("toggle imaginary"),
              "Display &magnitude\tn", "show_magnitude", func1d("toggle magnitude"),
              "Separator", , ,
              "Display &border\tb","show_border", func1d("toggle border"),
              "Separator", , ,
              "Display fi&xed range\tx","fixed_range", func1d("toggle fixed range"),
              "Separator", , ,
              "Antialiasin&g\tg","antialiasing", func1d("toggle antialiasing"),
              "Show legend\te", "show_legend", :toggleLegend(),
              "Sync axes", "sync_axes",:toggleAxesSync(),
              "Lock grid", "lock_grid", :toggleGridLock(),
              "Separator", , ,
              "Pull_right", "", m+10,
              "&View one plot\tv", "", :viewOnePlot(),
              "&Full view\tf", "", func1d("show all plots"),
              "Overlapping plots\to", "hold" ,func1d("overlapping plots"),
              "Separator", , ,
              "Pull_right", "", m+9,
              "Pull_right", "", m+8,
              "Separator", , ,
              "Show next window\tCtrl+Tab", "",  shownextwindow(0),
              "Show last window\tCtrl+Shift+Tab", "", showlastwindow(0),
              "Hide window\tCtrl+W", "",  hidewindow(0),
              "Separator", , ,
              "user menu", , "$appdir$\\Macros\\Kea-Expert\\Processing Macros\\1D\\View")

    menu(m+14, "&Pref", "Tick &spacing ...\tShift+S", PlotParameters("Ticks"),
              "&Mapping ...\tShift+M", PlotParameters("Mapping"),
              "&Grid ...\tShift+G", PlotParameters("Grid"),
              "Axes &range ...\tShift+R", PlotParameters("Range"),
              "Plot margi&ns ...\tShift+N", PlotParameters("Margins"),
              "Separator", ,
              "&Title text and font ...\tShift+T", PlotParameters("Title"),
              "X and Y &labels and font ...\tShift+L", PlotParameters("Labels"),
              "&Axes font ...\tShift+A", PlotParameters("Axes"),
              "Separator", ,
              "Plot &colours ...\tShift+C",PlotParameters("Colors"),
              "&Trace settings ...\tCtrl+T", modifyTraceParameters(),
              "Make plot &black and white\tShift+B", makePlotBlackAndWhite("1d"),
              "Separator", ,
              "Load plot preferences ...\tCtrl+Shift+L", loadPlotPreferences("1d"),
              "Save plot preferences ...\tCtrl+Shift+S", savePlotPreferences("1d"))

    menu(m+15, "&Display mode","Toggle integrate mode ...\tShift+I",toggleIntegrate())

    menu(m+16, "&Processing", "Macro Help", help("Macros\\Kea-Expert\\Processing Macros\\Stacked",""),
              "Separator", ,
              "Manual Phase ...\tCtrl+Shift+P",manualPhaseStackedPlot(),
              "1D Stats ...\tCtrl+Shift+1",stats1d(),
              "Integrate Peak ...\tCtrl+I",integratePeak(),
              "Remove Integral ...\tCtrl+R",removeIntegral(),
              "Stacked plot view ...", StackedPlotSetup(),
              "Separator", ,
              "Apodize stacked plot ...", apodizeFreqStackedPlot(),
              "Baseline correct stacked plot ...", baseLineCorrectStackedPlot(),
              "Manual phase stacked plot ...", manualPhaseStackedPlot(),
              "Collapse/Expand stacked plot", stackedPlotSwitch(),
              "Toggle ppm/Hz", togglePPM_Hz_StackedPlot(),
              "Calibrate stacked plot",calibrateXAxisStackedPlot())


    menu(m+17, "&Help", "Window &help", help("User Interface\1D Plot","Introduction.htm"))

   
    hiddenPlot = plot1d(m+18,0,0,10,10)
    setpar(n,m+18,"visible","false")
    curplot(locPlot->subplot(1,1))

# Set toolbar, statusbox and menu box  1D plot
   setpar(n,m+13,"checkitem",0)
   setpar(n,m+13,"checkitem",8)
   setpar(n,m+13,"checkitem",9)
   setpar(n,m+13,"checkitem",11) 
   setpar(n,m+13,"name","plot_view_menu")          
   setpar(n,m+2,"name","plot_toolbar") 
   setpar(n,m+2,"checkitem",13) 
   setpar(n,m+2,"checkitem",16) 
   setpar(n,m+2,"checkitem",21) 
         
   setpar(n,m,"toolbar",m+2)
   setpar(n,m,"statusbox",m+1)
   setpar(n,m,"menubar",[m+11:m+17])
   setpar(n,m,"traceMenu",m+3)
   setpar(n,m,"bkgMenu",m+4)
   setpar(n,m,"axesMenu",m+5)
   setpar(n,m,"titleMenu",m+6)
   setpar(n,m,"labelMenu",m+7)
   
   addButton = button(m+19, 10, 20, 50, 25, "Add Integral",wvInt->integratePeak())
   rmButton = button(m+20, 70, 20, 50, 25, "Remove Integral",wvInt->removeIntegral())
   clearButton = button(m+21, 130, 20, 50, 25, "Clear",wvInt->clearIntegrals())
   exportButton = button(m+22, 190, 20, 50, 25, "Export",wvInt->exportIntegrals())

   rawDataGB = groupbox(m+23, "Raw Data", 10, 60, "rw-20", "wh/2-50")
   dataList = listbox(m+24, 20, 80, "rw-40", "wh/2-80",:dataListCallBack())

   groupbox(m+25, "Fit function", 10, "wh/2+60", "rw-20", "wh/2-80")
   fitList = listbox(m+26, 20, "wh/2+80", "rw-40", "wh/2-110",:fitCallback())
   button(m+27, 10, "wh/2+23", 50, 25, "Fit all",wvInt->fitAll())
   autoFit = checkbox(m+28, 260, "wh/2+34", "false,true","false")
   statictext(m+29, 264, "wh/2+20", "center", "Auto-fit")

   button(m+30, 70, "wh/2+23", 50, 25, "Edit fit",wvInt->editFit())
   button(m+31, 130, "wh/2+23", 50, 25, "Add fit",wvInt->addFit())
   button(m+32, 190, "wh/2+23", 50, 25, "Refresh",wvInt->refreshList())

   divider(m+34, "ww/5", 5, 6, "wh-15", "vert")
   setpar(n,m+34,"limits",[300,400])


   menu(m+37, "&Processing", "Macro Help", help("Macros\\Kea-Expert\\Processing Macros\\1D",""),
              "Separator", ,
              "Manual Phase ...\tCtrl+Shift+P",manualPhaseStackedPlot(),
              "1D Stats ...\tCtrl+Shift+1",stats1d(),
              "Stacked plot view ...", StackedPlotSetup(),
              "Separator", ,
              "user menu", "$appdir$\\Macros\\Kea-Expert\\Processing Macros\\1D")

    menu(m+38, "&1DMacros", "Macro Help", help("Macros\\1D","addErrorBars.htm"),
              "Separator", ,
              "Manual Phase ...\tCtrl+Shift+P",manualPhase1d(),
              "1D Stats ...\tCtrl+Shift+1",stats1d(),
              "Separator", ,
              "user menu", "$appdir$\\Macros\\1D_Macros")

    menu(m+39, "menu", "Edit entry", wvInt->editFit(),
                       "Delete entry", wvInt->deleteFit())
                       

   setpar(n,m+26,"menu",m+39)

# Add controls to region (note don't add static texts as they will be shifted)
   for(k = m+19 to m+31)
     if(isobj(n,k))
         setpar(n,k,"region",[-1,m+34,-3,-4])
     endif
   next(k)

# Hide all these controls
   for(k = m+19 to m+34)
      if(isobj(n,k))
         setpar(n,k,"visible","false")
      endif
   next(k)
   setpar(n,m,"region",[-1,-2,-3,-4])

# Set the button icons
   bak = getcwd()
   cd("$appdir$\Macros\Kea-Expert\Other Macros\Bitmaps")
   setpar(n,m+19,"icon","AddIntegral.png","tooltip","Select left and then right side of peak to integrate")
   setpar(n,m+20,"icon","RemoveIntegral.png","tooltip","Select peak to remove integral")
   setpar(n,m+21,"tooltip","Remove all integrals")
   setpar(n,m+22,"tooltip","Export integrals")
   setpar(n,m+27,"tooltip","Apply and print the current fit to all integrated data")
   cd(bak)
   
endproc(n)
