# Auto-generated procedure called by L-M nonlinear fit.
# Evaluates function and derivatives given x and fitting parameters.
procedure(BiExp, x, p0, p1, p2, p3)

   if(vartype(x) == "float" | vartype(x) == "double")
      y = p0*exp(-p1*x)+p2*exp(-p3*x)
      dydp0 = exp(-p1*x)
      dydp1 = -x*p0*exp(-p1*x)
      dydp2 = exp(-p3*x)
      dydp3 = -x*p2*exp(-p3*x)
      return(y, dydp0, dydp1, dydp2, dydp3)
   else
      assignstruct(p0)
      y = p0*exp(-p1*x)+p2*exp(-p3*x)
   endif

endproc(y)

# Procedure to set the initial guess for the parameters and
# any required changes to the x-axis, x and y label and y mapping.
procedure(preprocess, x, y, info)

   init = [max(y)/2,x[-1]/2,max(y)/2,x[-1]/2]
   xMod = x
   xLabel = null
   yLabel = null
   yMapping = "log"

endproc(init, xMod, xLabel, yLabel, yMapping)

# Procedure to modify any of the parameters after the fitting.
procedure(postprocess, parIn)

   parOut = parIn

endproc(parOut)

# Stores the parameters displayed in the fitting design interface (autogenerated).
procedure(uiParameters)

   oldNr = guiwinnr()
   guiwinnr(-1)
   dydp3 = "dydp3 = -x*p2*exp(-p3*x)"
   dydp2 = "dydp2 = exp(-p3*x)"
   dydp1 = "dydp1 = -x*p0*exp(-p1*x)"
   dydp0 = "dydp0 = exp(-p1*x)"
   function = "y = p0*exp(-p1*x)+p2*exp(-p3*x)"
   nrPar = 4
   funcName = "BiExp"
   par = mkparlist()
   try; guiwinnr(oldNr); catch; endtry;

endproc(par)

