# Auto-generated procedure called by L-M nonlinear fit.
# Evaluates function and derivatives given x and fitting parameters.
procedure(Cosine, x, p0, p1, p2)

   if(vartype(x) == "float" | vartype(x) == "double")
      y = p0*cos(x*p1 + p2)
      dydp0 = cos(x*p1 + p2)
      dydp1 = -p0*x*sin(x*p1 + p2)
      dydp2 = -p0*sin(x*p1 + p2)
      return(y, dydp0, dydp1, dydp2)
   else
      assignstruct(p0)
      y = p0*cos(x*p1 + p2)
   endif

endproc(y)

# Procedure to set the initial guess for the parameters and
# any required changes to the x-axis, x and y label and y mapping.
procedure(preprocess, xOrig, y, info)

   init = [max(y),1/180,0]
   xMod = xOrig
   xLabel = null
   yLabel = null
   yMapping = "linear"

endproc(init, xMod, xLabel, yLabel, yMapping)

# Procedure to modify any of the parameters after the fitting.
procedure(postprocess, parIn)

   parOut = parIn

endproc(parOut)

# Stores the parameters displayed in the fitting design interface (autogenerated).
procedure(uiParameters)

   oldNr = guiwinnr()
   guiwinnr(-1)
   dydp2 = "dydp2 = -p0*sin(x*p1 + p2)"
   dydp1 = "dydp1 = -p0*x*sin(x*p1 + p2)"
   dydp0 = "dydp0 = cos(x*p1 + p2)"
   function = "y = p0*cos(x*p1 + p2)"
   nrPar = 3
   funcName = "Cosine" 
   par = mkparlist()
   try; guiwinnr(oldNr); catch; endtry;

endproc(par)
