# Auto-generated procedure called by L-M nonlinear fit.
# Evaluates function and derivatives given x and fitting parameters.
procedure(Linear, x, p0, p1)

   if(vartype(x) == "float" | vartype(x) == "double")
      y = p0*x + p1
      dydp0 = x
      dydp1 = 1
      return(y, dydp0, dydp1)
   else
      assignstruct(p0)
      y = p0*x + p1
   endif

endproc(y)

# Procedure to set the initial guess for the parameters and
# any required changes to the x-axis, x and y label and y mapping.
procedure(preprocess, x, y, info)

   init = [(y[-1]-y[0])/(x[-1]-x[0]), y[0]]
   xMod = x
   xLabel = null
   yLabel = null
   yMapping = "linear"

endproc(init, xMod, xLabel, yLabel, yMapping)

# Procedure to modify any of the parameters after the fitting.
procedure(postprocess, parIn)

   parOut = parIn

endproc(parOut)

# Stores the parameters displayed in the fitting design interface (autogenerated).
procedure(uiParameters)

   oldNr = guiwinnr()
   guiwinnr(-1)
   dydp1 = "dydp1 = 1"
   dydp0 = "dydp0 = x"
   function = "y = p0*x + p1"
   nrPar = 2
   funcName = "Linear"
   par = mkparlist()
   try; guiwinnr(oldNr); catch; endtry;

endproc(par)

