###########################################################
#            manualPhaseStackedPlot.mac
#
# Apply a real-time phase shift to the currently selected
# 1D data set in a stacked plot.
# If Apply to All is pressed when phasing is finished then all
# traces will be phased.
# If Apply to Current is pressed then only the current trace 
# will be phased.
# If reset is pressed then the phase is restored to the 
# original.
# Abort will reset the phase and exit.
#
# Use the pivot button to select a point in the spectrum
# for which p1 is zero.
#
# The reset button restores the original spectrum
#
# Author: C Eccles
#
# Copyright (c) Magritek December 2005-2023
###########################################################


procedure(manualphase1d)

   n = :windowdefinition()
   windowvar(wv_x,wv_y,wv_pivot,wv_newdata,wv_realData)
   setwindowpar(n,"exit_procedure",":exit_proc()")
   :initialise()
   :loadPar()
   showwindow(n)
   setplotstate("startup")
   :loadData()
   func1d("copy plot")

endproc()

##########################################################
# Window definition
##########################################################

procedure(windowdefinition)

   # Automatically generated window definition procedure.
   # Any code added manually will be removed if layout modified interactively
   n = window("Phase 1D/Stacked Plot data", -1, -1, 340, 179)

      # Define all controls with basic parameters
       windowvar(wv_realData,wv_newdata,wv_pivot,wv_m,wv_x)
       textbox(1, 85, 48, 40,
         :update_p0_range();)
       textbox(2, 258, 48, 40,
         :update_p0_range();)
       slider(3, 90, 17, 201, 30, "horizontal",
            :phaseData();)
       statictext(4, 294, 22, "left", "0")
       statictext(5, 187, 102, "left", "0")
       button(6, 268, 143, 50, 29, "Apply",
          :exit_proc();
          :savePar();
          closewindow(0);)
       statictext(9, 187, 50, "left", "0")
       textbox(10, 85, 104, 40,
         :update_p1_range();)
       button(11, 79, 143, 50, 29, "Update",
          :loadData();)
       statictext(12, 294, 74, "left", "0°")
       slider(13, 90, 70, 201, 30, "horizontal",
            :phaseData();)
       button(14, 142, 143, 50, 29, "Reset",
          setpar(0,4,"text","0");
          setpar(0,5,"text","0");
          setpar(0,3,"value",0);
          setpar(0,13,"value",0);
          :phaseData();)
       statictext(15, 14, 74, "left", "p1 correction")
       statictext(16, 14, 21, "left", "p0 correction")
       button(17, 205, 143, 50, 29, "Help",
          :showhelp();)
       groupbox(18, "", 4, 1, 326, 136)
       textbox(19, 258, 104, 40,
         :update_p1_range();)
       button(20, 16, 143, 50, 29, "Pivot",
          :selectPivot();)
       getmessage(21,
         :process_message();)

     # Set other control parameters
       setpar(n,2,"valueID","maxP0")
       setpar(n,3,"type","float",
                   "range",[-100,100],
                   "tab_number",1)
       setpar(n,6,"tab_number",8)
       setpar(n,10,"tab_number",3)
       setpar(n,11,"tab_number",5)
       setpar(n,13,"type","float",
                   "range",[-100,100],
                   "tab_number",2)
       setpar(n,14,"tab_number",6)
       setpar(n,17,"tab_number",7)
       setpar(n,19,"tab_number",4)

endproc(n)

########################################################
# Display help file
########################################################

procedure(showhelp)
   help("Macros\\1D","manualphase1d.htm")
endproc()

########################################################
# Intialise the GUI
########################################################

procedure(initialise)

   wv_pivot = 0
   wv_newdata = 0
   ph = getpar(0,3,"value")
   setpar(0,4,"text",ph)
   setpar(0,3,"pagestep",20)
   setpar(0,3,"tickstep",20)
   setpar(0,13,"pagestep",20)
   setpar(0,13,"tickstep",20)
   setpar(0,1,"text","-180")
   setpar(0,2,"text","180")
   setpar(0,10,"text","-180")
   setpar(0,19,"text","180")
   setpar(0,1,"enable","false")
   setpar(0,10,"enable","false")
   cd("$appdir$\\Macros\\coreMacros")
   cachemacro("1DPar.mac")
   cacheproc("true")

endproc()

#######################################################
# Update the p0 range 
#######################################################

procedure(update_p0_range)

   range = abs(getpar(0,2,"value"))
   setpar(0,1,"text",-range)
   setpar(0,2,"text",range)

endproc()

#######################################################
# Update the p1 range if the right text box is modified
#######################################################

procedure(update_p1_range)

   range = abs(getpar(0,19,"value"))
   setpar(0,10,"text",-range)
   setpar(0,19,"text",range)

endproc()

#######################################################
# Exit procedure
#######################################################

procedure(exit_proc)

   pt = curplot("1d")
#   (x,y) = pt->getdata()
#   if(x != null)
#      (x0,x1) = pt->zoom()
#      autorange("on")
#      pt->zoom(x0,x1)
#   endif

   maxP0 = getpar(0,2,"value")
   maxP1 = getpar(0,19,"value")

   p0 = getpar(0,3,"value")*maxP0/100
   p1 = getpar(0,13,"value")*maxP1/100
   pr "\n\n   Phase correction: p0 = $p0$ p1 = $p1$\n"
   pr "   Pivot point: $wv_pivot$\n\n"
   autorange("off")
   pt->rmlines(wv_pivot)

endproc()

#######################################################
# As the slider is adjusted phase the current data set
#######################################################

procedure(phaseData)

   pt = curplot("1d")
   tcList = pt->tracelist()
   sz = size(tcList)
   tc = pt->curtrace()
   if(wv_newdata)
     :loadData()
     wv_newdata = 0
   endif

   w = max(wv_x)-min(wv_x)

# Extract the zeroth and first order phase correction
   p0 = getpar(0,3,"value")
   p1 = getpar(0,13,"value")

   p0 = abs(getpar(0,2,"value"))*p0/100
   p1 = abs(getpar(0,10,"value"))*p1/100

# Calculate phased shifted data

# Display the phase shifted data
   pt->parent->draw("false")
      for(cnt = 0 to sz-1)
         tc = pt->trace(cnt)
         ynCor = wv_m[:,cnt].*exp(i*(p0+p1*2/w*(wv_x-wv_pivot))/180*pi)
         pt->autorange("off")
         tc->setdata(struct(wv_x,ynCor))
      next(cnt)
   pt->parent->draw("true")

  # title("sd = $:standev(real(yn))$")

# Display the phase values as numbers
   setpar(0,4,"text","$p0$°")
   setpar(0,12,"text","$p1$°")
   setplotstate("olddata")


endproc()


procedure(standev,v)

   N = size(v)
   s = sum(v)
   avg = s/N
   sd = sqrt(sum((v-avg)^2)/N)
 
endproc(sd)

 
########################################################
# Select a point at which p1 will be zero
########################################################

procedure(selectPivot)

   pt = curplot("1d")
   (x,y) = pt->getdata("1d")
   if(x != null)
      txt = pt->title->text
      title("select pivot point")
      wv_pivot = getx()
      pt->title(txt)
      pt->rmlines(wv_pivot)
      pt->addline(wv_pivot,inf,wv_pivot,-inf,[0,255,0],2,"solid")
   endif

endproc()

########################################################
# Load data and see if it is real or complex
########################################################

procedure(loadData)

   pt = curplot("1d")

   trcLst = pt->tracelist()
   sz = size(trcLst)
   (wv_x,y) = pt->trace(0)->getdata()

   wv_m = cmatrix(size(wv_x),sz)
   for(k = 0 to sz-1)
      (x,y) = pt->trace(k)->getdata()
      wv_m[~,k] = y
   next(k)   
  
   setpar(0,4,"text","0")
   setpar(0,5,"text","0")
   setpar(0,3,"value",0)
   setpar(0,13,"value",0)

endproc("ok")


####################################################
# User modified the 1D plot so update GUI
####################################################

procedure(process_message)

   (src,cmd) = getpar(0,21,"text")

   if(src == "1D Plot")
      if(cmd == "SelectPlot" | 
         cmd == "LoadPlot"   |
         cmd == "SelectRow"  |
         cmd == "SelectCol")
            wv_newdata = 1
            setpar(0,4,"text","0")
            setpar(0,5,"text","0")
            setpar(0,3,"value",0)
            setpar(0,13,"value",0)
      endif

   endif

endproc()


##########################################################
# Load the phase limits
##########################################################

procedure(loadPar)

   cd(prefdir)
   mkdir("Other Macros")
   cd("Other Macros")
   if(isfile("manualPhase.par"))
      lst = load("manualPhase.par")
      setctrlvalues(0,lst)
      :update_p0_range()
      :update_p1_range()
   endif
   
endproc()

##########################################################
# Save the phase limits
##########################################################

procedure(savePar)

   cd(prefdir)
   mkdir("Other Macros")
   cd("Other Macros")
   lst = getctrlvalues(0)
   save("manualPhase.par",lst)

endproc()  

    