procedure(Ibuprofen)

   peakList = [10.01, 7.26, 3.78, 2.52, 1.99, 1.60, 1.00]
   
   splittingAmpList = [ 1, -1,   -1,  -1, -1;
                       1/8, 4,   1/8, -1, -1;
                       1/8, 3/8, 3/8, 1/8, -1;
                       0.5, 1.5, -1,  -1,  -1;
                       1/8, 1/8, 1/8, 1/8, -1;
                       2,   1,   -1,  -1,  -1;
                       4,   2,  -1,   -1,  -1]
   
   splittingFreqList =  [0,    -1,   -1,   -1,   -1;
                        -9,    0,    9,    -1,   -1;
                        -9,   -3,    3,     9,   -1;
                        -3,    3,   -1,    -1,   -1;
                        -9,   -3,    3,     9,   -1;
                        -3,    3,   -1,    -1,   -1;
                        -3,    3,   -1,    -1,   -1]
   
   T2 = 1
   T1 = 1

   result = struct("local")

endproc(result)

