#########################################################
# 
# T1T2CPMGFastV2
#
# CPMG pulse sequence in which each echo is summed to 
# return a single complex number per echo.
#
# 90 - delay - {180 - delay - acq}
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(T1T2CPMGFastV2, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"T1T2CPMGFastV2")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("T1T2CPMGFastV2")
   else
      gExpt->addExperiment(parentPath,"T1T2CPMGFastV2",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds ["w180_90"] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["nxShim = 0",
          "nyShim = 0",
          "nzShim = 0",
          "noShim = 0",
          "a90      = 90AmplitudeCh1",
          "a180     = 180AmplitudeCh1",
          "dRF      = pulseLengthCh1",
          "w180_90 = minTau*1000-dRF-pgo-0.5",
          "d90_180  = echoTime/2-(pgo+dRF+2)",
          "d180_acq = echoTime/2-acqTime*500-(dRF/2+2)+rxLat+echoShift",
          "dAcq     = echoTime-d180_acq-(pgo+dRF+2)",
          "dDummy = echoTime-dRF-pgo",
          "nEchoes  = nrEchoes",
          "nPnts    = nrPnts",
          "nDummy = dummyEchoes",
          "nxShim = 0",
          "nyShim = 0",
          "nzShim = 0",
          "noShim = 0",
          "totPnts  = nrEchoes",
          "totTime  = echoTime*nrEchoes"]
   var = ["w180_90"]
   pp_list = ["nEchoes","a180","p1","dRF","w180_90","a90","p2","d90_180","l1","p3","d180_acq","nPnts","dAcq","nDummy","l2","dDummy"]
   pp_name = "T1T2CPMGFastV2.p"
   phase_list = [0,2,0,2;0,0,2,2;1,1,1,1;0,0,2,2]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

   guipar = guipar + ["timeMag = \"no\"",
                      "showTimeDomain = \"yes\"",
                      "showFreqDomain = \"yes\""]

# Make all gui parameters available
   assignlist(guipar)

# Do some safety checks
   if(d90_180 < 1 | d180_acq < 1 | dAcq < 1)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
      return(0)
   endif

   if(dAcq-ucsRun:getAcqTime(guipar) <= 0)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
      return(0)
   endif

# # Check RF duty cycle
#   if(ucsRun:highDutyCycle(dRF*nEchoes,nEchoes*echoTime,guipar))
#      return(0)
#   endif

# Allocate data for outputs
   sumData = cmatrix(totPnts)
   sumDataAP = cmatrix(totPnts)

# Calculate a suitable time axes
   tAxis = ([0:1:totPnts-1]/totPnts)*totTime + echoTime

# Get plot regions.
   (pt1,pt2) = ucsPlot:getPlotReferences()


   for(m = 0 to tauSteps-1)


# Accumulate scan
   for(scan = -dummies to nrScans-1)

    # Set phases for this scan
      (ppList,pAcq) = ucsRun:setPPPhase(ppList,scan,pcList,pcIndex)

    # Send all parameter values to spectrometer
       ucsRun:updatePPParameters(ppList,guipar)

    # Wait for the repetition time to complete
      check = ucsRun:checkTiming(guipar,scan,pcList)
      if(check == "abort")
         return(0)
      endif

    # Collect the data
      (status,data) = ucsRun:getData(totPnts,guipar)
      if(status != "ok")
         return(0)
      endif

    # Dummy scans - don't display anything
      if(scan < 0)
          
         pt1->draw("false")
         pt1->plot(matrix(totPnts))
         pt1->title("Dummy scan $-scan$")
         pt1->draw("true")

      else # Real data
   
       # Accumlate the data
         sumData = ucsRun:accumulate(accumulate,pAcq,sumData,data)

       # Plot the integrals but don't apply a fit 
         if(fitType == "none" | fitMode == "manual")

          # Autophase if desired
            if(autoPhase == "yes")
               (ph,sumDataAP) = ucsRun:autoPhase(sumData/nrPnts,phaseMethod)
            else
               sumDataAP = sumData/nrPnts
            endif

            result = null
            stats = null   

          # Display the data
            ucsPlot:graphTime(pt1,tAxis/1000,sumDataAP,scan,guipar,
                             "Echo integrals SCANS","Time (ms)","Average echo amplitude (\G(m)V)")

            # Display the SNR
            if(scan >= 0  & ((scan+1) % size(pcList) == 0))
               pr("   Scans: $scan+1$ SNR = $:getSNR(sumDataAP)$\n")
            endif

         else # Real-time fit

          # Only display fit after full phase cycle
            if(scan >= 0  & ((scan+1) % size(pcList) == 0))

             # Autophase if desired
               if(autoPhase == "yes")
                  (ph,sumDataAP) = ucsRun:autoPhase(sumData/nrPnts,phaseMethod)
               else
                  sumDataAP = sumData/nrPnts
               endif
   
            # Plot the integral data 
               ucsPlot:graphTime(pt1,tAxis/1000,sumDataAP,scan,guipar,
                                "Echo integrals SCANS","Time (ms)","Average echo amplitude (\G(m)V)")
   
            # Apply the requested fit
              (pt2, result, stats) = :DisplayFit(pt1,pt2,tAxis/1000,sumDataAP/(scan+1),nrEchoes,guipar,scan)
  
            endif # Full phase cycle
   
         endif # Fit type

      endif # Dummy scans

    # Check if complete button pressed
      if(check == "finish")
         scan = scan+1
         exitfor()
      endif

   next(scan)



    # Check if complete button pressed
      if(check == "finish")
         exitfor()
      endif

   next(m)

# Save the data
  ucsFiles:savePlot(pt1,:getPlotInfo("pt1"),guipar,"simpleReport")
   if(stats != null)
      ucsFiles:savePlot(pt2,:getPlotInfo("pt2"),guipar,"simpleReport")
      ucsFiles:saveToNotes(stats+result, guipar)
   endif

# Return result structure when called from backdoor
   result = struct()
   result->tx = tAxis/1000
   result->ty = sumDataAP/scan

   return(result)

endproc("execpp") # Don't remove argument

###################################################################
# Callback for the Manual Fit button
###################################################################

procedure(ManualFit)

   (pt2,result,stats) = :DisplayFit()
   print("$stats$")
   print("$result$\n")

endproc()

###################################################################
#
# Display the passed data points and a fitted t2 curve
#
# Parameters are:
# pt1 ...... plot with source data
# pt2 ...... output plot
# x ........ the time array
# y ........ the amplitude arrays
# N ........ the number of data points to plot
# guipar ... GUI parameter list
# scan ..... The current scan number (0 based)
#
###################################################################
   
procedure(DisplayFit,pt1,pt2,x,y,N,guipar,scan)

# If called from manual fit button
   if(nrArgs == 0)
      (pt1,pt2) = ucsPlot:getPlotReferences()
      pt2 = pt2->parent->multiplot(1,1)
      guipar = getctrlvalues(0)
      par = ucsFiles:loadPref()
      assignlist(par)
      guipar = setlistvalue(guipar,"wvDataSymbolShape","\"opensquare\"")
      guipar = setlistvalue(guipar,"wvDataSymbolColor","[0,128,0]")
      guipar = setlistvalue(guipar,"wvFitCurveColor","[0,0,255]")
      guipar = setlistvalue(guipar,"wvSpectrumColor","[255,0,0]")
      guipar = setlistvalue(guipar,"wvUnits","\"$units$\"")
      guipar = mergelists(guipar,par) 
      assignlist(guipar)
   # Extract the data
      (x,y) = pt1->getdata()
       N = size(x)
       scan = nrScans-1
   # Autophase if requested
      if(autoPhase == "yes")
        (txt,lx,ly) = 1dpar:get()
         (ph,y) = ucsRun:autoPhase(y,phaseMethod)
      endif
   else
      assignlist(guipar)
   endif

# Ignore the first point if the option is selected
   if(ignoreFirstPnt == "yes")
      offset = 1
   else
      offset = 0
   endif
# We may need to reduce the size of the data set
   xRed = x[offset:]
   yRed = y[offset:]
   NRed = N-offset

# Perform the fit
   if(fitType == "nnls")
      (nx,ny) = pt2->parent->size()
      if(nx != 2)
        (pt2a,pt2b) = pt2->parent->multiplot(2,1)
      else
         pt2a = pt2->parent->subplot(1,1)
         pt2b = pt2->parent->subplot(2,1)
      endif
      (result,details) = :ILFit(pt2a,pt2b,xRed,yRed,NRed,guipar)
        pt2 = pt2a
        pt2->fileName(:getPlotInfo("pt2"))
        pt2->filePath(gData->curExpt->dataPath)
   else
      (result,details) = ucsPlot:fitAndGraph(pt2,xRed,real(yRed),NRed,fitType,null,
                                   "Time (ms)","Echo integral (UNITS)",
                                   "Echo attenuation data",
                                   "Fit result: RESULT",guipar)
   
   endif

# Print out some statistics
   if(details != null)
      printtostring()
      pr("\n   Scans: $scan+1$\n")
      pr("      Fit residuals sd = $sd(real(yRed)-details->fit)$\n")
      pr("      Data noise sd = $sd(imag(yRed))$\n")
      pr("      Data SNR = $:getSNR(yRed)$\n")
      
      stats = closeprint()
      print("$stats$")
      print("$result$\n")
   endif

endproc(pt2, result, stats) # Need to return this as it might have been changed


###################################################################
#
# Display the passed data points and a fitted relaxation curve
# and relaxation spectrum
#
# Parameters are:
# pt2 ..... plot for the data and fit
# pt3 ..... plot for the NNL spectrum
# x ....... the time array
# y ....... the amplitude arrays
# N ....... the number of data points to plot
# guipar ... GUI parameter list
#
###################################################################
 
procedure(ILFit,pt2,pt3,x,y,N,guipar)

   assignlist(guipar)

# Bin the data if more than 100 points
   if(N > 100)
      x_steps = 100 
     (timeDat,yData) = pseudologbin(x,real(y),100)
   else
     timeDat = x
     yData   = y
     x_steps = N-1
   endif

# Invert meaning of alpha and reduce range
   alphaNew = 10^(8-log10(alpha))

   guipar = guipar + ["exp_type = \"exp(-t/T)\"",
          "designMat = \"exp(-xData'*(1/xSpec))\"",
          "alpha = $alphaNew$",
          "logBin = \"true\"",
          "weightBins = \"true\"",
          "x_steps = $x_steps$"]

# Invert using Lawson and Hanson inverstion
   (specX,specY) = LHInvert(x,real(y),guipar)

# Get fit parameters
  (fit,chisq) = LHInvert:calcFit("exp(-t/T)",specX,specY,x,real(y))

# Plot original data with L&H fit
   ucsPlot:graphXYFit(pt2,x,y,fit,null,size(x),
                      "Time (ms)","Average echo amplitude (UNITS)","Echo attenuation data (with IL fit)",guipar)

   guipar = guipar + ["xMap = \"log\"",
                      "traceCol = $wvSpectrumColor$",
                      "symbolShape = \"none\""]

# Plot the spectrum
   ucsPlot:graphXY(pt3,specX,specY,null,size(specX),
                      "log_(10)(T) ms","Amplitude","Relaxation Spectrum",guipar)

# Return the fit
   r = struct()
   r->fit = fit
   r->chisq = chisq

endproc("\n   NNLS fit (alpha = $alpha$)",r)


########################################################
# Get the name of a plot file given the region name
# or return the whole list
########################################################

procedure(getPlotInfo,plotRegion)

   info = ["pt1","rawCPMG.pt1","pt2","fit.pt1"]

   if(plotRegion == "all")
      return(info)
   endif

   idx = getlistindex(info,plotRegion)
   if(idx != -1)
      return(info[idx+1])
   endif

endproc(null)


########################################################
# Return expected experiment duration in seconds
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)
   totScans = dummies + nrScans + useStartDelay
   duration = (totScans*repTime)/1000

endproc(duration)


########################################################
# Get the signal to noise ratio
########################################################

procedure(getSNR, data)

   ns = imag(data)
   ns = sd(ns[round(size(ns)/2):-1])
   sig = max(real(data))
 
endproc(sig/ns)
