#########################################################
# 
# 1PulseDurationSweep
#
# A pulse sequence suitable for performing a
# nutation experiment. This is  performing using a series
# of pulse and collect experiments, in which the
# pulse duration is stepped from a minimum to a maximum 
# value while plotting the spectral integral as a function
# of pulse duration.
#
# pulse - delay - acq
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(1PulseDurationSweep, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"1PulseDurationSweep")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("1PulseDurationSweep")
   else
      gExpt->addExperiment(parentPath,"1PulseDurationSweep",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds ["a90Amp","d90Dur"] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["nDataPnts = nrPnts",
          "a90Amp    = 90AmplitudeCh1",
          "d90Dur    = minDur",
          "dAcqDelay = acqDelay",
          "totPnts   = nrPnts",
          "totTime   = acqTime"]
   var = ["a90Amp","d90Dur"]
   pp_list = ["a90Amp","p1","d90Dur","dAcqDelay","nDataPnts"]
   pp_name = "1PulseDurationSweep.p"
   phase_list = [0,1,2,3;0,1,2,3]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list (DSP only)
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

# Allocate space for output data
   sumData = cmatrix(totPnts)
   pulseDur   = matrix(nrSteps)
   peakInt    = matrix(nrSteps)
   intError   = matrix(nrSteps)
   spec2d     = cmatrix(nrPnts,nrSteps)

# Calculate suitable time and frequency axes
   tAxis = ([0:1:totPnts-1]/totPnts)*totTime*1000   # (us)
   fAxis = ([0:1:totPnts-1]-totPnts/2)/totTime*1000 # (Hz)

# Time domain filter
   if(filter == "yes")
      flt = filters:get_filter(filterType,"FTFid",tAxis/1e6)
   else
      flt = matrix(totPnts)+1
   endif

# Get plot regions
   (pt1,pt2,pt3) = ucsPlot:getPlotReferences()
   pt1->showimag("false")
   pt2->showimag("false")

# Loop over duration steps
   for(s = -dummies-1 to nrSteps-1)

      if(s == -dummies-1)
         dur = minDur
         amp = -85
      elseif(s < 0)
         dur = minDur
         amp = a90Amp
      else
         dur = minDur + s*durStep
         amp = a90Amp
      endif

      ppList = ucsRun:setPPAmplitude(ppList,varIndex[0],amp)
      ppList = ucsRun:setPPDelay(ppList,varIndex[1],dur)

      sumData = cmatrix(totPnts)
   
   # Accumulate scans
      for(scan = 0 to nrScans-1)
   
       # Set phases for this scan
         (ppList,pAcq) = ucsRun:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send all parameter values to spectrometer (DSP)/generate event table (FX3)
          ucsRun:updatePPParameters(ppList,guipar)
   
       # Wait for the repetition time to complete
         check = ucsRun:checkTiming(guipar,scan,pcList)
         if(check == "abort")
            return(0)
         endif
   
       # Run the pulse program
         status = ucsRun:runExperiment(guipar)
   
       # See if stop button/escape key pressed
         if(status != "ok")
            return(0)
         endif
   
       # Read the data from the spectrometer
         data = ucsRun:readData(totPnts, guipar)
   
       # Apodize the data
         data = data .* flt
   
       # Accumulate the data
         sumData = ucsRun:accumulate(accumulate,pAcq,sumData,data)
   
       # FT the data
         (phasedTimeData,spectrum) = ucsRun:transformData(sumData,fAxis,guipar)
   
       # Plot the FID and spectrum 
         ucsPlot:graphTimeAndFreq(pt1,pt2,tAxis,phasedTimeData,fAxis,spectrum,scan,guipar)
   
       # Check if complete button pressed
         if(check == "finish")
            scan = scan+1
            exitfor()
         endif
   
      next(scan)

     if(check == "finish")
         exitfor()
      endif
  
    # Process spectra
      if(s == -dummies-1) # No signal so determine noise level
         try
            (error,range) = ucsRun:stdDev(real(spectrum)/nrScans,fAxis,-intWidth/2,intWidth/2)
         catch
            message("Error","Integration width or frequency resolution is too small.","error")
            return(0)
         endtry
         error = error * intWidth/range*sqrt(nrPnts)
      elseif(s >= 0) # Integrate spectral peak
         peakInt[s]  = integvector(fAxis,real(spectrum)/nrScans,-intWidth/2,intWidth/2)
         pulseDur[s]  = dur
         intError[s]  = error
      # Plot the integrals
         ucsPlot:graphXY(pt3,pulseDur,peakInt,intError,s+1,
                        "Pulse Duration (\G(m)s)","Peak Integral",
                        "Pulse Duration Analysis",guipar)
         spec2d[~,s] = spectrum/nrScans

      endif

   next(s)

# Save the data
   ucsFiles:savePlot(pt3,:getPlotInfo("pt3"),guipar,"simpleReport")

# Pack the data into a structure
   result = struct()
   result->dur = pulseDur
   result->int = peakInt

# Return result
   return(result)

endproc("execpp") # Don't remove argument

########################################################
# Get the name of a plot file given the region name
# or return the whole list
########################################################

procedure(getPlotInfo,plotRegion)

   info = ["pt3","durationSweep.pt1"]

   if(plotRegion == "all")
      return(info)
   endif

   idx = getlistindex(info,plotRegion)
   if(idx != -1)
      return(info[idx+1])
   endif

endproc(null)

########################################################
# Return expected experiment duration in seconds
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)

   totScans = nrScans + useStartDelay
   duration = (totScans*nrSteps*repTime)/1000

endproc(duration)
