#########################################################
# 
# SSE
#
# Stimulated spin echo + CPMG detection.
# www.magritek.com, March 2013
# Prospa V3.12
#
# Copyright (c) Magritek Ltd 2025
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(SSE, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"SSE")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("SSE")
   else
      gExpt->addExperiment(parentPath,"SSE",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds ["d5","d2"] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["a1 = 90Amplitude",
          "a2 = 180Amplitude",
          "d1 = pulseLength",
          "d2 = 1000*tauMin+echoTime/2-d1-pgo",
          "d3 = echoTime/2-acqTime*500-d1/2+rxLat+echoShift",
          "d4 = echoTime-d1-pgo-d3",
          "d5 = 1000*tauMin-d1-pgo",
          "w1 = 1000*DELTA",
          "n1 = nrEchoes",
          "n2 = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["d5","d2"]
   pp_list = ["a1","p1","d1","d5","p2","w1","p3","d2","n1","l1","a2","p4","d3","n2","d4"]
   pp_name = "SSE.p"
   phase_list = [0,2,0,2,0,2,0,2,1,3,1,3,1,3,1,3;0,0,2,2,0,0,2,2,0,0,2,2,0,0,2,2;0,0,0,0,2,2,2,2,0,0,0,0,2,2,2,2;1,1,1,1,1,1,1,1,0,0,0,0,0,0,0,0;2,0,0,2,0,2,2,0,1,3,3,1,3,1,1,3]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)
 # :printOptTauMaxSSE();


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex,ext)


# Make all gui parameters available
   assignlist(guipar)

# Check RF duty cycle
# for PM25----------------------------------------------
       if(pulseLength*nrEchoes/repTime>1.6)
# for PM5----------------------------------------------
    #    if(pulseLength*nrEchoes/repTime>3)
    message("Error","RF duty cycle is too high, reduce nrEchoes or increase repTime","error") 
    return(0)
  endif

# Check for p.s. duty cycle should be < 20%
  if(d1/(echoTime) > 0.25)
      message("Error","Duty cycle is too high in pulse sequence!\rshould be < 25%\rIncrease echo time\ror reduce pulse length.","error")
      return(0)
   endif



   if(0==:checkDelay(d1,1)); return; endif
   if(0==:checkDelay(d2,1)); return; endif
   if(0==:checkDelay(d3,1)); return; endif
   if(d4-keaNMR:getAcqTime(guipar) < 1)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
      return(0)
   endif

   if(0==:checkDelay(d5,1)); return; endif
   if(0==:checkDelay(w1,1)); return; endif



# Storage for output data
   
   sumData = cmatrix(totPnts)

# calculate the time axis 
   totalTime = matrix(totPnts)
   totalTime = ([0:1:totPnts-1]/totPnts)*totTime*1000

   tauAxis  = matrix(nrPntsTau)
   tauAxis2 = matrix(nrPntsTau)
   
   gradientTperMeter= gradient/42.57
# the factor 1000 is to change from seconds to ms 
   t2Diff = 1000*(DEst*1e-9*(DELTA/1000)*(gamma*gradientTperMeter)^2)^(-1/2)

   amax = exp(-(tauMin/t2Diff)^2)
   amin = exp(-(tauMax/t2Diff)^2)
   astep= (amax-amin)/(nrPntsTau-1)

   for(m = 0 to nrPntsTau-1)
    #lineal time increment
      if(index=="lin")
        tauAxis[m] = tauMin+ m*(tauMax-tauMin)/(nrPntsTau-1) 
      endif 
   #exponetial time increment
      if(index=="exp") 
        tauAxis[m] = t2Diff*(-loge(amax-astep*(m)))^(1/2)
      endif
   next(m)

   if (tauMax >3*t2Diff); tauAxis[nrPntsTau-1]= tauMax; endif

   tauAxis2[~] = 1e-18*(gamma*gradientTperMeter)^2*( DELTA*(tauAxis[~])^2 + 2/3*(tauAxis[~])^3)

   try
      if(excecutedBackdoor == "yes")
     # pr "SEE excuted via backdoor\n"
      endif 
   catch
      excecutedBackdoor = "no"
      refSignal = 1
      multiplot("1d",3,1)
   endtry

   # Reset the timer
   time(0)  

   ampAxis    = matrix(nrPntsTau)

   #loop for the 2D experiment
   for(m = 0 to nrPntsTau-1)
      
      tauD = 1000*tauAxis[m]
  
      d5 = tauD -d1-pgo-1.5
      d2 = tauD +echoTime/2-d1-pgo-1.5

      if((d2<0.5)|(d2>10000));  pr "\n delay (d2 = $d2$ us) is out of range \n" ;   return; endif
      if((d5<0.5)|(d5>10000));  pr "\n delay (d5 = $d5$ us) is out of range \n" ;   return; endif
    
      ppList = keaRun:setPPDelay(ppList,varIndex[0],d5)
      ppList = keaRun:setPPDelay(ppList,varIndex[1],d2)


  # reset sumData
      sumData = cmatrix(totPnts)
   
   # Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaRun:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
          dspwrite("x",0x00,ppList,wvPort)
   
       # Collect the data
         (status,data) = keaRun:getData(totPnts,guipar)
          data = data/nrEchoes
          if(status != "ok")
            return(0)
          endif
   
       # Accumlate the data
         sumData = keaRun:accumulate(accumulate,pAcq,sumData,data)
   
        :graphTime2(sumData/refSignal,scan,totalTime,m,guipar)
       
      # Check timing
     check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
     if(check == "abort")
        return(0)
     elseif(check == "finish")
        scan = scan + 1
        exitfor()
     endif

      next(scan)

      sumData = sumData/nrScans/refSignal
      ampAxis[m]  = sum(real(sumData))/nrPnts

# "lineal vs lineal" plot
       curplot("1d",2,1)
       drawplot("false")  
       plot(tauAxis,ampAxis,
             "tracetype", "lines",
             "tracecolor",wvDataSymbolColor,
             "symbolshape","opensquare",
             "symbolcolor",wvDataSymbolColor)
       xlabel("\G(d) [ms]") 
       ylabel("Probe output amplitude (raw)")
       title("Echo decay")

# log vs. tau^2 plot

       curplot("1d",3,1)
       plot(tauAxis2,ampAxis/ampAxis[0],
             "tracetype", "lines",
             "tracecolor",wvDataSymbolColor,
             "symbolshape","opensquare",
             "symbolcolor",wvDataSymbolColor)
       xlabel("(\G(D)-2/3\G(d)) \G(g)^(2) G_(0)^(2) \G(d)^(2) (10^(9) m^(-2)s)") 
       ylabel("Signal amplitude")
       title("Spin Echo decay")
       drawplot("true")

      drawplot("false")
      
      if(saveData == "true")
         :saveData(guipar,tauAxis,tauAxis2,ampAxis)
         if(m=nrPntsTau-1)
            # Output information to the CLI
            pr "\n  data saved in:"
            pr "\n  $dataDirectory$\\$expName$\\$expNr$"
         endif
 
      endif
  if check==("finish")
         exitfor()
  endif
   next(m)

   if(excecutedBackdoor=="yes")
       return(tauAxis,ampAxis)
   else
       :SEEFit(tauAxis2,ampAxis,guipar)
   endif


# Increment the experiment number
   keaNMR:incrementExperiment(incExpNr)
        
   keaNMR:titleReset()

endproc("execpp")

#######################################################
# Save the accumulated data
# Either pass the parameters to save or use
# window variables of the same name.
#######################################################

procedure(saveData,guipar,tauAxis,tauAxis2,ampAxis)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   save("data.1d",ampAxis)    # Save data in Prospa format
   save("data.pt1")                     # Save plot
   save("data.emf","emf1d")             # Save plot as picture
   n = size(ampAxis)
   m = matrix(3,n)
   m[0,~] = tauAxis'
   m[1,~] = tauAxis2'
   m[2,~] = real(ampAxis)'

   export2dpar("ab","ascii","xyrc","real","delimiter","tab")
   export2d(m,"data.dat")  # Save data for origin

# Restore cwd
   cd(bak)


endproc("saveData")
#--------------------------------------------------------
procedure(graphTime2,fidData,n,t,ne,guipar)

   assignlist(guipar)

# Allow for accumulations
   if(accumulate == "yes")
      sf = 1/(n+1)
   else
      sf = 1
   endif

# Select units
   if(wvUnits == "uV")
      sf = sf
      ampUnits = "\G(m)V"
   else
      ampUnits = "mV"
 sf = sf*0.001
   endif

   drawplot("false")
   
   curplot("1d",1,1) 
   plot(t,fidData*sf)
   xlabel("time(us)") 
   ylabel("Probe output amplitude ($ampUnits$)")
   title("Scan ($(n+1)$/$nrScans$)")
   drawplot("true")

endproc()

procedure(SEEFit,tauAxis2,ampAxis,guipar)
   assignlist(guipar)

   (x,y,nrPntsNew)=:removeNegativeValues(tauAxis2,ampAxis/ampAxis[0],nrPntsTau)
   
   y[~]= loge(y[~])

   (a,b,aErr,bErr) = linfit:fit(x,y)
    aStr = errorstr(a,aErr,1,3)
    bStr = errorstr(b,bErr,1,3)
  
   # Print out results
   pr("\n\n   slope ...... $aStr$")
  # pr("\n   intercept .. $bStr$\n")

   yfit = matrix(nrPntsNew)
   yfit[~] = b + a*x[~]

   curplot("1d",3,1)
   drawplot("false")

   plot(x,yfit)
         trace("tracetype","lines",
         "tracewidth",2,
         "symbolshape","none",
         "tracecolor",[0,255,0])
  
   hold("on")

   plot(x,y,
          "tracetype", "lines",
          "tracecolor",wvDataSymbolColor,
          "symbolshape","opensquare",
          "symbolcolor",wvDataSymbolColor)
    xlabel("(\G(D)-2/3\G(d)) \G(g)^(2) G_(0)^(2) \G(d)^(2) (10^(9) m^(-2)s)") 
    ylabel("ln (amplitude)")
    title("D = $errorstr(-a,aErr,1,3)$ 10^(-9) m^(2)/s")
    hold("off")
    drawplot("true") 

endproc()


#################################################

procedure(removeNegativeValues,t,data,nrPnts) 
  
  countNeg = nrPnts

  for (x = 0 to nrPnts-1 step 1)
     if (data[x]< 0.001)
         countNeg=x
     endif
  next(x)

  if (countNeg<nrPnts)
     pr "\n Some negative data points were removed before fitting\n"
  endif

  tNew = submatrix(t   ,0,countNeg-1) 
  dadaNew = submatrix(data,0,countNeg-1) 
  
endproc(tNew,dadaNew,countNeg)
#-------------------------------------------------

procedure(printOptTauMaxSSE,nada)

    guipar = getctrlvalues(0)
    assignlist(guipar)

    try
      gradientTperMeter = gradient/42.57
      # the factor 1000 is to change from seconds to ms 
      t2Diff = 1000*(DEst*1e-9*(DELTA/1000)*(gamma*gradientTperMeter)^2)^(-1/2)
      if(nrArgs==0)
        pr "\n Optimum tauMax ~ $t2Diff,3.2g$ ms  \n" 
      endif
   catch
      return -1 
   endtry  

endproc(t2Diff)
#---------------------------------------------
procedure(checkDelay,dx,limit)
 
   if (dx<= limit)
      message("error","Pulse sequence timing error","error")
      return (0)
   endif 
endproc(1)


