#########################################################
# 
# T1Sat
#
# Saturation recovering sequence with CPMG detection
# www.magritek.com, March 2013
# Prospa V3.12
#
# Copyright (c) Magritek Ltd 2025
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(T1Sat, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"T1Sat")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("T1Sat")
   else
      gExpt->addExperiment(parentPath,"T1Sat",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds ["w1"] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["a1 = 90Amplitude",
          "a2 = 180Amplitude",
          "d1 = pulseLength",
          "d2 = echoTime/2-d1-pgo",
          "d3 = echoTime/2-acqTime*500-d1/2+rxLat+echoShift",
          "d4 = echoTime-d1-pgo-d3",
          "d10 = 750-pgo",
          "d9 = 500-pgo",
          "d8 = 350-pgo",
          "d7 = 200-pgo",
          "d6 = 150-pgo",
          "d5 = 100-pgo",
          "w1 = tMax",
          "n1 = nrEchoes",
          "n2 = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["w1"]
   pp_list = ["a1","p1","d1","d5","d6","d7","d8","d9","d10","w1","p2","d2","n1","l1","a2","p3","d3","n2","d4"]
   pp_name = "T1Sat.p"
   phase_list = [0,2,0,2;0,0,2,2;1,1,1,1;0,0,2,2]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)


# Make all gui parameters available
   assignlist(guipar)

# Check for total RF duty cycle
# for PM25----------------------------------------------
          if(pulseLength*nrEchoes/(repTime+tMax/3)>1.6)
# for PM5----------------------------------------------
    #       if(pulseLength*nrEchoes/(repTime+tMax/3)>3)
      message("Error","RF duty cycle is too high, reduce nrEchoes or increase repTime","error") 
      return(0)
   endif
# Check for p.s. duty cycle should be < 20%
   if(d1/(echoTime) > 0.25)
      message("Error","Duty cycle is too high in pulse sequence!\rshould be < 25%\rIncrease echo time\ror reduce pulse length.","error")
       return(0)
   endif
   if(0==:checkDelay(d1,2)); return; endif
   if(0==:checkDelay(d2,2)); return; endif
   if(0==:checkDelay(d3,2)); return; endif
   if(d4-keaNMR:getAcqTime(guipar) < 1)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
       return(0)
   endif

   if(0==:checkDelay( d5,2)); return; endif
   if(0==:checkDelay( d6,2)); return; endif
   if(0==:checkDelay( d7,2)); return; endif
   if(0==:checkDelay( d8,2)); return; endif
   if(0==:checkDelay( d9,2)); return; endif
   if(0==:checkDelay(d10,2)); return; endif


# Make subplots. wvPP is the current-plot's parent
   try
   if(excecutedBackdoor=="yes")
      ppBack = curplot("1d")->parent()
      prt  = ppBack->subplot(1,1)
      prf  = none
      prn  = ppBack->subplot(2,1)

   endif
catch
   excecutedBackdoor="no"   
   refSignal=1
  (prt,prf,prn) = keaPlot:getPlotRegions(guipar,3,wvPP)

endtry

# calculate the time axis 
   tAxis = ([0:1:totPnts-1]/totPnts)*totTime*1000
   fAxis = ([0:1:totPnts-1]-totPnts/2)/totTime

   t1Axis   = matrix(nrPntsT1)

   amax = 0.95
   amin = exp(-tMax/t1Est)
   astep= (amax-amin)/(nrPntsT1-1)

   for(m = 0 to nrPntsT1-1)
    #lineal time increment
      if(index=="lin")
        t1Axis[m] = (m+1)*tMax/(nrPntsT1) 
      endif 
    #exponential time increment
      if(index=="exp")
      t1Axis[m] = t1Est*(-loge(amax-astep*(m)))^(1/1)
      endif
   next(m)

   try
      if(excecutedBackdoor == "yes")
    
      endif 
   catch
      excecutedBackdoor = "no"
      refSignal = 1
   endtry

# Reset the timer
   time(0)  

# Allocate memory for outputs
   ampAxis  = matrix(nrPntsT1)

# Filter
   if(filter == "yes")
      flt = filters:get_filter(filterType,"FTEcho",totPnts)
   else
      flt = matrix(totPnts)+1
   endif

#loop for the 2D experiment
   for(m = nrPntsT1-1 to 0 step -1)
      
      w1 = t1Axis[m]  

      ppList = keaRun:setPPLongDelay(ppList,varIndex[0],1000*w1)
   
  # reset sumData
      sumData = cmatrix(totPnts)
   
   # Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Note the time at scan start
         t1 = time()   
   
       # Set phases for this scan
         (ppList,pAcq) = keaRun:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send phase parameters to DSP
          dspwrite("x",0x00,ppList,wvPort)
  
       # Run the p.p. and collect the data
         (status,data) = keaRun:getData(totPnts,guipar)
         data = data/nrEchoes
        if(status != "ok")
            return(0)
         endif
       # Filter the data
         data = data .* flt
       # Accumlate the data
         sumData = keaRun:accumulate(accumulate,pAcq,sumData,data)
       # Process the data
        if(showFreqDomain=="yes")
         (sumData,spectrum) = keaRun:transformData(sumData,fAxis,guipar,"echo")
        endif
        titleTxt = "EchoSum: $scan+1$/$nrScans$"
        keaPlot:graphTimeAndFreq(prt,prf,tAxis,sumData/refSignal,fAxis,spectrum/refSignal,scan,guipar,titleTxt)


      # Check timing

         t1=t1+w1/1000

         check = keaRun:checkTimeAndAbort(guipar,t1,scan,pcList)
         if(check == "abort")
            return(0)
         elseif(check == "finish")          
         scan = scan+1
            exitfor()
          return(0)
         endif
            
      next(scan)

      ampAxis[m]  = sum(real(sumData))/nrPnts/refSignal


      :graphBuildUp(t1Axis,ampAxis,prn,m,nrScans,guipar)      

      if(saveData == "true")
         :saveData(guipar,t1Axis,ampAxis)
         if(m=1)
         # Output information to the CLI
            pr "\n  data saved in:"
            pr "\n  $dataDirectory$\\$expName$\\$expNr$"
         endif
      endif
  
      if check==("finish")
         exitfor()
      endif


   next(m)

     (fit,E0,T1,E0err,T1err) = :T1SatFitOffset(t1Axis,ampAxis,prn,nrScans,guipar)

# Increment the experiment number
   keaFiles:incrementExperiment(guipar)
# Pack the data into a structure  
   
      result = struct()
      result->t1Axis = t1Axis
      result->ampAxis = ampAxis/nrScans
      result->E0 = E0
      result->T1 = T1
      return(result)



        
 

endproc("execpp")

# -----------------------Save the accumulated data -----------------------------
# Either pass the parameters to save or use
# window variables of the same name.


procedure(saveData,guipar,t1Axis,ampAxis)

# Make all gui parameters available
   assignlist(guipar)

# Save data and plot in chosen folder
   bak = getcwd()
   cd(dataDirectory)
   mkdir(expName)
   cd(expName)
   mkdir("$expNr$")
   cd("$expNr$")

   save("data.1d",ampAxis)              # Save data in Prospa format
   save("data.pt1")                     # Save plot
   save("data.emf","emf1d")             # Save plot as picture
   n = size(ampAxis)
   m = matrix(2,n)
   m[0,~] = (t1Axis/1000)'
   m[1,~] = real(ampAxis)'

   export2dpar("ab","ascii","xyrc","real","delimiter","tab")
   export2d(m,"data.dat")  # Save data for origin


# Restore cwd
   cd(bak)

endproc("saveData")
#--------------------------------------------------------
procedure(graphBuildUp,t,data,prn,m,nrScans,guipar)
 assignlist(guipar)

      if(accumulate == "yes")
         sf = 1/nrScans
      else
         sf = 1
      endif
   
   # Select units
      if(wvUnits == "uV")
         ampUnits = "\G(m)V"
      elseif(wvUnits == "uV")
         ampUnits = "mV"
         sf = sf *0.001
      else
         ampUnits = "raw"
      endif


  
    prn->draw("false") 

    prn->plot(t,data*sf,
              "tracetype", "lines",
          "tracecolor",wvDataSymbolColor,
          "symbolshape","opensquare",
          "symbolcolor",wvDataSymbolColor)
     prn->xlabel("Recovering time (ms)") 
     prn->ylabel("Signal amplitude($ampUnits$)")
     prn->axes("fontsize",11)
     prn->title("Mz Build Up $nrPntsT1-m$/$nrPntsT1$")     
     prn->hold("off")
     prn->draw("true")
   endproc("graphBuildUp")

#--------------------------------------------------------
procedure(T1SatFitOffset,t,data,prn,nrScans,guipar)
 assignlist(guipar)

      if(accumulate == "yes")
         sf = 1/nrScans
      else
         sf = 1
      endif
   
   # Select units
      if(wvUnits == "uV")
         sf = sf 
         ampUnits = "\G(m)V"
      elseif(wvUnits == "uV")
         ampUnits = "mV"
      else
         ampUnits = "raw"
      endif


         np = size(data)
         tZero=matrix(np+1)
         fZero=matrix(np+1)
         tZero = insert(tZero,t,1)
         fZero = insert(fZero,data,1)

         offset0 = -(data[np-1]+data[0])/2
         offsetRange = (data[np-1]-data[0])
         npChi = 32
         chi = matrix(npChi)
         offset = matrix(npChi)
         for(k=0 to npChi-1)
            offset[k] = offset0 + offsetRange/(npChi-1)*(k-npChi/2)
            newdata = data+offset[k]
            try
              (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
               chi[k] = :chiSqr(newdata,fit)
            catch
               chi[k] = 100000
            endtry
         next(k)

         (a,bestk)= min(chi)

         offset0 = offset[bestk]
         offsetRange = (offset[bestk+1]-offset[bestk-1])
         npChi = 32
         chi = matrix(npChi)
         offset = matrix(npChi)
         for(k=0 to npChi-1)
            offset[k] = offset0 + offsetRange/(npChi-1)*(k-npChi/2)
            newdata = data+offset[k]
            try
              (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
               chi[k] = :chiSqr(newdata,fit)
            catch
               chi[k] = 100000
            endtry
         next(k)

         (a,bestk)= min(chi)
         newdata = data+offset[bestk]
  try        
     (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
      fit = fit - offset[bestk]
      result = errorstr(T1,T1err,1)
      pr "\nT1 = $result$\n"  
  catch
     result = ""
  endtry
    
  if(result != "")
    prn->draw("false") 
    prn->plot(t,fit*sf,
              "tracetype", "lines",
              "tracewidth",2,
              "tracecolor",[255,0,0],
              "symbolshape","none")
     prn->xlabel("Recovering time (ms)") 
     prn->ylabel("Signal amplitude($ampUnits$)")
     prn->axes("fontsize",11)
     prn->hold("on")

     prn->plot(tZero,fZero*sf,
              "tracetype", "lines",
              "tracecolor",wvDataSymbolColor,
              "symbolshape","opensquare",
              "symbolcolor",wvDataSymbolColor)
     prn->xlabel("Recovering time (ms)") 
     prn->ylabel("Signal amplitude($ampUnits$)")
     prn->axes("fontsize",11)
     prn->hold("off")
    
    
     prn->title("T_(1) = $result$ ms")
     prn->title("size",14)
    #  title("text","Mz recovering curve","size",14)
   

    prn->hold("off")
    prn->draw("true")
  endif 

endproc(fit,E0,T1,E0err,T1err)
#---------------------------------------------------
procedure(chiSqr,a,b)
 
    np = size(a)
    if(np!=size(b)); pr("\nvectors have different sizes\n"); return(-1); endif
    chi = sum((a[~]-b[~])^2)

endproc(chi)

#-------------------------------------------------------------------------------
procedure(checkDelay,dx,limit)
 
   if (dx<= limit)
      message("error","Pulse sequence timing error","error")
      return (0)
   endif 
endproc(1)

