##############################################################
# This procedure protects the procedures after
# interfaceDescrition from being overwritten when compiling
##############################################################

procedure(status)

endproc("readonly")


##############################################################
# This procedure describes the experiment parameter
# user interface. This is autogenerated from the pulse program
# interface list. Do not modify manually
##############################################################

procedure(interfaceDescription)

   interface = [
      "b1Freq","Output Frequency (MHz)","tb","double","[1,400]",
      "delFreq","Frequency +/- kHz","tb","float","",
      "freqPlus","+","bt","string","updateFreq(1)",
      "freqMinus","-","bt","string","updateFreq(-1)",
      "amplitude","Signal amplitude (dB)","tb","float","[-85,0]",
      "delAmp","Amp +/- dB","tb","float","",
      "ampPlus","+","bt","string","updateAmp(1)",
      "ampMinus","-","bt","string","updateAmp(-1)",
      "stopGen","Stop output","bt","string","stopGenerator()",
      "acquDiv","Acquisition","dv", "Acquisition", "",
      "rxGain","Receiver gain","tm","integer","$gData->rxGainMenu$",
      "rxPhase","Receiver phase","tb","float","[-360,360]",
      "nrPnts","Number of points","tm","integer","$gData->nrPntsMenu$",
      "dwellTime","Dwell time (us)","tm","float","$gData->dwellTimeMenu$",
      "nrScans","Number of scans","tb","float","[1,1e8]",
      "flatFilter","Flat filter","cb","string","no,yes",
      "accumulate","Accumulate data","cb","string","no,yes",
      "usePhaseCycle","Phase cycle","cb","string","no,yes",
      "bandwidth","Bandwidth (kHz)","tb2","float","",
      "acqTime","Acquisition time (ms)","tb","float",""]


endproc(interface)

procedure(plot_run_layout)

   layout = ["pt1"]

endproc(layout)

procedure(plot_load_layout)

   layout = ["pt1"]

endproc(layout)

