########################################################
#
# CPMGpm pulse sequence with dummy pulses
# (following a dummy 180-pulse data is not collected)
#
# 90 - delay - {180 - delay - acq - {180 - delay}}
#
########################################################

procedure(pulse_program,dir,mode,pars)

# Expose parameters for FX3 implementation
   if(nrArgs == 3)
      assignlist(pars)
   endif

# Interface description (name, label, ctrlType, varType)
   interface = ["b1FreqCh1",       "B1 Frequency (MHz)",    "tb",  "freq";
                "90AmplitudeCh1",  "90 amplitude (dB)",     "tb",  "float,[-85,-6]";
                "180AmplitudeCh1", "180 amplitude (dB)",    "tb",  "pulseamp";
                "pulseLengthCh1",  "Pulse length (us)",     "tb",  "float,[1,500]";
                "echoTime",        "Echotime (us)",         "tb",  "sdelay";
                "nrEchoes",        "Number of echoes",      "tb",  "integer,[1,8192]";
                "echoShift",       "Echo shift (us)",       "tb",  "float,[-20,20]";
                "dummyEchoes",     "Dummy echoes",          "tb",  "integer,[0,100]";
                "dummies",         "Dummy scans",           "tb",  "integer,[0,20]";
                "repTime",         "Repetition time (ms)",  "tb",  "float,[20,1e8]"]

   groups = ["Pulse_sequence","Acquisition","Laplace_CPMG","File_Settings"]

# Relationships between pulse-sequence and GUI parameters
   relationships = ["nxShim = 0", #xcal*xshim/1000", # x shim value
                    "nyShim = 0", #ycal*yshim/1000", # y shim value
                    "nzShim = 0", #zcal*zshim/1000", # z shim value
                    "noShim = 0", #ocal*oshim/1000", # o shim value
                    "a90            = 90AmplitudeCh1",
                    "a180           = 180AmplitudeCh1",
                    "dRF            = pulseLengthCh1",
                    "d90_180        = echoTime/2-dRF-pgo-2",
                    "d180_acq       = echoTime/2-acqTime*500-dRF/2+rxLat-2+echoShift",
                    "dAcq           = echoTime-dRF-pgo-d180_acq-2",
                    "dAcq2          = dAcq+1",
                    "dDummy         = echoTime-dRF-pgo-2",
                    "nEchoes        = nrEchoes",
                    "nPnts          = nrPnts",
                    "nZeroDummy     = (dummyEchoes==0)",
                    "nOneDummy      = (dummyEchoes==1)",
                    "nManyDummies   = (dummyEchoes>1)",
                    "nDummies       = dummyEchoes-1",
                    "totPnts        = nrPnts*nrEchoes",
                    "totTime        = nrEchoes*echoTime*(dummyEchoes+1)"]

# These parameters will be changed between experiments
   variables = [""]

# Pulse sequence
   initpp(dir) # Reset internal parameter list

#  gradon("x",nxShim)                    # Set x shim
#  gradon("y",nyShim)                    # Set y shim
#  gradon("z",nzShim)                    # Set z shim 
#  gradon("o",noShim)                    # Set o shim 
   cleardata(nPnts,nEchoes)            # Intialise data for sum/stack mode

# Three options are required to get the timing exact in all cases
# because the loop and skip statments all require 1 us.
  iftrue("s1",nZeroDummy)             # No dummy loop if dummyEchoes == 0
      pulse(mode,a90,p1,dRF)               # 90 RF pulse
      delay(d90_180)                       # 90 - 180 delay
      loop("l1",nEchoes)                   # CPMGpm echo loop
         pulse(mode,a180,p2,dRF)              # 180 RF pulse
         delay(d180_acq)                      # 180 - acq delay
         acquire("append",nPnts,dAcq)         # Acquire echo and wait
      endloop("l1")                        # End CPMGpm loop
   endiftrue("s1")

  iftrue("s2",nOneDummy)              # Add dummy loop if dummyEchoes == 1
      pulse(mode,a90,p1,dRF)               # 90 RF pulse
      delay(d90_180)                       # 90 - 180 delay
      loop("l2",nEchoes)                   # CPMGpm echo loop
         pulse(mode,a180,p2,dRF)               # 180 RF pulse
         delay(d180_acq)                       # 180 - acq delay
         acquire("append",nPnts,dAcq2)         # Acquire echo and wait
         pulse(mode,a180,p2,dRF)               # 180 internal pulse
         delay(dDummy)                         # Dummy echo time delay
      endloop("l2")                        # End CPMGpm loop
   endiftrue("s2")

  iftrue("s3",nManyDummies)            # Add dummy loop if dummyEchoes > 1
      pulse(mode,a90,p1,dRF)                  # 90 RF pulse
      delay(d90_180)                       # 90 - 180 delay
      loop("l3",nEchoes)                   # CPMGpm echo loop
         pulse(mode,a180,p2,dRF)              # 180 RF pulse
         delay(d180_acq)                      # 180 - acq delay
         acquire("append",nPnts,dAcq)         # Acquire echo and wait
         loop("l4",nDummies)                  # Dummy echo loop
            pulse(mode,a180,p2,dRF)               # 180 internal pulse
            delay(dDummy)                         # Dummy echo time delay
         endloop("l4")                        # End dummy loop
         pulse(mode,a180,p2,dRF)              # 180 internal pulse
         delay(dDummy)                        # Dummy echo time delay
      endloop("l3")                        # End CPMGpm loop
   endiftrue("s3")

#  gradoff("x")                    # Set x shim
#  gradoff("y")                    # Set y shim
#  gradoff("z")                    # Set z shim 
#  gradoff("o")                    # Set o shim 

   lst = endpp(0) # Return parameter list

# Phase cycle

  phaseList = [0,2,0,2; # x,-x,x,-x : 90 phase
               1,1,3,3; # y,y,-y,-y : 180 phase
               0,2,0,2] # x,-x,x,-x  : Acquire phase

endproc(lst,groups,interface,relationships,variables,0,phaseList)


#####################################################
# Assign those parameters which should take their 
# values from the factory defaults when making a 
# new experiment
#####################################################

procedure(getFactoryBasedParameters, par)

   probeHeadPars = CPMGFastPM:loadProbeHeadPars()
#   pr probeHeadPars
   assignlist(probeHeadPars)

   specPar = gData->specParameters
   if(specPar == null)
      return(null)
   endif

 #  curParameters = gParam->listCurrentParameters()
 #  pr curParameters

 #  assignlist(specPar)

   par = ["rxGain          = 31",
          "pulseLengthCh1  = $pulseLength$",
          "90AmplitudeCh1  = $90Amplitude$",
          "180AmplitudeCh1 = $180Amplitude$",
          "echoShift       = $echoShift$",
          "rxPhase         = $rxPhase$",
          "b1FreqCh1       = $b1Freq$"]

endproc(par)

#####################################################
# Generate some simulated CPMGpm data based on the
# values stored in SimulationInfo and the UI
# Note the echo shape is a gaussian - this is just
# convenient computationally.
#####################################################

procedure(simulateNMR, dataSize)

  # Get simulated parameters
   assignstruct(SimulationInfo) 

   nrPnts    = exptPar->nrPnts
   nrEchoes  = exptPar->nrEchoes
   echoTime  = exptPar->echoTime
   dwellTime = exptPar->dwellTime

   # Non-experiment specific parameters
   DW = dwellTime*1e-6 #  This is the dwell time
   sigAmp = signalAmplitude*receiverGain  #  the signal amplitude
   ph = receiverPhase #  the receiver phase
   offFreq = 1e6*(single(b1Freq)-b0Freq)  # The offset frequency

   # Work out phase cycling
   p90 = round(ppValues->p1/(2*pi)*4)
   p180 = round(ppValues->p2/(2*pi)*4)
   if(p90 == 2 & (p180 == 3 | p180 == 1)) 
      ph = ph - 180
   endif

   # Generate some noise
   nl = noiseAmplitude*receiverGain*sqrt(1.0/dwellTime) 

   # Get sample information
   cd(getmacropath())
   cd("$appdir$\\Macros\\KeaExpert\\SimulatorMacros\\Simulated Samples")
   result = sample() 
   T2 = result->T2

   # Time axis for phase offset
   t1 = ([0:1:nrPnts-1])*dwellTime*1e-6

   # Time axis for calculating echo shape
   t2 = ([0:1:nrPnts-1]-nrPnts/2)*dwellTime*1e-6

   # Echoes storage
   cmat = cmatrix(nrPnts*nrEchoes)

   # Single echo storage
   cmat1Echo = cmatrix(nrPnts)

   # Loop over echo number, calculating each echo shape, adding to final waveform
   for(k = 0 to nrEchoes-1)
      echoSignal = exp(-((t2+echoTime*k*1e-6)/T2+(t2/T2Star)^2))
      cmat1Echo = sigAmp*echoSignal.*exp(i*(2*pi*offFreq*t1 + ph/180*pi))
      cmat[k*nrPnts:(k+1)*nrPnts-1] = cmat1Echo
   next(k)

   # Convert to real
   mat = ctor(cmat)

   # Add in some noise
   mat = mat + nl*noise(nrEchoes*nrPnts*2)

endproc(mat)

