#####################################################################
# This example script sets pin 3 (AD1) on the TTL trigger box
# to high and then returns. 
# It could be used to trigger a batch process.
#####################################################################

procedure(ServicePM, parameters=null) 
 
   if(EditIfShiftPressed(getmacropath(),getmacroname()))
      return
   else # Add the experiment with interface

      if(parameters == null)
         if isvar("gData->currentLiftPosition")
            curPos =    gData->currentLiftPosition
         else
            curPos  = 0
         endif

         parameters = [ "distance = 0",
                        "position = $curPos$",
                        "setDepth = 0",
                        "moveMode = \"distance\""
                        ] 
      endif
      gExpt->addExperiment(getmacropath(),rmext(getmacroname()),parameters)
   endif

endproc()

procedure(backdoor, parameters)

   assignstruct(parameters)

   if(moveMode == "service")
      :serviceBD()
   elseif(moveMode == "home")
      :homeBD()
   elseif(moveMode == "depth")
      :moveToDepth(setDepth)
   else
      :moveBD(position)
   endif

endproc()


###########################################################
# The interface control(s) required by Expert when loading
# data from a experimental result
###########################################################

procedure(interface)

   ctrlLayout = ["exptDiv",      "Move mode",                 "dv",  "",                 "",
                 "moveMode",     "Move to",                   "rb",  "string", "18,home,service,depth,distance,home,service,depth,distance",
                 "exptDiv",      "Distance control/feedback", "dv",  "",                 "",
                 "distance",     "Distance to move",          "tb",  "float",            "",
                 "position",     "Current position (um)",     "tb",  "readonly_string",  "",
                 "setDepth",     "Depth to move (um)",     "tb",     "float",  ""]

   plotLayout = listto2d(["pt1"])

endproc(ctrlLayout, plotLayout)

###########################################################
# Move the lift to the service position
###########################################################

procedure(serviceBD)

   dir = getmacropath()

   guipar = ["b1Freq1H = 1",
             "bandwidthFile = 1.0",
             "flatFilter = \"yes\"",
             "rxPhase = 0",
             "rxGain = 40",
             "nrScans =1",
             "repTime = 10",
             "noHPA = \"true\"",
             "usePhaseCycle = \"no\"",
             "TTL1 = ttltranslate(2)",
             "TTL2 = ttltranslate(2)",
             "d1 = 20000",
             "d2 =  1000"]

   guipar=setlistvalue(guipar,"steps","1")
   guipar=setlistvalue(guipar,"n","-1")
   guipar=setlistvalue(guipar,"p","0")
   guipar=setlistvalue(guipar,"modir","100")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

   pause(5) # too long, need to be recalculated

   n = findobj(0,"name","position")
   if(n > 0)
      setpar(0,n,"text","null")
      gData->currentLiftPosition = null
   endif


endproc()


###########################################################
# Move the lift to the home position
###########################################################

procedure(homeBD)

   dir = getmacropath()
   
   guipar = ["b1Freq1H = 1",
          "bandwidthFile = 1.0",
          "flatFilter = \"yes\"",
          "rxPhase = 0",
          "rxGain = 40",
          "nrScans =1",
          "repTime = 10",
          "noHPA = \"true\"",
          "usePhaseCycle = \"no\"",
          "TTL1 = ttltranslate(3)",
          "TTL2 = ttltranslate(3)",
          "d1 = 20000",
          "d2 =  1000"] 

   guipar=setlistvalue(guipar,"steps","1")
   guipar=setlistvalue(guipar,"n","-1")
   guipar=setlistvalue(guipar,"p","0")
   guipar=setlistvalue(guipar,"modir","100")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

   n = findobj(0,"name","position")
   if(n > 0)
      setpar(0,n,"text","0")
      gData->currentLiftPosition = 0
   endif

   pr "\n   Moving home\n"

#   pause(50)

   pr "\n   Reached home\n"


endproc()

###########################################################
# Move the lift a certain distance up or down relative to 
# the current position
###########################################################

procedure(moveBD, distance=null, position=null)

   if(position == null)
      assignlist(getctrlvalues(0))
   endif

   n = findobj(0,"name","position")
   if(n > 0)
      position = getpar(0,n,"value")
   endif

   y = distance
   if(y == 0)
      return
   endif
   y = abs(y)

   if(sign(distance) > 0) # Move up
      slowSteps = trunc((y-50*trunc(y/50))/10)
      :moveUpFast(trunc(y/50),n,position)
      position = position + 50*trunc(y/50)
      :moveUp(slowSteps,n,position)
      position = position + 10*slowSteps

      gData->currentLiftPosition = position

   else # Move down

      slowSteps = trunc((y-50*trunc(y/50))/10)
      :moveDownFast(trunc(y/50),n,position)
      position = position - 50*trunc(y/50)
      :moveDown(slowSteps,n,position)
      position = position - 10*slowSteps

      gData->currentLiftPosition = position

  endif

   pause(2)

endproc()


###########################################################
#  Move the lift up in small steps
###########################################################

procedure(moveUp, steps, n, p )

   dir = getmacropath()

   guipar = ["b1Freq1H = 1",
             "bandwidthFile = 1.0",
             "flatFilter = \"yes\"",
             "rxPhase = 0",
             "rxGain = 40",
             "nrScans =1",
             "repTime = 10",
             "noHPA = \"true\"",
             "usePhaseCycle = \"no\"",
             "TTL1 = ttltranslate(5)",
             "TTL2 = ttltranslate(5)",
             "d1 = 1000",
             "d2 = 1000"]

   guipar=setlistvalue(guipar,"steps","$steps$")
   guipar=setlistvalue(guipar,"n","$n$")
   guipar=setlistvalue(guipar,"p","$p$")
   guipar=setlistvalue(guipar,"modir","2")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

endproc()

###########################################################
#  Move the lift up in large steps
###########################################################

procedure(moveUpFast, steps, n, p)

   dir = getmacropath()

   guipar = ["b1Freq1H = 1",
             "bandwidthFile = 1.0",
             "flatFilter = \"yes\"",
             "rxPhase = 0",
             "rxGain = 40",
             "nrScans =1",
             "repTime = 10",
             "noHPA = \"true\"",
             "usePhaseCycle = \"no\"",
             "TTL1 = ttltranslate(6)", 
             "TTL2 = ttltranslate(5)", 
             "d1 = 1000",
             "d2 = 1000"]

   guipar=setlistvalue(guipar,"steps","$steps$")
   guipar=setlistvalue(guipar,"n","$n$")
   guipar=setlistvalue(guipar,"p","$p$")
   guipar=setlistvalue(guipar,"modir","1")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

endproc()

###########################################################
#  Move the lift down in small steps
###########################################################

procedure(moveDown, steps, n, p)

   dir = getmacropath()

   guipar = ["b1Freq1H = 1",
             "bandwidthFile = 1.0",
             "flatFilter = \"yes\"",
             "rxPhase = 0",
             "rxGain = 40",
             "nrScans =1",
             "repTime = 10",
             "noHPA = \"true\"",
             "usePhaseCycle = \"no\"",
             "TTL1 = ttltranslate(4)",
             "TTL2 = ttltranslate(4)",
             "d1 = 1000",
             "d2 = 1000"]

   guipar=setlistvalue(guipar,"steps","$steps$")
   guipar=setlistvalue(guipar,"n","$n$")
   guipar=setlistvalue(guipar,"p","$p$")
   guipar=setlistvalue(guipar,"modir","4")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

endproc()

###########################################################
#  Move the lift down in large steps
###########################################################

procedure(moveDownFast, steps, n, p)

   dir = getmacropath()


   guipar = ["b1Freq1H = 1",
             "bandwidthFile = 1.0",
             "flatFilter = \"yes\"",
             "rxPhase = 0",
             "rxGain = 40",
             "nrScans =1",
             "repTime = 10",
             "noHPA = \"true\"",
             "usePhaseCycle = \"no\"",
             "TTL1 = ttltranslate(6)",
             "TTL2 = ttltranslate(4)",
             "d1 = 1000",
             "d2 = 1000"]

   guipar=setlistvalue(guipar,"steps","$steps$")
   guipar=setlistvalue(guipar,"n","$n$")
   guipar=setlistvalue(guipar,"p","$p$")
   guipar=setlistvalue(guipar,"modir","3")
   guipar=setlistvalue(guipar,"dataDirectory","\"move\"")
   guipar=setlistvalue(guipar,"expName","\"move\"")
   guipar=setlistvalue(guipar,"dwellTime","0.5")

   twoTTLpulses:backdoor(guipar)

endproc()


########################################################
# Just cycle the progress bar once each 5 seconds
# since we don't know when the trigger will come
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)
   d = 0.1

endproc(d)


####################################################
# Move the lift to the defined position
###################################################


procedure(moveToDepth, setDepth)

   cd(getmacropath())
   cd(".ProbeHeads")
   if(isfile("selectedProbeHead.par"))   
      selectedProbeHead = load("selectedProbeHead.par")
   else
      message("Error!","File with selected probe head parameters is not found!\rPlease run SelectProbeHead first!","info")
      return(1)
   endif

   maxDepth = eval(getlistvalue(selectedProbeHead,"maxDepth"))

    if((setDepth < -1000)|(setDepth>maxDepth))
      message("Warning !!!","Set depth out of range: -1000 to $maxDepth$","info")
      return(0)
    endif

   ServicePM:MoveBD(-100,0)  # Move down 100 us to unblock the sensor
   pr "moved -100\n"
   ServicePM:homeBD()   # Go home
   pr "moved to home\n"

   pause(0.0035*(maxDepth)+ 15)  # Wait for home completion 

   depth = maxDepth

   ServicePM:MoveBD(-70,0) # moves down 70 um to avoid mechanical hyteresis

   ServicePM:MoveBD(-maxDepth+setDepth, depth)  # Move to initial measurement position

endproc()