#########################################################
# 
# T1SatPM
#
# Saturation recovering sequence with CPMG detection
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(T1SatPM, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"T1SatPM")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("T1SatPM")
   else
      gExpt->addExperiment(parentPath,"T1SatPM",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds ["w1"] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["a1  = 90AmplitudeCh1",
          "a2  = 180AmplitudeCh1",
          "d1  = pulseLengthCh1",
          "d2  = echoTime/2-d1-pgo-2",
          "d3  = echoTime/2-acqTime*500-d1/2+rxLat+echoShift-2",
          "d4  = echoTime-d1-pgo-d3-2",
          "d10 = 750-pgo",
          "d9  = 500-pgo",
          "d8  = 350-pgo",
          "d7  = 200-pgo",
          "d6  = 150-pgo",
          "d5  = 100-pgo",
          "w1  = tMax",
          "n1  = nrEchoes",
          "n2  = nrPnts",
          "totPnts = nrPnts",
          "totTime = acqTime"]
   var = ["w1"]
   pp_list = ["n2","a1","p1","d1","d5","d6","d7","d8","d9","d10","w1","p2","d2","n1","l1","a2","p3","d3","d4"]
   pp_name = "T1SatPM.p"
   phase_list = [0,2,0,2;0,0,2,2;1,1,1,1;0,0,2,2]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)


# Make all gui parameters available
   assignlist(guipar)

   probeHeadPars = CPMGFastPM:loadProbeHeadPars()

   Sensor = getlistvalue(probeHeadPars,"Sensor")

# Save parameters if run from the interface 

   if isvar("gData->curExpt->subProtocol")
   else
      gParam->saveToDefaults(queries = "no")
   endif

############ Check for total RF duty cycle################################################################################################
   TDC=pulseLengthCh1*nrEchoes/(ieTime+tMax/3)
#pr Sensor
# for PM25----------------------------------------------
    if ((TDC>1.6)&(Sensor == "PM25")) 
       message("Error","RF duty cycle is too high, reduce nrEchoes or increase repTime. Total duty cycle is currently $TDC$. Maximum allowed is 1.6","error") 
       return(0)
# for PM5----------------------------------------------
    elseif ((TDC>3) & ((Sensor == "PM5")|(Sensor == "PM10")|(Sensor == "PM2"))) 
       message("Error","RF duty cycle is too high, reduce nrEchoes or increase repTime. Total duty cycle is currently $TDC$. Maximum allowed is 3","error") 
       return(0)
    endif

###############################################################################################################################################


# Check that p.s. duty cycle <= 25%
   if(d1/echoTime > 0.25)
      message("Error","Duty cycle is too high in pulse sequence!\rshould be < 25%\rIncrease echo time\ror reduce pulse length.","error")
       return(0)
   endif

# See if any delays are too short
   if(:checkDelays(["d1","d2","d3","d5","d6","d7","d8","d9","d10"],
                   [d1,d2,d3,d5,d6,d7,d8,d9,d10],
                   [2,2,2,2,2,2,2,2,2]))
      return(0)
   endif

# Check we have left enough time to collect the data
   if(d4-ucsRun:getAcqTime(guipar) < 1)
      message("Error","Pulse sequence timing error!\rReduce acquisition time or increase echotime.","error")
       return(0)
   endif

# Calculate suitable time and frequency axes
   tAxis = ([0:1:totPnts-1]/totPnts)*totTime*1000   # (us)
   fAxis = ([0:1:totPnts-1]-totPnts/2)/totTime

# Make subplots. wvPP is the current-plot's parent
   try
      if(executedBackdoor == "yes")
         ppBack = curplot("1d")->parent()
         prt  = ppBack->subplot(1,1)
         prf  = none
         prn  = ppBack->subplot(2,1)
      endif
   catch
     executedBackdoor="no"   
     refSignal = 1
     (prt,prn) = ucsPlot:getPlotReferences()
   endtry

# Generate the t1 axis
   amax   = 0.95
   amin   = exp(-tMax/t1Est)
   astep  = (amax-amin)/(nrPntsT1-1)
   t1Axis = matrix(nrPntsT1)

   for(m = 0 to nrPntsT1-1)
    # Linear time increment
      if(index == "lin")
        t1Axis[m] = (m+1)*tMax/(nrPntsT1) 
      endif 
    # Logarithmic time increment
      if(index == "exp")
      t1Axis[m] = t1Est*(-loge(amax-astep*(m)))^(1/1)
      endif
   next(m)

   try
      if(executedBackdoor == "yes")
      endif 
   catch
      executedBackdoor = "no"
      refSignal = 1
   endtry

# Allocate memory for outputs
   ampAxis  = matrix(nrPntsT1)

# Load the apodization filter ilter
   if(filter == "yes")
      flt = filters:get_filter(filterType,"FTFid",totPnts)
   else
      flt = matrix(totPnts)+1
   endif

# First time we put the ieTime at the start
   tEndPS = time()

  # Loop over the t1-axis values to form a 2D data set
   for(m = nrPntsT1-1 to 0 step -1)
      
      w1 = t1Axis[m]  

      ppList = ucsRun:setPPLongDelay(ppList,varIndex[0],1000*w1)
   
  # reset sumData
      sumData = cmatrix(totPnts)
   
   # Accumulate scan
      for(scan = 0 to nrScans-1)
     
       # Set phases for this scan
         (ppList,pAcq) = ucsRun:setPPPhase(ppList,scan,pcList,pcIndex)
   
       # Send all parameter values to spectrometer (DSP)/generate event table (FX3)
         ucsRun:updatePPParameters(ppList,guipar)

       # Wait for the inter-experiment time to complete
         check = ucsRun:checkTiming(guipar,scan,pcList,tEndPS)
         if(check == "abort")
            return(0)
         endif

       # Run the p.p. and collect the data
         (status,data) = ucsRun:getData(totPnts,guipar)
         data = data/nrEchoes

       # Record when the ps finishes
         tEndPS = time()

       # See if stop button/escape key pressed
         if(status != "ok")
            return(0)
         endif

       # Filter the data
         data = data .* flt

       # Accumlate the data
         sumData = ucsRun:accumulate(accumulate,pAcq,sumData,data)

       # Process the data
        if(showFreqDomain=="yes")
         (sumData,spectrum) = ucsRun:transformData(sumData,fAxis,guipar,"echo")
        endif
        titleTxt = "EchoSum: $scan+1$/$nrScans$"
        ucsPlot:graphTime(prt,tAxis,sumData/refSignal,scan,guipar,titleTxt)
     
       # Check if complete button pressed
         if(check == "finish")
            exitfor()
         endif
       
      next(scan)

      ampAxis[m] = sum(real(sumData))/(nrPnts*refSignal)

      :graphBuildUp(t1Axis,ampAxis,prn,m,nrScans,guipar)      
  
    # Check if complete button pressed
      if(check == "finish")
         exitfor()
      endif

   next(m)
# Fit the data
   try
     (fit,E0,T1,E0err,T1err,stats,results) = :T1SatPMFitOffset(t1Axis,ampAxis,prn,nrScans,guipar)
   catch
      stats = "error, no fit results\n"
      results = "error, no fit results\n"
      E0 = 0
      T1 = 0
   endtry

# Save the data
   ucsFiles:savePlot(prn,:getPlotInfo("pt2"),guipar,"noReport")
# Save the statistics

   if isvar("stats")
      ucsFiles:saveToNotes(stats, guipar)
   endif

# Pack the data into a structure  
   result = struct()
   result->t1Axis = t1Axis
   result->ampAxis = ampAxis/nrScans
   result->E0 = E0
   result->T1 = T1
   result->stats = stats
   result->results = results
   return(result)

endproc("execpp")

########################################################
# Get the name of a plot file given the region name
# or return the whole list
########################################################

procedure(getPlotInfo,plotRegion)

   info = ["pt2","t1AmpData.pt1"]

   if(plotRegion == "all")
      return(info)
   endif

   idx = getlistindex(info,plotRegion)
   if(idx != -1)
      return(info[idx+1])
   endif

endproc(null)


# -----------------------Save the accumulated data -----------------------------
# Either pass the parameters to save or use
# window variables of the same name.

#
#procedure(saveData,guipar,t1Axis,ampAxis)
#
## Make all gui parameters available
#   assignlist(guipar)
#
## Save data and plot in chosen folder
#   bak = getcwd()
#   cd(dataDirectory)
#   mkdir(expName)
#   cd(expName)
#   mkdir("$expNr$")
#   cd("$expNr$")
#
#   save("data.1d",ampAxis)              # Save data in Prospa format
#   save("data.pt1")                     # Save plot
#   save("data.emf","emf1d")             # Save plot as picture
#   n = size(ampAxis)
#   m = matrix(2,n)
#   m[0,~] = (t1Axis/1000)'
#   m[1,~] = real(ampAxis)'
#
#   export2dpar("ab","ascii","xyrc","real","delimiter","tab")
#   export2d(m,"data.dat")  # Save data for origin
#
#
## Restore cwd
#   cd(bak)
#
#endproc("saveData")

##########################################################
# 
##########################################################
procedure(graphBuildUp,t,data,prn,m,nrScans,guipar)

   assignlist(guipar)
   
   if(accumulate == "yes")
      sf = 1/nrScans
   else
      sf = 1
   endif
   
   # Select units
   if(wvUnits == "uV")
      ampUnits = "\G(m)V"
   elseif(wvUnits == "uV")
      ampUnits = "mV"
      sf = sf *0.001
   else
      ampUnits = "raw"
   endif
   
   prn->draw("false") 
   
   prn->plot(t,data*sf,
           "tracetype", "lines",
       "tracecolor",wvDataSymbolColor,
       "symbolshape","opensquare",
       "symbolcolor",wvDataSymbolColor)
   prn->xlabel("Recovering time (ms)") 
   prn->ylabel("Signal amplitude($ampUnits$)")
   prn->axes("fontsize",11)
   prn->title("Mz Build Up $nrPntsT1-m$/$nrPntsT1$")     
   prn->hold("off")
   prn->draw("true")

endproc("graphBuildUp")

##########################################################
# 
##########################################################
procedure(T1SatPMFitOffset,t,data,prn,nrScans,guipar)

   assignlist(guipar)
   
   if(accumulate == "yes")
      sf = 1/nrScans
   else
      sf = 1
   endif

# Select units
   if(wvUnits == "uV")
      sf = sf 
      ampUnits = "\G(m)V"
   elseif(wvUnits == "uV")
      ampUnits = "mV"
   else
      ampUnits = "raw"
   endif

   np = size(data)
   tZero = matrix(np+1)
   fZero = matrix(np+1)
   tZero = insert(tZero,t,1)
   fZero = insert(fZero,data,1)
   
   offset0 = -(data[np-1]+data[0])/2
   offsetRange = (data[np-1]-data[0])
   npChi = 32
   chi = matrix(npChi)
   offset = matrix(npChi)
   for(k = 0 to npChi-1)
      offset[k] = offset0 + offsetRange/(npChi-1)*(k-npChi/2)
      newdata = data+offset[k]
      try
        (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
         chi[k] = :chiSqr(newdata,fit)
      catch
         chi[k] = 100000
      endtry
   next(k)
   
   (a,bestk) = min(chi)
   
   offset0 = offset[bestk]
   offsetRange = (offset[bestk+1]-offset[bestk-1])
   npChi = 32
   chi = matrix(npChi)
   offset = matrix(npChi)
   for(k = 0 to npChi-1)
      offset[k] = offset0 + offsetRange/(npChi-1)*(k-npChi/2)
      newdata = data+offset[k]
      try
        (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
         chi[k] = :chiSqr(newdata,fit)
      catch
         chi[k] = 100000
      endtry
   next(k)
   
   (a,bestk) = min(chi)
   newdata = data+offset[bestk]
   try        
      (fit,E0,T1,E0err,T1err) = t1fit(t,newdata,"ir")
      fit = fit - offset[bestk]
      result = errorstr(T1,T1err,1)
      pr "\n\n   T1 = $result$ ms\n"  
   catch
      fit = null
      E0 = 0
      T1 = 0
      E0err = 0
      T1err = 0
      stats = "error, no fit results\n"
      result = "error, no fit results\n"
   endtry

   if(result != "error, no fit results\n")
      prn->draw("false") 
      prn->plot(t,fit*sf,
              "tracetype", "lines",
              "tracewidth",1,
              "tracecolor",[0,128,0],
              "symbolshape","none")
      prn->xlabel("Recovering time (ms)") 
      prn->ylabel("Signal amplitude($ampUnits$)")
      prn->axes("fontsize",11)

      prn->hold("on")
      
      prn->plot(tZero,fZero*sf,
              "tracetype", "none",
              "tracecolor",[0,128,0],
              "symbolshape","opensquare",
              "symbolcolor",[255,0,0])
      prn->xlabel("Recovering time (ms)") 
      prn->ylabel("Signal amplitude($ampUnits$)")
      prn->axes("fontsize",11)
      prn->hold("off")
      
      
      prn->title("T_(1) = $result$ ms")
      prn->title("size",14)
      #  title("text","Mz recovering curve","size",14)
      
      prn->hold("off")
      prn->draw("true")

   # Save some statistics
      printtostring()
      pr("\n   Scans: $nrScans$\n")
      pr("\n   T1: $T1$\n")
      pr("\n   T1 Error: $T1err$\n")
      pr("\n   E0: $E0$\n")
      pr("\n   E0 Error: $E0err$\n")

   #   pr("      Fit residuals sd = $sd(fZero-fit)$\n")
    #  pr("      Data noise sd = $sd(imag(yRed))$\n")
    #  pr("      Data SNR = $:getSNR(yRed)$\n")
      
      stats = closeprint()
      print("$stats$")
   #   print("$result$\n")


   endif 

endproc(fit,E0,T1,E0err,T1err,stats,result)

##########################################################
# 
##########################################################
procedure(chiSqr,a,b)
 
    np = size(a)
    if(np!=size(b)); pr("\nvectors have different sizes\n"); return(-1); endif
    chi = sum((a[~]-b[~])^2)

endproc(chi)

##########################################################
# Check the dxValues in the dxNames list. Make sure the 
# values are greater than the limits
##########################################################

procedure(checkDelays, dxNames, dxValues, dxLimits)
 
   for(k = 0 to size(dxNames)-1)
      if (dxValues[k] <= dxLimits[k])
         message("Error","Pulse sequence timing error. Delay $dxNames[k]$ is <= $dxLimits[k]$","error")
         return(1)
      endif 
   next(k)

endproc(0)



########################################################
# Load selected Probe Head parameters
########################################################
procedure(loadProbeHeadPars)

   cd(getparentpath(getmacropath()))
   cd(".ProbeHeads")

   if(isfile("selectedProbeHead.par"))   
         probeHeadPars = load("selectedProbeHead.par")
   else
         message("Error","File with selected probe head parameters is not found!\rPlease run SelectProbeHead first!","error")
         return(null)
   endif


endproc(probeHeadPars)



#########################################################
## Return expected experiment duration in seconds
#########################################################
#
#procedure(expectedDuration, guipar)
#
#   assignstruct(guipar)
#   totScans = nrScans*nrPntsT1
#   duration = (totScans*repTime)/1000
#
#endproc(duration)


########################################################
# Return expected experiment duration
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)

# Generate the t1 axis to work out the total delay
   amax   = 0.95
   amin   = exp(-tMax/t1Est)
   astep  = (amax-amin)/(nrPntsT1-1)
   t1Axis = matrix(nrPntsT1)

   for(m = 0 to nrPntsT1-1)
    # Linear time increment
      if(index == "lin")
        t1Axis[m] = (m+1)*tMax/(nrPntsT1) 
      endif 
    # Logarithmic time increment
      if(index == "exp")
         t1Axis[m] = t1Est*(-loge(amax-astep*(m)))^(1/1)
      endif
   next(m)

   dArray = t1Axis*1000
   totDelayTime = sum(dArray) 
   psTime = GetPulseProgramDuration("T1Sat-ie",1,guipar)*1000
   psTime = psTime - t1Axis[-1]*1000 # Base ps duration
   psTime = psTime + nrPnts*10 # Data collection time estimate
   totScans = nrPntsT1*nrScans
   duration = (totScans*(psTime+ieTime*1000) + nrScans*totDelayTime)/1e6


endproc(duration)