########################################################
#
# Saturation recovering sequence with CPMG detection
#
########################################################

procedure(pulse_program,dir,mode,pars)

# Expose parameters for FX3 implementation
   if(nrArgs == 3)
      assignlist(pars)
   endif

# Interface description (name, label, ctrlType, varType)
   interface = ["b1FreqCh1",      "B1 Frequency (MHz)",      "tb",     "freq";

               "90AmplitudeCh1",  "90 amplitude (dB)",       "tb",     "float,[-85,-6]";
               "180AmplitudeCh1", "180 amplitude (dB)",      "tb",     "pulseamp";
               "pulseLengthCh1",  "Pulse length (us)",       "tb",     "pulselength";

               "echoTime",        "Echotime (us)",           "tb",     "sdelay";
               "nrEchoes",        "Number of echoes",        "tb",     "integer,[1,16000]";
               "echoShift",       "Echo shift (us)",         "tb",     "float,[-20,20]";

               "t1Est",           "T1 estimation (ms)",      "tb",     "float,[1,10000]";
               "tMax",            "Max. recov. time (ms)",   "tb",     "float,[0,60000]";
               "nrPntsT1",        "Number of time increm.",  "tb",     "integer,[1,1000]";
               "index",           "Time increment",          "tm",     "string,[\"lin\",\"exp\"]";
               "ieTime",          "Interexperiment time (ms)",   "tb",     "float,[20,1e8]"]
#               "repTime",         "Repetition time (ms)",    "tb",     "float,[20,1e8]"]


  tabs = ["Pulse_sequence","Acquisition","Processing_Std","Display_PPM_Range","File_Settings"]

# Relationships between pulse-sequence and GUI parameters
   relationships = ["a1  = 90AmplitudeCh1",
                    "a2  = 180AmplitudeCh1",
                    "d1  = pulseLengthCh1",
                    "d2  = echoTime/2-d1-pgo-2", #d90_180
                    "d3  = echoTime/2-acqTime*500-d1/2+rxLat+echoShift-2", #d180_acq
                    "d4  = echoTime-d1-pgo-d3-2", #dAcq
                    "d10 = 750-pgo",
                    "d9  = 500-pgo",
                    "d8  = 350-pgo",
                    "d7  = 200-pgo",
                    "d6  = 150-pgo",
                    "d5  = 100-pgo",
                    "w1  = tMax",
                    "n1  = nrEchoes",
                    "n2  = nrPnts",
                    "totPnts = nrPnts",
                    "totTime = acqTime"]

# These parameters will be changed between experiments
   variables = ["w1"]

# Pulse sequence
   initpp(dir) # Reset internal parameter list

   cleardata(n2,n1)            # Intialise data for sum/stack mode

# Saturation sequence
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d5)               # delay
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d6)               # delay
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d7)               # delay
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d8)               # delay
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d9)               # delay
   pulse(mode,a1,p1,d1)    # 90 pulse
   delay(d10)              # delay
   pulse(mode,a1,p1,d1)    # 90 pulse

# Recovery delay
   wait(w1)                

# Excitation
   pulse(mode,a1,p2,d1)    # 90 pulse

   delay(d2)               # 90 - 180 delay

# CPMG detection
   loop(l1,n1)
      pulse(mode,a2,p3,d1) # 180 internal pulse
      delay(d3)            # 180 - acq delay
      acquire("sum",n2,d4) # Sum echo and wait d4
   endloop(l1)
################################
#   delay(d90_180)
#   loop(l1,nEchoes)
#      pulse(mode,a180,p2,dRF)          # 180 RF pulse
#      delay(d180_acq)                  # 180 - acq delay
#      acquire("sum",nPnts,dAcq)  # Acquire echo and wait
#   endloop(l1)
#################################

   lst = endpp() # Return parameter list

# Phase cycle
    phaseList = [0,2,0,2;
                 0,0,2,2;
                 1,1,1,1;
                 0,0,2,2]

endproc(lst,tabs,interface,relationships,variables,null,phaseList)


#####################################################
# Assign those parameters which should take their 
# values from the factory defaults when making a 
# new experiment
#####################################################

procedure(getFactoryBasedParameters, par)

   probeHeadPars = T1SatPM:loadProbeHeadPars()
   assignlist(probeHeadPars)

   specPar = gData->specParameters
   if(specPar == null)
      return(null)
   endif

   par = ["rxGain          = 31",
          "pulseLengthCh1  = $pulseLength$",
          "90AmplitudeCh1  = $90Amplitude$",
          "180AmplitudeCh1 = $180Amplitude$",
          "echoShift       = $echoShift$",
          "rxPhase         = $rxPhase$",
          "b1FreqCh1       = $b1Freq$"]

endproc(par)
