#########################################################
# 
# WobblePM
#
# Frequency sweep pulse program used for probe tuning
# on the internal duplexer
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(WobblePM, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"WobblePM")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("WobblePM")
   else
      gExpt->addExperiment(parentPath,"WobblePM",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds [""] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["nPnts      = nrPnts",
          "b1FreqCh1  = centFreq-freqWidth/2",
          "fSweep     = linspace(b1FreqCh1,b1FreqCh1+freqWidth,nFreqSteps)",
          "tFreq1     = gFX3->convertFrequency(fSweep)",
          "tFreq2     = gFX3->convertFrequency(fSweep*10)",
          "totPnts    = nFreqSteps",
          "dStab      = 60",
          "dRecover   = 2000",
          "totTime    = acqTime",
          "specialMode = \"wobble\""]
   var = [""]
   pp_list = ["nFreqSteps","tFreq1","tFreq2","l1","aRF","p1","dStab","nPnts","dRecover"]
   pp_name = "WobblePM.p"
   phase_list = [0;0]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)


#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

# Save parameters if run from the interface 

   if isvar("gData->curExpt->subProtocol")
   else
      gParam->saveToDefaults(queries = "no")
   endif

# Calculate suitable frequency axes
   freqAxis = linvec(centFreq-freqWidth/2,centFreq+freqWidth/2,nFreqSteps)

# Storage for accumulated data
   sumData = cmatrix(nFreqSteps)

# Make one subplot
   prf = ucsPlot:getPlotReferences()

# Accumulate scan
   for(scan = 0 to nrScans-1)

    # Set phases for this scan
      (ppList,pAcq) = ucsRun:setPPPhase(ppList,scan,pcList,pcIndex)

    # Send phase parameters to DSP
      ucsRun:updatePPParameters(ppList,guipar)  

    # Wait for the repetition time to complete
      check = ucsRun:checkTiming(guipar,scan,pcList)
      if(check == "abort")
         :resetRelay()
         return(0)
      endif

    # Run the pulse program
      status = ucsRun:runExperiment(guipar)

    # See if stop button/escape key pressed
      if(status != "ok")
         :resetRelay()
         return(0)
      endif

    # Read the data from the spectrometer
      data = ucsRun:readData(totPnts, guipar)

      if(scan >= 0) # The first scan won't be displayed as this sets the relay

       # Accumlate the data
         sumData = ucsRun:accumulate(accumulate,0,sumData,data)

       # Graph the data
         :graphData(prf, mag(sumData/nrPnts),single(freqAxis),scan,guipar)

       # Check if complete button pressed
         if(check == "finish")
            scan = scan+1
            exitfor()
         endif

      endif

   next(scan)

# Reset the wobble relay
   :resetRelay()

# Save data
   ucsFiles:savePlot(prf,:getPlotInfo("pt1"),guipar,"simpleReport")

# Return data
   result = struct()
   result->fx = freqAxis
   result->fy = sumData/scan

   return(result)

endproc("execpp")

########################################################
#  Reset the duplexer relay
########################################################

procedure(resetRelay)

   if(gData->procType == "FX3")
       fx3write("E", 0x00, [0])
   else
      dir = getcwd()
      cd("$appdir$\\Macros\\UCS-Core\\resetDSP")
      pp = dspreadpp("reset.p")
      dspwrite("p",0x2000,pp,wvPort)
      dsprunpp(0x2000,wvPort)
      cd(dir)
   endif

endproc()


########################################################
# Get the name of a plot file given the region name
# or return the whole list
########################################################

procedure(getPlotInfo,plotRegion)

   info = ["pt1","wobbleResponse.pt1"]

   if(plotRegion == "all")
      return(info)
   endif

   idx = getlistindex(info,plotRegion)
   if(idx != -1)
      return(info[idx+1])
   endif

endproc(null)


###################################################################
#
# Graph the signal in the time domain
#
# Input: fidData ........ signal
#        t .............. time domain vector
#        n .............. number of scans accumulated
#        guipar ......... parameters extracts from dialog 
#
###################################################################

procedure(graphData, pd, fidData,f,n,guipar)

   assignlist(guipar)

# Allow for accumulations
   if(accumulate == "yes")
      sf = 1/(n+1)
   else
      sf = 1
   endif

# Select units
   if(wvUnits == "uV")
      timeUnits = "\G(m)V"
      freqUnits = "\G(m)V/kHz"
      ampMin = wvTimeMin
      ampMax = wvTimeMax
   else
      timeUnits = "mV"
      freqUnits = "mV/kHz"
      ampMin = wvTimeMin
      ampMax = wvTimeMax
   endif

# Select y label
   if(wvApplyPreampFactor == "yes")
      yTxt = "Probe reflected amplitude"
   elseif(wvApplyRxampFactor == "yes")
      yTxt = "Rx Amp input amplitude"
   else
      yTxt = "Transceiver input amplitude"
   endif

 # Display frequency domain data
   pd->draw("false")

    # Find minimum and maximum
      dat = mag(fidData*sf)
      (valMin,xMin) = min(dat)
      (valMax,xMax) = max(dat)

      pd->plot(f,mag(fidData*sf))
      pd->title("Probe amplitude reflection vs. frequency (minimum at $f[xMin],2.4f$ MHz) Scan: $n+1$")
      pd->xlabel("Frequency (MHz)")
      pd->ylabel("$yTxt$ ($timeUnits$)")

      if(fixedAmp == "yes")
         if(logScale == "no")
            pd->axes("ymapping","lin")
            pd->zoom(min(f),max(f),0,valMax*1.2)
         else
            pd->axes("ymapping","log")
            pd->zoom(min(f),max(f),maxAmp/(10^nrDecades),maxAmp)
         endif
      endif

      pd->hold("on")

      (minx,maxx,miny,maxy) = pd->zoom()

    # Draw vertical line
      lineX = [centFreq, centFreq]
      lineY = [miny,maxy]

      pd->plot(lineX,lineY,"tracecolor",[200,200,200])

      pd->zoom(minx,maxx,miny,maxy)

      pd->hold("off")

   pd->draw("true")

endproc()

# A call to this needs to be added to the first procedure in this file
# For the simulator to be displayed
procedure(addSimulator)

   if(gData->procType == "Simulator")
      n = guiwinnr()
      :modifyTuningCaps()
      guiwinnr(n)
   else
      message("Error","Not in simulator mode","error")
   endif

endproc()

procedure(modifyTuningCaps)

   if(findwin("title","Tune and Match Simulation") > 0)
      return
   endif

   n = window("Tune and Match Simulation", -1, -1, 220, 117)

      # Define all controls with basic parameters
       updown(1, 67, 18, 26, 20, "horizontal",
              :adjustTune())
       updown(2, 67, 53, 26, 20, "horizontal",
              :adjustMatch())
       statictext(4, 63, 22, "right", "Tune:")
       statictext(5, 63, 57, "right", "Match:")
       statictext(6, 110, 22, "left", "0.0%")
       statictext(7, 110, 57, "left", "0.0%")

     # Set other control parameters
       setpar(n,1,"base", -100,
                  "value", 0,
                  "stepsize", 1,
                  "nrsteps", 201)
       setpar(n,2,"base", -100,
                  "value", 0,
                  "stepsize", 1,
                  "nrsteps", 201)

       setpar(n,6,"objID","tuneValueCtrl",
                  "valueID","tuneValue")
       setpar(n,7,"objID","matchValueCtrl",
                  "valueID","matchValue")

   showwindow(n)

   windowvar("winNR")
   winNr = n

   setpar(n,1,"enable","true")
   setpar(n,1,"active","true")
   setpar(n,2,"enable","true")
   setpar(n,2,"active","true")

endproc(n)

procedure(adjustTune, dir)

   tune = getpar(0,1,"value")
   match = getpar(0,2,"value")
   setpar(0,6,"text","$tune/10,+2.1f$%")
   guiwinnr(gView->wn)
   SimulationInfo->exptPar->offC1 = -tune
   SimulationInfo->exptPar->offC2 = -match

endproc()

procedure(adjustMatch)

   tune = getpar(0,1,"value")
   match = getpar(0,2,"value")
   setpar(0,7,"text","$match/10,+2.1f$%")
   guiwinnr(gView->wn)
   SimulationInfo->exptPar->offC1 = -tune
   SimulationInfo->exptPar->offC2 = -match

endproc()

########################################################
# Load selected Probe Head parameters
########################################################
# parameters
########################################
procedure(loadProbeHeadPars)

   cd(getparentpath(getmacropath()))
   cd(".ProbeHeads")

   if(isfile("selectedProbeHead.par"))   
         probeHeadPars = load("selectedProbeHead.par")
   else
         message("Error","File with selected probe head parameters is not found!\rPlease run SelectProbeHead first!","error")
         return(null)
   endif


endproc(probeHeadPars)