#########################################################
# 
# twoTTLPulses
#
# Pulse program to control NMR MOUSE lift
#
# Copyright (c) Magritek Ltd 2025
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(twoTTLPulses, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"twoTTLPulses")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("twoTTLPulses")
   else
      gExpt->addExperiment(parentPath,"twoTTLPulses",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds [""] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["b1FreqCh1 = b1Freq1H",
          "b1  = TTL1",
          "b2  = TTL1 | TTL2"]
   var = [""]
   pp_list = ["b1","d1","b2","d2"]
   pp_name = "twoTTLPulses.p"
   phase_list = [0]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#######################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
#######################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

   try
      a = steps
   catch
      steps = 1
   endtry
   try
      a = totPnts
   catch
      totPnts = 1
   endtry

   try
      a = n
   catch
      n = -1
   endtry

  (ppList,pAcq) = ucsRun:setPPPhase(ppList,0,pcList,pcIndex)

   ucsRun:updatePPParameters(ppList,guipar)

   for(s = 0 to steps-1)

      status = ucsRun:runExperiment(guipar)
      
      modir = getlistvalue(guipar,"modir")
      d50 = 0.35   #old 0.85
      d10 = 0.25   #old 0.25
      
      if(modir == "1") 
         p = p + 50
         pause(d50)  
      endif
      if(modir == "2")
         p = p + 10 
         pause(d10)
      endif
      if(modir == "3")
         p = p - 50 
         pause(d50)
      endif
      if(modir == "4") 
         p = p - 10 
         pause(d10)
      endif
      
      if(n != -1) 
         setpar(0,n,"text","$p$")
      endif
 
   next(s)

endproc("execpp") # Don't remove argument


########################################################
# Return expected experiment duration in seconds
########################################################

procedure(expectedDuration, guipar)

   assignstruct(guipar)
   totScans = nrScans + useStartDelay
   duration = (totScans*repTime)/1000

endproc(duration)
