##############################################################
# This procedure protects the procedures after
# interfaceDescrition from being overwritten when compiling
##############################################################

procedure(status)

endproc("readonly")


##############################################################
# This procedure describes the experiment parameter
# user interface. This is autogenerated from the pulse program
# interface list. Do not modify manually
##############################################################

procedure(interfaceDescription)

   interface = [
      "b1Freq1H","B1 Frequency (MHz)","tb","float","[0.5,30]",
      "TTL1","TTL1","tb","integer","[ 1,128]",
      "TTL2","TTL2","tb","integer","[ 1,128]",
      "d1","delay 1(us)","tb","float","[2,327670]",
      "d2","delay 2(us)","tb","float","[2,327670]",
      "repTime","Repetition time (ms)","tb","float","[20,1e8]",
      "acquDiv","Acquisition","dv", "Acquisition", "",
      "rxGain","Receiver gain","tm","integer","$gData->rxGainMenu$",
      "rxPhase","Receiver phase","tb","float","[-360,360]",
      "nrPnts","Number of points","tm","integer","$gData->nrPntsMenu$",
      "dwellTime","Dwell time (us)","tm","float","$gData->dwellTimeMenu$",
      "nrScans","Number of scans","tb","float","[1,1e8]",
      "flatFilter","Flat filter","cb","string","no,yes",
      "accumulate","Accumulate data","cb","string","no,yes",
      "usePhaseCycle","Phase cycle","cb","string","no,yes",
      "bandwidth","Bandwidth (kHz)","tb2","float","",
      "acqTime","Acquisition time (ms)","tb","float",""]


endproc(interface)

procedure(plot_run_layout)

   layout = ["pt1";
             "pt2"]

endproc(layout)

procedure(plot_load_layout)

   layout = ["pt1";
             "pt2"]

endproc(layout)

