############################################################
#  
# Checks the functionality of the TTL trigger input
# and the TTL out pulse.
#
# Note: only for Spinsolves with this hardware upgrade.
#
############################################################

procedure(pulse_program,dir,mode,pars)

# Expose parameters for FX3 implementation
   if(nrArgs == 3)
      assignlist(pars)
   endif

# Interface description (name, label, ctrl, vartype)
  interface = ["b1FreqCh1",        "B1 frequency (MHz)",        "tb",  "freq";
               "90AmplitudeCh1",   "Pulse amplitude (dB)",      "tb",  "pulseamp";
               "pulseLengthCh1",   "Pulse length (us)",         "tb",  "pulselength";
               "trigMode",         "Trigger mode",              "tm",  "string,[\"low\",\"high\",\"rising\",\"falling\"]";
            #   "trigMode",         "Trigger mode",              "tb",  "string";
               "ttlLength",       "TTL pulse length (us)",     "tb",  "sdelay";
               "repTime",         "Repetition time (ms)",      "tb",  "reptime"]

# Define the tab groups and their order
   groups = ["Pulse_sequence","Acquisition",
             "Processing_Std","Display_PPM_Range","File_Settings"]

# Relationships to determine remaining variable values
   relationships = ["nDataPnts  = nrPnts",
                    "a90Amp     = 90AmplitudeCh1",
                    "d90Dur     = pulseLengthCh1",
                    "wTTL       = ttlLength",
                    "smode      = trigMode",
                    "dAcqDelay  = 20",
                    "totPnts    = nrPnts",
                    "totTime    = acqTime"]

# These parameters will be changed between experiments
   variables = [""]

# Pulse sequence

   initpp(dir)                      # Define compile directory and clear parameter list

      trigger(smode)                # Wait for rising input pulse
    #  ttlon(0x2)
      wait(wTTL)                       # Generate an output TTL pulse
   #   ttloff(0x2)
      pulse(1,a90Amp,p1,d90Dur)        # RF pulse on channel 1 with phase p1
      delay(dAcqDelay)
      acquire("overwrite",nDataPnts)   # Acquire FID

   parList = endpp()                # Combine commands and return parameter list

# Phase cycle list
   phaseList  = [0,1,2,3;   # p1 : Pulse phase
                 0,1,2,3]   # pA : Acquire phase


endproc(parList,groups,interface,relationships,variables,null,phaseList)


#####################################################
# Assign those parameters which should take their 
# values from the factory defaults when making a 
# new experiment
#####################################################

procedure(getFactoryBasedParameters, par)

   specPar = gData->specParameters
   if(specPar == null)
      return(null)
   endif
   assignlist(specPar)

   par = ["rxGain         = $rxOptGaindB$",
          "pulseLengthCh1 = $pulseLengthCh1$",
          "90AmplitudeCh1 = $pulseAmplitudeCh1$",
          "b1FreqCh1      = $frequencyCh1$"]

endproc(par)

#####################################################
# Generate some simulated 1Pulse data based on the
# values stored in SimulationInfo
#####################################################

procedure(simulateNMR, dataSize)

   assignstruct(SimulationInfo)

   pulseAmp         = ppValues->a90Amp
   pulseLength      = ppValues->d90Dur
   pulseIntegral    = pulseAmp*pulseLength
   pulsePhase       = ppValues->p1
   acquisitionDelay = ppValues->dAcqDelay

# Non-experiment specific parameters
   DW = dwellTime*1e-6 # <= This is the dwell time
   off = single(1e6*(b1Freq-b0Freq)) # <= This is the offset (b1Freq - f0)
   sigAmp = signalAmplitude*receiverGain
   
   ph = receiverPhase - pulsePhase 
   pulseInt = pulseIntegral
   pulse90Int = pulse90Integral
   sigAmp = sigAmp *sin(pulseInt*pi/(2*pulse90Int))
   nl = noiseAmplitude*receiverGain*sqrt(1.0/dwellTime)
   acqDelay = acquisitionDelay*1e-6
   startDelay = acqDelay + DW # Simulate the delay on Proton channel
   
   cd(getmacropath())
   cd("$appdir$\\Macros\\KeaExpert\\SimulatorMacros\\Simulated Samples")

   result = sample()
   assignstruct(result)

   nrPeaks = size(peakList)
   nrSplits = size(splittingAmpList)
   
   t = linspace(startDelay,(dataSize/2-1)*DW+startDelay, dataSize/2)
   cmat = cmatrix(dataSize/2)

   for(p = 0 to nrPeaks-1) # Loop over main peaks
      freq0 = peakList[p]*b0Freq
      for(s = 0 to nrSplits-1) # Loop over multiplets
         amp = splittingAmpList[s,p]     
         if(amp > 0)
            freq = off - freq0 + splittingFreqList[s,p]
            cmat = cmat + amp*exp(i*(2*pi*freq*t + ph)).*exp(-t/T2-t/T2Star)  
         endif       
      next(s)
   next(p)      
   mat = ctor(cmat)
   mat = sigAmp*mat/max(mag(mat))
   mat = mat + nl*noise(dataSize)

endproc(mat)
