#########################################################
# 
# WaitTriggerIn
#  
# Checks the functionality of the TTL trigger input
# and the TTL out pulse.
#
# Note: only for Spinsolves with this hardware upgrade.
#
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(WaitTriggerIn, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"WaitTriggerIn")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("WaitTriggerIn")
   else
      gExpt->addExperiment(parentPath,"WaitTriggerIn",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds [""] to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)

pr "Waiting for trigger...\n"
   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = ["freqCh1   = 2",
          "smode      = trigMode"]
   var = [""]
   pp_list = ["smode"]
   pp_name = "WaitTriggerIn.p"
   phase_list = [0]

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)

#########################################################
# Execute the pulse program, collecting nrScans of 
# data and displaying the result in the 1D plot. 
#
# This procedure can be modified to perform more
# complex functions using the passed parameters:
#
# guipar ..... all parameters from the user interface
# ppList ..... the pulse program parameter list
# pcList ..... phase-cycle list
# pcIndex .... indices of phase parameters in ppList
# varIndex ... indices of variable parameters in ppList
#
# March 2021 CDE
#########################################################

procedure(execpp,guipar,ppList,pcList,pcIndex,varIndex)

# Make all gui parameters available
   assignlist(guipar)

   gFX3->triggerMode = 1

    # Set phases for this scan
      (ppList,pAcq) = ucsRun:setPPPhase(ppList,0,pcList,pcIndex)

    # Send all parameter values to spectrometer (DSP)/generate event table (FX3)
       ucsRun:updatePPParameters(ppList,guipar)

    # Wait for the repetition time to complete
      check = ucsRun:checkTiming(guipar,0,pcList)
      if(check == "abort")
         return(0)
      endif
    # Run the pulse program
      status = ucsRun:runExperiment(guipar)

    # See if stop button/escape key pressed
      if(status != "ok")
         return(0)
      endif


endproc("execpp") # Don't remove argument


#########################################################
## Get the name of a plot file given the region name
## or return the whole list
#########################################################
#
#procedure(getPlotInfo,plotRegion)
#
#   info = ["pt1","fid.pt1","pt2","spectrum.pt1"]
#
#   if(plotRegion == "all")
#      return(info)
#   endif
#
#   idx = getlistindex(info,plotRegion)
#   if(idx != -1)
#      return(info[idx+1])
#   endif
#
#endproc(null)

########################################################
# Return expected experiment duration in seconds
# Because of the trigger this can take forever!
########################################################

procedure(expectedDuration, guipar)

endproc(-1)

