##############################################################
# This procedure protects the procedures after
# interfaceDescrition from being overwritten when compiling
##############################################################

procedure(status)

endproc("readonly")


##############################################################
# This procedure describes the experiment parameter
# user interface. This is autogenerated from the pulse program
# interface list. Do not modify manually
##############################################################

procedure(interfaceDescription)

   interface = [
      "b1FreqCh1","B1 frequency (MHz)","tb","double","[1,400]",
      "trigMode","Trigger mode","tm","string","[\"low\",\"high\",\"rising\",\"falling\"]",
      "repTime","Repetition time (ms)","tb","float","[1,1e+008]",
      "acquDiv","Acquisition","dv", "Acquisition", "",
      "rxGain","Receiver gain","tm","integer","$gData->rxGainMenu$",
      "rxPhase","Receiver phase","tb","float","[-360,360]",
      "nrPnts","Number of points","tm","integer","$gData->nrPntsMenu$",
      "dwellTime","Dwell time (us)","tm","float","$gData->dwellTimeMenu$",
      "nrScans","Number of scans","tb","float","[1,1e8]",
      "flatFilter","Flat filter","cb","string","no,yes",
      "accumulate","Accumulate data","cb","string","no,yes",
      "usePhaseCycle","Phase cycle","cb","string","no,yes",
      "bandwidth","Bandwidth (kHz)","tb2","float","",
      "acqTime","Acquisition time (ms)","tb","float",""]


endproc(interface)


#####################################################
# Organise plots for running and loading experiments
# Each row has quoted plot names separated by a semicolon
# Allowable plot names are ptx or imx. (x = 1,2 ...)
# Can have up to 6 plots for 1D 4 for 2D.
#####################################################

procedure(plot_run_layout)

   layout = ["pt1"]

endproc(layout)


procedure(plot_load_layout)

   layout = ["pt1"]

endproc(layout)

#####################################################
# Defines the buttons which will appear to the 
# right of the plots below the default buttons.
# If 'null' is returned or this proceudre is missing
# then only default controls will be added.
# Controls may be defined as structure array. 
# Each line defines one button and  must end with
# a seimcolon. Parameters for each button
# are separated by commas.
# All quotes must be correctly escaped if inside
# a string.
# If only one item is in the list it must end in a 
# semicolon to make it a structure array.
#####################################################


procedure(processing_controls)

   layout = struct(buttonLabel = "SNR",     plotName = "pt1", macroToRun = "snrSpectrum()";
                   buttonLabel = "FT",      plotName = "pt1", macroToRun = "apodizeNTransform(\"pt1\",\"pt2\")";
                   buttonLabel = "Phase",   plotName = "pt2", macroToRun = "manualPhase1DSpecial()";
                   buttonLabel = "Apodize", plotName = "pt2", macroToRun = "apodizeFreq()";
                   buttonLabel = "SNR",     plotName = "pt2", macroToRun = "snrSpectrum()";
                   buttonLabel = "ppm/Hz",  plotName = "pt2", macroToRun = "togglePPM_Hz(1)";
                   buttonLabel = "Calib.",  plotName = "pt2", macroToRun = "calibrateXAxis()";
                   buttonLabel = "MNova",   plotName = "pt1", macroToRun = "exportMNova(\"pt1\")";
                   buttonLabel = "MNova",   plotName = "pt2", macroToRun = "exportMNova(\"pt1\")";
                   buttonLabel = "Integ.",  plotName = "pt2", macroToRun = "PeakIntegration(\"pt2\")")

endproc(layout)


