#########################################################
# 
# PPNAME
HEADING
# Copyright (c) Magritek Ltd 2026
#
# U.I. V5
#########################################################

#########################################################
# 
# The is the entry point for the KeaExpert 
# interface. It will add the experiment to the parameter
# list or with the shift key pressed open the
# relevant macros in the pulse program compiler.
#
# Autogenerated 
#
#########################################################

procedure(PPNAME, parameters=null)

   macroLocation = getmacropath()
   parentPath = getbasepath(macroLocation)

   if(iskeypressed("shift"))
      PulseProgramCompiler(guiwinnr(),null,parentPath,"PPNAME")
   elseif(iskeypressed("control"))
      gView->showExperimentHelp("PPNAME")
   else
      gExpt->addExperiment(parentPath,"PPNAME",parameters)
   endif

endproc()

#########################################################
# 
# Provide a backdoor interface to this macro. This 
# adds variables to the user interface list (guipar)
# and also generates the pulse program lists required 
# by execpp. Finally is calls execpp, returning any
# results in the structure 'r'.
#
# Autogenerated 
#
#########################################################

procedure(backdoor, guipar)
PRECODE
   seqInfo = :getseqpar()  
   r = gSeq->initAndRunPP(getmacropath(), getmacroname(), guipar, seqInfo)

endproc(r)

#########################################################
# 
# Returns important pulse sequence parameter lists
#
# rel ......... relationship between pulse sequence parameters
# var ......... variable which change during the pulse sequence
# pp_list ..... list of pulse sequence parameters sent to DSP
# pp_name ..... name of DSP pulse program to run
# phase_list .. phase cycling information
#
# Autogenerated 
#
#########################################################

procedure(getseqpar)

   rel = relationships
   var = variables
   pp_list = lst
   pp_name = ppName
   phase_list = phaseList

   seqInfo = struct(rel,var,pp_list,pp_name,phase_list)

endproc(seqInfo)
