procedure(interface_description)

  interface = [
      "showTimeDomain","Show time domain?","cb", "string", "no,yes",
      "filter","Apodisation filter?","cb", "string", "no,yes",
      "filterType","Filter type","tm", "string", "none,exp:1,exponential,sinebellsquared",
      "tdPhaseCorr","Time domain magnitude?","cb", "string", "none,mag",
      "autoPhase","Auto-phase?","cb", "string", "no,yes",
      "showFreqDomain","Show frequency domain?","cb", "string", "no,yes",
      "usePPMScale","Use ppm scale?","cb", "string", "no,yes",
      "dispRangeMinPPM","Minimum PPM value","tb", "float", "[-2000,2000]",
      "dispRangeMaxPPM","Maximum PPM value","tb", "float", "[-2000,2000]",
      "dispRange","Display range (kHz)","tb", "float", "[0,2000]",
      "fdPhaseCorr","Freq. domain magnitude?","cb", "string", "none,mag"]


endproc(interface,"Processing")
